// modelName heldt_lpc_2002
// isDescribedBy 11842064
// modelName: Heldt_Shim_2002
def model Heldt_Shim_2002 as
  // Computational modeling of cardiovascular response to orthostatic stress
  //
  // Catherine Lloyd
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both COR and PCEnv to reproduce the published results. The units have been checked and they balance. This is a lumped parameter model for cardiac activation based on the work of Heldt et al. 2002. This CellMl model represents the whole heart (all four chambers) connected to a lumped parameter model of the circulatory system including systemic circulation, a coronary circulation, and a pulmonary circulation. The model and results are exactly the same as the JSim model (http://physiome.org/model/doku.php?id=Integrative_Physiology:Lumped_parameter_circulation:model_detail#Detailed_Description) of the same name.
  //
  // Model Structure
  //
  // ABSTRACT: The objective of this study is to develop a model of the cardiovascular system capable of simulating the short-term (less than or equal to 5 min) transient and steady-state hemodynamic responses to head-up tilt and lower body negative pressure. The model consists of a closed-loop lumped-parameter representation of the circulation connected to set-point models of the arterial and cardiopulmonary baroreflexes. Model parameters are largely based on literature values. Model verification was performed by comparing the simulation output under baseline conditions and at different levels of orthostatic stress to sets of population-averaged hemodynamic data reported in the literature. On the basis of experimental evidence, we adjusted some model parameters to simulate experimental data. Orthostatic stress simulations are not statistically different from experimental data (two-sided test of significance with Bonferroni adjustment for multiple comparisons). Transient response characteristics of heart rate to tilt also compare well with reported data. A case study is presented on how the model is intended to be used in the future to investigate the effects of post-spaceflight orthostatic intolerance.
  //
  // model diagram
  //
  // Schematic diagram of the Heldt et al. 2002 circulation model.
  //
  // The original paper reference is cited below:
  //
  // Computational modeling of cardiovascular response to orthostatic stress, T. Heldt, E.B. Shim, R.D. Kamm, and R.G. Mark, 2002, Journal of Applied Physiology , 92, 1239-1254. PubMed ID: 11842064 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?db=pubmed&cmd=Retrieve&dopt=AbstractPlus&list_uids=11842064&query_hl=1&itool=pubmed_docsum)
  def unit ratepm as
    unit second {expo: -1.0, mult: 60.0};
  enddef;
  def unit inductance as
    unit s {expo: 2.0};
    unit mL {expo: -1.0};
    unit mmHg;
  enddef;
  def unit flowLm as
    unit litre;
    unit second {expo: -1.0, mult: 60.0};
  enddef;
  def unit resistance as
    unit mL {expo: -1.0};
    unit mmHg;
    unit s;
  enddef;
  def unit mmHgmlm2 as
    unit mmHg;
    unit mL {expo: -2.0};
  enddef;
  def unit flow as
    unit litre {pref: milli};
    unit second {expo: -1.0};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit capacitance as
    unit mL;
    unit mmHg {expo: -1.0};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit perml as
    unit mL {expo: -1.0};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.322};
  enddef;
  def unit elastance as
    unit litre {expo: -1.0, pref: milli};
    unit pascal {mult: 133.322};
  enddef;
  def unit s as
    unit second;
  enddef;
  def unit Hz as
    unit s {expo: -1.0};
  enddef;

  def comp lpc as
    // description: Unstressed end-systolic left ventricle volume
    var Vlvrs: mL {init: 23};
    // isComputationalComponentFor: #property_0; #entity_0; hasPhysicalDefinition http://identifiers.org/fma/FMA:9869; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Total volume enclosed by pericardium
    var Vpcd: mL;
    // isComputationalComponentFor: #property_1; #entity_1; #entity_2; hasPhysicalDefinition http://identifiers.org/fma/FMA_45626; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Systemic veins pressure
    var Psv: mmHg;
    // isComputationalComponentFor: #property_2; #process_0; description ; name Proximal epicardial arteries flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Proximal epicardial arteries flow
    var Fcorao: flow;
    // isComputationalComponentFor: #property_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary arterioles flow
    var Fpa: flow;
    // isComputationalComponentFor: #property_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary capillaries flow
    var Fpc: flow;
    // description: Active vasomotor tone scaling parameter for systemic arterial pressure
    var Kc: mmHg {init: 497.7852450367};
    // isComputationalComponentFor: #property_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary veins flow
    var Fpv: flow;
    // description: Distal pulmonary artery inertance
    var Lpad: inductance {init: 1.932239e-4};
    // isComputationalComponentFor: #property_6; #entity_3; #entity_4; hasPhysicalDefinition http://identifiers.org/fma/FMA:279943; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary venous volume
    var PulVenVol: mL;
    // description: Transmural proximal aortic resistance
    var Rtaop: resistance {init: 0.2};
    // isComputationalComponentFor: #property_7; #entity_5; #entity_6; name Large coronary veins; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Large coronary veins volume
    var Vcorlv: mL {init: 8.213955};
    // description: Prox. systemic arteries compliance
    var Csap: capacitance {init: 1.4843409851};
    // description: Transmural distal aortic resistance
    var Rtaod: resistance {init: 0.3};
    // description: Scaling factor for systemic venous pressure
    var Kv: mmHg {init: 21.83};
    // isComputationalComponentFor: #property_8; #entity_7; #entity_8; hasPhysicalDefinition http://identifiers.org/fma/FMA:279890; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary arterioles volume
    var Vpa: mL {init: 58.926};
    // isComputationalComponentFor: #property_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary shunt flow
    var Fps: flow;
    // description: Pressure scaling constant for systemic arterial resistance
    var Kr: resistance {init: 0.01};
    // isComputationalComponentFor: #property_10; physicalPropertyOf #entity_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary capillaries volume
    var Vpc: mL {init: 107.57022};
    // isComputationalComponentFor: #property_11; #entity_11; #entity_12; hasPhysicalDefinition http://identifiers.org/fma/FMA:66643; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary veins volume
    var Vpv: mL {init: 293.0398};
    // description: Aortic distal compliance
    var Caod: capacitance {init: 1.4544677036};
    // description: Compliance of coronary capillaries
    var Ccorcap: capacitance {init: 1.8};
    // isComputationalComponentFor: #property_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Small coronary arteries flow
    var Fcorsa: flow;
    // isComputationalComponentFor: #property_13; #entity_13; #entity_14; hasPhysicalDefinition http://identifiers.org/fma/FMA_70827; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary veins chamber pressure
    var Ppvc: mmHg;
    // description: Scaler to set atrial systolic fraction of heart cycle
    var TsaK: s {init: 0.2};
    // description: Unstressed end-diastolic left ventricle volume
    var Vlvrd: mL {init: 72};
    // description: Pericardial P-V curve parameter
    var Vpcd_o: mL {init: 785};
    // description: Aortic proximal compliance
    var Caop: capacitance {init: 0.3445734208};
    // isComputationalComponentFor: #property_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal epicardial arteries chamber pressure
    var Pcoreac: mmHg;
    // description: Large coronary arteries resistance
    var Rcorla: resistance {init: 5.073345};
    // isComputationalComponentFor: #property_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Small coronary veins flow
    var Fcorsv: flow;
    // description: Time - Solution domain
    var t: s;
    // description: Maximum elastance of first left ventricle component
    var Emaxlv: elastance {init: 5.6};
    // isComputationalComponentFor: #property_16; #entity_15; part_of #entity_16; name Wall of artery; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Vena cava transmural pressure
    var Pvc: mmHg;
    // isComputationalComponentFor: #property_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Large coronary arteries chamber pressure
    var Pcorlac: mmHg;
    // description: Non-driving ECG curve
    var P_QRSwave: mV;
    // isComputationalComponentFor: #property_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Flow across tricuspid valve
    var Fra: flow;
    // description: Maximum elastance right ventricle
    var Eminra: elastance {init: 0.0992431888};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Vena cava chamber pressure
    var Pvcc: mmHg;
    // isComputationalComponentFor: #property_20; #entity_18; hasPhysicalDefinition http://identifiers.org/fma/FMA_11350; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pericardial chamber pressure
    var Ppcdc: mmHg;
    // description: Cardiac output
    var COutput: flow {init: 108.56912706};
    // description: Distal proximal pulmonary resistance
    var Rpad: resistance {init: 0.03};
    // description: Unstressed end-systolic right ventricle volume
    var Vrvrs: mL {init: 53};
    // description: Maximum elastance left atrium
    var Emaxla: elastance {init: 0.1446191772};
    // isComputationalComponentFor: #property_21; #entity_19; #entity_20; name Proximal pulmonary arteries; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal pulmonary chamber arterial pressure
    var Ppapc: mmHg;
    // isComputationalComponentFor: #property_22; #entity_21; #entity_22; hasPhysicalDefinition http://identifiers.org/fma/FMA:7096; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Fluid volume in the right atrium
    var Vra: mL {init: 78.2537};
    // description: Cardiac output equation time constant
    var COtau: s {init: 15};
    // description: P-V curve shaping parameter
    var Px1: mmHg {init: 1};
    // isComputationalComponentFor: #property_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Flow across pulmonary valve
    var Frv: flow;
    // description: P-V curve shaping parameter
    var Px2: mmHg {init: 2};
    // description: Unstressed end-diastolic right ventricle volume
    var Vrvrd: mL {init: 103};
    // isComputationalComponentFor: #property_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic arteries flow
    var Fsa: flow;
    // isComputationalComponentFor: #property_25; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic capillaries flow
    var Fsc: flow;
    // description: Proximal pulmonary resistance
    var Rpap: resistance {init: 1e-4};
    // isComputationalComponentFor: #property_26; #entity_23; #entity_24; hasPhysicalDefinition http://identifiers.org/fma/FMA:7098; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Fluid volume in the right ventricle
    var Vrv: mL {init: 167.4806};
    // isComputationalComponentFor: #property_27; #entity_25; #entity_26; name Coronary capillaries; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Coronary capillary chamber pressure
    var Pcorcapc: mmHg;
    // isComputationalComponentFor: #property_28; #entity_27; #entity_28; hasPhysicalDefinition http://identifiers.org/fma/FMA:45623; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of systemic arteries
    var Vsa: mL {init: 519.7915};
    // isComputationalComponentFor: #property_29; #entity_29; #entity_30; hasPhysicalDefinition http://identifiers.org/fma/FMA:14122; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Systemic capillaries volume
    var Vsc: mL {init: 256.8555};
    // isComputationalComponentFor: #property_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic veins flow
    var Fsv: flow;
    // isComputationalComponentFor: #property_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Mean arterial blood pressure
    var MAP: mmHg {init: 90.6179};
    // description: Pulmonary arterial inertance
    var Lpa: inductance {init: 1.801907e-4};
    // description: Compliance of large coronary arteries
    var Ccorla: capacitance {init: 0.09129};
    // description: Distal pulmonary arterial transmural resistance
    var Rtpad: resistance {init: 0.05};
    // description: Right atrial elastance
    var Era: elastance;
    // isComputationalComponentFor: #property_32; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Small coronary arteries chamber pressure
    var Pcorsac: mmHg;
    // isComputationalComponentFor: #property_33; #entity_31; #entity_32; hasPhysicalDefinition http://identifiers.org/fma/FMA:66644; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Systemic veins volume
    var Vsv: mL {init: 2961.6507};
    // isComputationalComponentFor: #property_34; #process_1; description ; name Epicardial veins flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Epicardial veins flow
    var Fcorev: flow;
    // isComputationalComponentFor: #property_35; #entity_33; #entity_34; name Coronary capillaries; name Wall of capillary; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Coronary capillary transmural pressure
    var Pcorcap: mmHg;
    // isComputationalComponentFor: #property_36; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Epicardial veins chamber pressure
    var Pcorevc: mmHg;
    // isComputationalComponentFor: #property_37; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Large coronary veins transmural pressure
    var Pcorlv: mmHg;
    // isComputationalComponentFor: #property_38; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Minimal volume of systemic arteries
    var Vsa_o: mL {init: 485.7624931891};
    // description: Passive vasomotor tone scaling parameter for systemic arterial pressure
    var Kp1: mmHg {init: 0.03};
    // description: Passive vasomotor tone scaling parameter for systemic arterial pressure
    var Kp2: mmHgmlm2 {init: 0.05};
    // description: Heart Rate
    var HR: ratepm {init: 77};
    // isComputationalComponentFor: #property_39; #entity_35; #entity_36; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_7097; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Left atrial chamber pressure
    var Plac: mmHg;
    // isComputationalComponentFor: #property_40; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Total blood volume
    var Vtot: mL;
    // description: Fluid resistance in the left atrium
    var Rla: resistance {init: 0.001};
    // description: P-V curve shaping parameter
    var Vx75: mL {init: 75};
    // description: Right ventricular elastance
    var Erv: elastance;
    // description: Unstressed end-systolic right atrium volume
    var Vrars: mL {init: 8};
    // description: Minimum elastance right ventricle
    var Eminrv: elastance {init: 0.1041640922};
    // isComputationalComponentFor: #property_41; physicalPropertyOf #entity_38; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal aorta chamber pressure
    var Paopc: mmHg {init: 87.93968};
    // description: Unstressed end-diastolic right atrium volume
    var Vrard: mL {init: 10};
    // isComputationalComponentFor: #property_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Vena cava flow
    var Fvc: flow;
    // description: Pulmonary arterioles compliance
    var Cpa: capacitance {init: 3.1321449506};
    // description: Scaler to set ventricular systolic fraction of heart cycle
    var TsvK: s {init: 0.35};
    // description: Pulmonary capillaries compliance
    var Cpc: capacitance {init: 7.7147};
    // description: Maximum volume of vena cava
    var Vmax_vc: mL {init: 350.5314};
    // description: P-V curve shaping parameter
    var Vx1: mL {init: 1};
    // isComputationalComponentFor: #property_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Large coronary veins chamber pressure
    var Pcorlvc: mmHg;
    // isComputationalComponentFor: #property_44; #entity_40; #entity_41; name Distal pulmonary arteries; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal pulmonary arterial chamber pressure
    var Ppadc: mmHg;
    // isComputationalComponentFor: #property_45; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Unstressed left atrial volume
    var Vlar: mL;
    // isComputationalComponentFor: #property_46; #entity_17; #entity_16; hasPhysicalDefinition http://identifiers.org/fma/FMA_321896; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Vena cava volume
    var Vvc: mL {init: 232.46638962};
    // description: Coronary capillaries resistance
    var Rcorcap: resistance {init: 4.227788};
    // description: Scaling constant for unstressed and distended Vena cava pressure
    var K1: dimensionless {init: 0.0968305478};
    // description: Pulmonary veins compliance
    var Cpv: capacitance {init: 27.87028922};
    // description: Scaling constant for partially collapsed Vena cava pressure
    var K2: mmHg {init: 0.4};
    // description: Pulmonary valve resistance
    var Rpuv: resistance {init: 1e-4};
    // isComputationalComponentFor: #property_47; #entity_42; hasPhysicalDefinition http://identifiers.org/fma/FMA_9740; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pleural chamber pressure
    var Pplc: mmHg {init: -5.6};
    // isComputationalComponentFor: #property_48; #entity_43; #entity_44; hasPhysicalDefinition http://identifiers.org/fma/FMA:49893; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Large coronary arteries volume
    var Vcorla: mL {init: 4.992799};
    // isComputationalComponentFor: #property_49; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Large coronary arteries transmural pressure
    var Pcorla: mmHg;
    // isComputationalComponentFor: #property_50; #process_2; name Distal epicardial arteries flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Distal epicardial arteries flow
    var Fcorea: flow;
    // description: Distal epicardial arteries resistance
    var Rcorea: resistance {init: 2.642367};
    // description: Scaling parameter for pericardial P-V curve
    var K_pcd: mmHg {init: 1};
    // description: Discrete systolic interval for atria
    var Tsa: s;
    // isComputationalComponentFor: #property_51; #entity_45; #entity_46; hasPhysicalDefinition http://identifiers.org/fma/FMA_279851; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal epicardial arteries chamber pressure
    var Pcoraoc: mmHg;
    // description: P-V curve shaping parameter
    var Vx8: mL {init: 8};
    // description: Compliance of large coronary veins
    var Ccorlv: capacitance {init: 0.68372};
    // isComputationalComponentFor: #property_52; physicalPropertyOf #entity_47; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal systemic arteries pressure
    var Psap: mmHg;
    // description: Right atrium activation function
    var yla: dimensionless;
    // isComputationalComponentFor: #property_53; #entity_49; #entity_50; hasPhysicalDefinition http://identifiers.org/fma/FMA_87209; hasPhysicalDefinition http://identifiers.org/fma/FMA_14156; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal aorta transmural pressure
    var Paod: mmHg;
    // description: Difference in atrial, venticular activation times
    var PRint: s {init: 0.12};
    // description: Epicardial veins resistance
    var Rcorev: resistance {init: 0.4932479};
    // description: Scaling factor for Vena cava resistance
    var KR: resistance {init: 0.01};
    // description: Offsetting constant for partially collapsed vena cava pressure
    var D2: mmHg {init: -5};
    // isComputationalComponentFor: #property_54; #entity_51; #entity_52; name Distal epicardial arteries volume; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Distal epicardial arteries volume
    var Vcorea: mL {init: 4.41135};
    // description: Maximum elastance right ventricle
    var Emaxrv: elastance {init: 0.67};
    // description: Discrete systolic interval for ventricles
    var Tsv: s;
    // isComputationalComponentFor: #property_55; physicalPropertyOf #entity_53; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal aorta transmural pressure
    var Paop: mmHg;
    // description: Small coronary arteries resistance
    var Rcorsa: resistance {init: 5.073345};
    // isComputationalComponentFor: #property_56; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Small coronary veins chamber pressure
    var Pcorsvc: mmHg;
    // isComputationalComponentFor: #property_57; #entity_47; #entity_48; name Proximal systemic arteries; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Proximal systemic arteries volume
    var Vsap: mL {init: 129.6439};
    // isComputationalComponentFor: #property_58; #entity_55; #entity_56; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_7101; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Left ventricular chamber pressure
    var Plvc: mmHg;
    // description: Pulmonary arterioles resistance
    var Rpa: resistance {init: 0.0565149137};
    // description: Maximal volume of lumped systemic veins
    var Vmax_sv: mL {init: 3379.545};
    // description: Mimimum volume of vena cava
    var Vmin_vc: mL {init: 50.010747};
    // description: Left ventricle activation function
    var ylv: dimensionless;
    // isComputationalComponentFor: #property_59; #entity_57; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_9531; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure in the left atrium
    var Pla: mmHg;
    // description: Pulmonary capillaries resistance
    var Rpc: resistance {init: 0.0309026688};
    // description: Maximum elastance right atrium
    var Emaxra: elastance {init: 0.1091675077};
    // isComputationalComponentFor: #property_60; #entity_58; #entity_59; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_7096; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Right atrial chamber pressure
    var Prac: mmHg;
    // description: Normalized discharge rate for vasomotor control
    var F_vaso: dimensionless {init: 0.5};
    // isComputationalComponentFor: #property_61; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Cerebral flow
    var Fcrb: flow;
    // description: Systemic capillaries compliance
    var Csc: capacitance {init: 7.9822364317};
    // isComputationalComponentFor: #property_62; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Proximal systemic arteries flow
    var Fsap: flow;
    // description: Time from start of ventricular contraction cycle
    var trelv: s;
    // description: Pulmonary shunt resistance
    var Rps: resistance {init: 4.2958026137};
    // isComputationalComponentFor: #property_63; #entity_60; part_of #entity_46; name Wall of artery; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal epicardial arteries transmural pressure
    var Pcorao: mmHg;
    // description: Pulmonary veins resistance
    var Rpv: resistance {init: 1e-4};
    // isComputationalComponentFor: #property_64; #entity_61; #entity_62; hasPhysicalDefinition http://identifiers.org/fma/FMA:279902; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Epicardial veins volume
    var Vcorev: mL {init: 8.76758};
    // isComputationalComponentFor: #property_65; #entity_63; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_9556; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure in the left ventricle
    var Plv: mmHg;
    // description: Small coronary veins resistance
    var Rcorsv: resistance {init: 0.4932479};
    // isComputationalComponentFor: #property_66; #entity_64; #entity_65; hasPhysicalDefinition http://identifiers.org/fma/FMA:87208; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Proximal aorta volume
    var Vaop: mL {init: 31.1705};
    // isComputationalComponentFor: #property_67; #process_3; name Coronary capillaries flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Coronary capillaries flow
    var Fcorcap: flow;
    // description: Active vasomotor tone volume parameter for systemic arterial pressure
    var Do: mL {init: 50};
    // isComputationalComponentFor: #property_68; #entity_66; #entity_67; hasPhysicalDefinition http://identifiers.org/fma/FMA:87209; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Distal aorta volume
    var Vaod: mL {init: 138.4476};
    // description: Time from start of atrial contraction cycle
    var trela: s;
    // description: Passive systemic arterial pressure component
    var Psa_p: mmHg;
    // isComputationalComponentFor: #property_69; #process_4; #mediator_0; hasPhysicalEntityReference #entity_49; #sink_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_47; #source_0; hasMultiplier 1.0; #entity_38; #entity_39; name Proximal zone of aorta; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; name Blood flow through the distal aorta; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Distal aorta flow
    var Faod: flow {init: 23.5957};
    // description: Fluid resistance in the right atrium
    var Rra: resistance {init: 0.001};
    // description: Compliance of proximal epicardial arteries
    var Ccorao: capacitance {init: 0.13};
    // isComputationalComponentFor: #property_70; #process_5; #mediator_1; #entity_53; #entity_54; name Proximal zone of aorta; hasPhysicalDefinition http://identifiers.org/fma/FMA_14156; #sink_1; hasMultiplier 1.0; hasPhysicalEntityReference #entity_68; name Blood flow through proximal aorta; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Proximal aorta flow
    var Faop: flowLm {init: 0.698577};
    // description: Active systemic arterial pressure component
    var Psa_a: mmHg;
    // description: Pericardial fluid in pericardial cavity
    var perifl: mL {init: 15};
    // description: Proximal pulmonary artery chamber pressure (systolic)
    var Ppapc1: mmHg;
    // description: Aortic valve resistance
    var Rav: resistance {init: 1e-4};
    // description: Proximal pulmonary artery chamber pressure (diastolic)
    var Ppapc2: mmHg;
    // description: Resistance of systemic arteries
    var Rsa: resistance;
    // description: Systemic capillaries resistance
    var Rsc: resistance {init: 0.1545054945};
    // description: Unstressed end-diastolic left atrium volume
    var Vlard: mL {init: 10};
    // isComputationalComponentFor: #property_71; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Unstressed left ventricle volume
    var Vlvr: mL;
    // description: Unstressed blood volume of vena cava
    var Vo: mL {init: 129.6486};
    // isComputationalComponentFor: #property_72; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Unstressed right atrial volume
    var Vrar: mL;
    // description: Proximal epicardial arteries resistance
    var Rcorao: resistance {init: 2.642367};
    // description: Proximal pulmonary arterial transmural resistance
    var Rtpap: resistance {init: 0.05};
    // description: Distal aorta inertance
    var Laod: inductance {init: 3.5e-4};
    // description: Unstressed end-systolic left atrium volume
    var Vlars: mL {init: 8};
    // isComputationalComponentFor: #property_73; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Flow across mitral valve
    var Fla: flow;
    // description: Proximal aorta inertance
    var Laop: inductance {init: 3.5e-4};
    // isComputationalComponentFor: #property_74; #entity_70; part_of #entity_71; hasPhysicalDefinition http://identifiers.org/fma/FMA_74653; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary arterioles transmural pressure
    var Ppa: mmHg;
    // description: Systemic veins resistance
    var Rsv: resistance {init: 0.1381298227};
    // isComputationalComponentFor: #property_75; #entity_72; #entity_73; hasPhysicalDefinition http://identifiers.org/fma/FMA:9462; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Myocardium blood volume
    var Vmyo: mL {init: 238};
    // isComputationalComponentFor: #property_76; #entity_74; #entity_75; hasPhysicalDefinition http://identifiers.org/fma/FMA:7097; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Fluid volume in the left atrium
    var Vla: mL {init: 85.9126};
    // isComputationalComponentFor: #property_77; #entity_76; #entity_77; hasPhysicalDefinition http://identifiers.org/fma/FMA_17530; hasPhysicalDefinition http://identifiers.org/fma/FMA_9740; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pleural pressure
    var Ppl: mmHg;
    // isComputationalComponentFor: #property_78; #entity_78; part_of #entity_28; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Systemic arterial volume
    var SysArtVol: mL;
    // isComputationalComponentFor: #property_79; #entity_79; #entity_80; name Multicellular organism; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Total blood in circulation
    var VBcirc: mL;
    // description: Minimum elastance left atrium
    var Eminla: elastance {init: 0.1314719793};
    // isComputationalComponentFor: #property_80; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Flow across aortic valve
    var Flv: flow;
    // isComputationalComponentFor: #property_81; #entity_81; #entity_82; hasPhysicalDefinition http://identifiers.org/fma/FMA_14121; name Wall of capillary; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary capillaries transmural pressure
    var Ppc: mmHg;
    // isComputationalComponentFor: #property_82; #entity_83; #entity_84; name Distal pulmonary arteries; name Wall of artery; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal pulmonary arterial transmural pressure
    var Ppad: mmHg;
    // isComputationalComponentFor: #property_83; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Maximum luminal volume of systemic arteries
    var Vsa_max: mL {init: 577.7106000108};
    // isComputationalComponentFor: #property_84; #entity_85; #entity_71; hasPhysicalDefinition http://identifiers.org/fma/FMA_279896; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary arterioles chamber pressure
    var Ppac: mmHg;
    // description: Cerebral circulation resistance
    var Rcrb: resistance {init: 6.8284472205};
    // isComputationalComponentFor: #property_85; #entity_86; #entity_87; part_of #entity_44; hasPhysicalDefinition http://identifiers.org/fma/FMA:241739; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Coronary capillaries volume
    var Vcorcap: mL {init: 8.55228};
    // isComputationalComponentFor: #property_86; #entity_88; #entity_89; hasPhysicalDefinition http://identifiers.org/fma/FMA:7101; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Blood volume in the left ventricle
    var Vlv: mL {init: 125.360568};
    // isComputationalComponentFor: #property_87; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Epicardial veins transmural pressure
    var Pcorev: mmHg;
    // isComputationalComponentFor: #property_88; #entity_90; #entity_91; hasPhysicalDefinition http://identifiers.org/fma/FMA:279855; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Proximal epicardial arteries volume
    var Vcorao: mL {init: 2.76087};
    // description: Compliance of small coronary arteries
    var Ccorsa: capacitance {init: 0.15602};
    // isComputationalComponentFor: #property_89; #entity_92; #entity_93; name Proximal pulmonary arteries; name Wall of artery; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Proximal pulmonary arterial transmural pressure
    var Ppap: mmHg;
    // isComputationalComponentFor: #property_90; #entity_94; #entity_95; #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_7088; hasPhysicalDefinition http://identifiers.org/fma/FMA_7098; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Right ventricular chamber pressure
    var Prvc: mmHg;
    // isComputationalComponentFor: #property_91; #entity_96; part_of #entity_14; name Wall of vein; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary veins transmural pressure
    var Ppv: mmHg;
    // description: Arteriolar resistance offset
    var Rsao: resistance {init: 0.5508058134};
    // description: Prox. systemic arteries resistance
    var Rsap: resistance {init: 0.025};
    // isComputationalComponentFor: #property_92; #entity_97; #entity_98; description All blood in coronary circulation; name Coronary vasculature; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of blood in coronary circulation
    var Vcorcirc: mL;
    // description: Compliance of small coronary veins
    var Ccorsv: capacitance {init: 0.58155};
    // isComputationalComponentFor: #property_93; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal epicardial arteries transmural pressure
    var Pcorea: mmHg;
    // description: Distal aortic resistance
    var Raod: resistance {init: 0.025};
    // description: Right ventricle activation function
    var yra: dimensionless;
    // isComputationalComponentFor: #property_94; #process_6; name Large coronary arteries; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Large coronary arteries flow
    var Fcorla: flow;
    // description: Right ventricle activation function
    var yrv: dimensionless;
    // isComputationalComponentFor: #property_95; #entity_99; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_9457; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure in the right atrium
    var Pra: mmHg;
    // isComputationalComponentFor: #property_96; #entity_100; #entity_101; hasPhysicalDefinition http://identifiers.org/fma/FMA:45842; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary arterial volume
    var PulArtVol: mL;
    // description: Resistance of Vena cava
    var Rvc: resistance;
    // description: Proximal aortic resistance
    var Raop: resistance {init: 1e-4};
    // isComputationalComponentFor: #property_97; #entity_102; part_of #entity_44; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Small coronary arteries volume
    var Vcorsa: mL {init: 4.22047};
    // description: Pericardial P-V curve parameter
    var phi_pcd: mL {init: 40};
    // description: Distal pulmonary arterial compliance
    var Ctpad: capacitance {init: 2.6893667388};
    // description: Compliance of epicardial veins
    var Ccorev: capacitance {init: 0.832299};
    // isComputationalComponentFor: #property_98; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Small coronary arteries transmural pressure
    var Pcorsa: mmHg;
    // description: Left atrial elastance
    var Ela: elastance;
    // isComputationalComponentFor: #property_99; physicalPropertyOf #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Proximal pulmonary arterial volume
    var Vpap: mL {init: 33.1398};
    // description: Left ventricular elastance
    var Elv: elastance;
    // description: Large coronary veins resistance
    var Rcorlv: resistance {init: 0.4932479};
    // isComputationalComponentFor: #property_100; #entity_103; #entity_104; #entity_105; hasPhysicalDefinition http://identifiers.org/fma/FMA_9462; hasPhysicalDefinition http://identifiers.org/fma/FMA_17555; hasPhysicalDefinition http://identifiers.org/fma/FMA_280556; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Myocardium interstitial fluid pressure
    var Pcorisfc: mmHg;
    var beattime: s;
    // isComputationalComponentFor: #property_101; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Large coronary veins flow
    var Fcorlv: flow;
    // isComputationalComponentFor: #property_102; #entity_9; #entity_10; hasPhysicalDefinition http://identifiers.org/fma/FMA:14121; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pulmonary capillaries chamber pressure
    var Ppcc: mmHg;
    // description: Proximal pulmonary arterial compliance
    var Ctpap: capacitance {init: 1.5365929068};
    // isComputationalComponentFor: #property_103; #entity_106; #entity_107; hasPhysicalDefinition http://identifiers.org/fma/FMA:268693; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Distal pulmonary arterial volume
    var Vpad: mL {init: 60.11203897};
    // isComputationalComponentFor: #property_104; #entity_68; #entity_69; hasPhysicalDefinition http://identifiers.org/fma/FMA:87209; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Distal aorta chamber pressure
    var Paodc: mmHg;
    // isComputationalComponentFor: #property_105; #entity_108; hasPhysicalDefinition http://identifiers.org/fma/FMA_9892; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pericardial pressure
    var Ppcd: mmHg;
    var hrf: Hz {pub: out};
    // isComputationalComponentFor: #property_106; physicalPropertyOf #entity_27; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Systemic arterial pressure
    var Psa: mmHg;
    // isComputationalComponentFor: #property_107; #entity_109; #entity_110; hasPhysicalDefinition http://identifiers.org/fma/FMA_279935; hasPhysicalDefinition http://identifiers.org/fma/FMA_9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Systemic capillaries pressure
    var Psc: mmHg;
    // isComputationalComponentFor: #property_108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Distal pulmonary arterial flow
    var Fpad: flow {init: 57.1876};
    // description: Reference pressure at body surface (ground)
    var Pbs: mmHg {init: 0};
    // isComputationalComponentFor: #property_109; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Unstressed right ventricular volume
    var Vrvr: mL;
    // isComputationalComponentFor: #property_110; #entity_111; part_of #entity_37; hasPhysicalDefinition http://identifiers.org/fma/FMA_9533; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Blood pressure in the right ventricle
    var Prv: mmHg;
    // description: Minimum elastance of first left ventricle component
    var Eminlv: elastance {init: 0.186874659};
    // isComputationalComponentFor: #property_111; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Proximal pulmonary arterial flow
    var Fpap: flowLm {init: 1.2282};
    // isComputationalComponentFor: #property_112; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Small coronary veins transmural pressure
    var Pcorsv: mmHg;
    // isComputationalComponentFor: #property_113; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Stroke volume (COutput/HR)
    var SV: mL;
    // description: Vena cava resistance offset parameter
    var Ro: resistance {init: 0.025};
    // isComputationalComponentFor: #property_114; #entity_112; #entity_113; hasPhysicalDefinition http://identifiers.org/fma/FMA:45626; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Systemic venous volume
    var SysVenVol: mL;
    // description: Passive vasomotor tone constant for systemic arterial pressure
    var tau_p: perml {init: 0.1};
    // description: Compliance of distal epicardial arteries
    var Ccorea: capacitance {init: 0.05507};
    // isComputationalComponentFor: #property_115; #entity_114; #entity_115; name Small coronary veins; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Small coronary veins volume
    var Vcorsv: mL {init: 7.8362};
    hrf = 60{Hz2rpm}/HR;
    beattime = t-floor(t/hrf)*hrf;
    Tsv = TsvK*sqrt(1{ratepm}*1{dimensionless}/HR)*7.745966692414832{dimensionless};
    Tsa = TsaK*sqrt(1{Hz}/HR)*7.745966692414832{dimensionless};
    trelv = beattime-PRint;
    trela = beattime;
    yla = sel
      case (trela >= 0{s}) and (trela <= Tsa):
        (1{dimensionless}-cos(pi*trela/Tsa))/2{dimensionless};
      case (trela < 1.5{dimensionless}*Tsa) and (trela >= Tsa):
        (1{dimensionless}+cos(2{dimensionless}*pi*(trela-Tsa)/Tsa))/2{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    yra = yla;
    ylv = sel
      case (trelv >= 0{s}) and (trelv <= Tsv):
        (1{dimensionless}-cos(pi*trelv/Tsv))/2{dimensionless};
      case (trelv < 1.5{dimensionless}*Tsv) and (trelv >= Tsv):
        (1{dimensionless}+cos(2{dimensionless}*pi*(trelv-Tsv)/Tsv))/2{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    yrv = ylv;
    Era = (Emaxra-Eminra)*yra+Eminra;
    Erv = (Emaxrv-Eminrv)*yrv+Eminrv;
    Ela = (Emaxla-Eminla)*yla+Eminla;
    Elv = (Emaxlv-Eminlv)*ylv+Eminlv;
    ode(Faod, t) = (Paodc-Faod*Raod-Psap)/Laod;
    ode(Faop, t) = (Paopc-Faop*Raop*16.66666666666667{dimensionless}-Paodc)/Laop*0.059999999999999984{dimensionless};
    Fcorao = (Pcoraoc-Pcoreac)/Rcorao;
    Fcorcap = (Pcorcapc-Pcorsvc)/Rcorcap;
    Fcorea = (Pcoreac-Pcorlac)/Rcorea;
    Fcorev = (Pcorevc-Prac)/Rcorev;
    Fcorla = (Pcorlac-Pcorsac)/Rcorla;
    Fcorlv = (Pcorlvc-Pcorevc)/Rcorlv;
    Fcorsa = (Pcorsac-Pcorcapc)/Rcorsa;
    Fcorsv = (Pcorsvc-Pcorlvc)/Rcorsv;
    Fcrb = (Paodc-Pvcc)/Rcrb;
    Fla = sel
      case Plac > Plvc:
        (Plac-Plvc)/Rla;
      otherwise:
        0{flow};
    endsel;
    Flv = sel
      case Plvc > Paopc:
        (Plvc-Paopc)/Rav;
      otherwise:
        0{flow};
    endsel;
    Fpa = (Ppac-Ppcc)/Rpa;
    ode(Fpad, t) = (Ppadc-Ppac-Fpad*Rpad)/Lpad;
    ode(Fpap, t) = (Ppapc-Ppadc-Fpap*Rpap*16.66666666666667{dimensionless})/Lpa*0.059999999999999984{dimensionless};
    Fpc = (Ppcc-Ppvc)/Rpc;
    Fps = (Ppac-Ppvc)/Rps;
    Fpv = (Ppvc-Plac)/Rpv;
    Fra = sel
      case Prac > Prvc:
        (Prac-Prvc)/Rra;
      otherwise:
        0{flow};
    endsel;
    Frv = sel
      case Prvc > Ppapc:
        (Prvc-Ppapc)/Rpuv;
      otherwise:
        0{flow};
    endsel;
    Fsa = (Psa-Psc)/Rsa;
    Fsap = (Psap-Psa)/Rsap;
    Fsc = (Psc-Psv)/Rsc;
    Fsv = (Psv-Pvcc)/Rsv;
    Fvc = (Pvcc-Prac)/Rvc;
    ode(MAP, t) = (Psa-MAP)/COtau;
    P_QRSwave = sel
      case (t > beattime) and (t < beattime+0.02{s}):
        5{mV};
      case (t > beattime+PRint) and (t < beattime+PRint+0.02{s}):
        10{mV};
      otherwise:
        0{mV};
    endsel;
    Paod = Paodc-Pbs;
    Paodc = (Rtaod*Rcrb*Faop-Rtaod*Rcrb*Faod*0.059999999999999984{dimensionless}+Vaod*Rcrb/Caod*0.060000000000000005{dimensionless}-Rcrb*Px2/(exp(Vaod/Vx8)-1{dimensionless})*0.059999999999999984{dimensionless}+Pvcc*Rtaod*0.059999999999999984{dimensionless})/(Rcrb+Rtaod)*16.66666666666667{dimensionless};
    Paop = Paopc-Pplc;
    ode(Paopc, t) = (Flv-ode(Vaop, t)-Faop*16.66666666666667{dimensionless}-Fcorao)*(1{dimensionless}/Ccorao+Px2/1{mL}*exp(Vcorao/Vx1)/sqr(exp(Vcorao/Vx1)-1{dimensionless}));
    Pcorao = Paop;
    Pcoraoc = Paopc;
    Pcorcap = Vcorcap/Ccorcap-Px1*1{dimensionless}/(exp(Vcorcap/Vx1)-1{dimensionless});
    Pcorcapc = Pcorcap+Pcorisfc;
    Pcorea = Vcorea/Ccorea-Px1*1{dimensionless}/(exp(Vcorea/Vx1)-1{dimensionless});
    Pcoreac = Pcorea+Ppcdc;
    Pcorev = Vcorev/Ccorev-Px2*1{dimensionless}/(exp(Vcorev/Vx8)-1{dimensionless});
    Pcorevc = Pcorev+Ppcdc;
    Pcorisfc = abs((Plvc-Ppcdc)/2{dimensionless});
    Pcorla = Vcorla/Ccorla-Px1*1{dimensionless}/(exp(Vcorla/Vx1)-1{dimensionless});
    Pcorlac = Pcorla+Pcorisfc;
    Pcorlv = Vcorlv/Ccorlv-Px1*1{dimensionless}/(exp(Vcorlv/Vx1)-1{dimensionless});
    Pcorlvc = Pcorlv+Ppcdc;
    Pcorsa = Vcorsa/Ccorsa-Px1*1{dimensionless}/(exp(Vcorsa/Vx1)-1{dimensionless});
    Pcorsac = Pcorsa+Pcorisfc;
    Pcorsv = Vcorsv/Ccorsv-Px1*1{dimensionless}/(exp(Vcorsv/Vx1)-1{dimensionless});
    Pcorsvc = Pcorsv+Ppcdc;
    Pla = (Vla-Vlar)*Ela-Px2*1{dimensionless}/(exp(Vla/Vx8)-1{dimensionless});
    Plac = Pla+Ppcdc;
    Plv = (Vlv-Vlvr)*Elv-Px2*1{dimensionless}/(exp(Vlv/Vx8)-1{dimensionless});
    Plvc = Plv+Ppcdc;
    Ppa = Vpa/Cpa-Px2*1{dimensionless}/(exp(Vpa/Vx8)-1{dimensionless});
    Ppac = Ppa+Pplc;
    Ppad = Ppadc-Pplc;
    Ppadc = ode(Vpad, t)*Rtpad+Pplc+Vpad/Ctpad-Px2*1{dimensionless}/(exp(Vpad/Vx8)-1{dimensionless});
    Ppap = Ppapc-Pplc;
    Ppapc1 = (Rpuv*Vpap/Ctpap-Rpuv*Px2*1{dimensionless}/(exp(Vpap/Vx8)-1{dimensionless})+Prvc*Rtpap-Rpuv*Rtpap*Fpap*16.666666666666668{dimensionless}+Pplc*Rpuv)/(Rtpap+Rpuv);
    Ppapc2 = Vpap/Ctpap+Pplc-Rtpap*Fpap*16.666666666666668{dimensionless}-Px2*1{dimensionless}/(exp(Vpap/Vx8)-1{dimensionless});
    Ppapc = sel
      case Prvc > Ppapc1:
        Ppapc1;
      otherwise:
        Ppapc2;
    endsel;
    Ppc = Vpc/Cpc-Px2*1{dimensionless}/(exp(Vpc/Vx8)-1{dimensionless});
    Ppcc = Ppc+Pplc;
    Ppcd = K_pcd*exp((Vpcd-Vpcd_o)/phi_pcd)-Px2*1{dimensionless}/(exp(Vpcd/Vx75)-1{dimensionless});
    Ppcdc = Ppcd+Pplc;
    Ppl = Pplc-Pbs;
    Ppv = Vpv/Cpv-Px2*1{dimensionless}/(exp(Vpv/Vx8)-1{dimensionless});
    Ppvc = Ppv+Pplc;
    Pra = (Vra-Vrar)*Era-Px2*1{dimensionless}/(exp(Vra/Vx8)-1{dimensionless});
    Prac = Pra+Ppcdc;
    Prv = (Vrv-Vrvr)*Erv-Px2*1{dimensionless}/(exp(Vrv/Vx8)-1{dimensionless});
    Prvc = Prv+Ppcdc;
    Psa_a = Kc*log((Vsa-Vsa_o)/Do+1{dimensionless});
    Psa = F_vaso*Psa_a+(1{dimensionless}-F_vaso)*Psa_p;
    Psa_p = Kp1*exp(tau_p*(Vsa-Vsa_o))+Kp2*sqr(Vsa-Vsa_o);
    Psap = Vsap/Csap-Px2*1{dimensionless}/(exp(Vsap/Vx8)-1{dimensionless});
    Psc = Vsc/Csc-Px2*1{dimensionless}/(exp(Vsc/Vx8)-1{dimensionless});
    Psv = Kv*log(Vmax_sv/Vsv-0.99{dimensionless})*(-1{dimensionless});
    PulArtVol = Vpap+Vpad+Vpa;
    PulVenVol = Vpv;
    Pvc = sel
      case Vvc > Vo:
        D2+K2*exp(Vo/Vmin_vc)+K1*(Vvc-Vo)/1{capacitance}-Px2/(exp(Vvc/Vx8)-1{dimensionless});
      otherwise:
        D2+K2*exp(Vvc/Vmin_vc)-Px2/(exp(Vvc/Vx8)-1{dimensionless});
    endsel;
    Pvcc = Pvc+Pplc;
    Rsa = Rsao+Kr*exp(4{dimensionless}*F_vaso)+Kr*sqr(Vsa_max/Vsa);
    Rvc = KR*sqr(Vmax_vc/Vvc)+Ro;
    SV = COutput/HR*60{dimensionless};
    SysArtVol = Vaop+Vaod+Vsa+Vsap;
    SysVenVol = Vsv+Vvc;
    VBcirc = Vtot-perifl;
    ode(Vaod, t) = (Faop-Faod*0.059999999999999984{dimensionless}-Fcrb*0.059999999999999984{dimensionless})*16.66666666666667{dimensionless};
    ode(Vaop, t) = (Paopc-Vaop/Caop+Px2*1{dimensionless}/(exp(Vaop/Vx8)-1{dimensionless}))/Rtaop;
    ode(Vcorao, t) = Flv-ode(Vaop, t)-Faop*16.66666666666667{dimensionless}-Fcorao;
    ode(Vcorcap, t) = Fcorsa-Fcorcap;
    Vcorcirc = Vcorao+Vcorea+Vcorla+Vcorsa+Vcorcap+Vcorsv+Vcorlv+Vcorev;
    ode(Vcorea, t) = Fcorao-Fcorea;
    ode(Vcorev, t) = Fcorlv-Fcorev;
    ode(Vcorla, t) = Fcorea-Fcorla;
    ode(Vcorlv, t) = Fcorsv-Fcorlv;
    ode(Vcorsa, t) = Fcorla-Fcorsa;
    ode(Vcorsv, t) = Fcorcap-Fcorsv;
    ode(Vla, t) = Fpv-Fla;
    Vlar = (1{dimensionless}-yla)*(Vlard-Vlars)+Vlars;
    ode(Vlv, t) = Fla-Flv;
    Vlvr = (1{dimensionless}-ylv)*(Vlvrd-Vlvrs)+Vlvrs;
    ode(Vpa, t) = Fpad-Fps-Fpa;
    ode(Vpad, t) = (Fpap-Fpad*0.059999999999999984{dimensionless})*16.66666666666667{dimensionless};
    ode(Vpap, t) = Frv-Fpap*16.66666666666667{dimensionless};
    ode(Vpc, t) = Fpa-Fpc;
    Vpcd = Vrv+Vra+Vlv+Vla+perifl+Vmyo+Vcorcirc;
    ode(Vpv, t) = Fpc+Fps-Fpv;
    ode(Vra, t) = Fvc-Fra+Fcorev;
    Vrar = (1{dimensionless}-yra)*(Vrard-Vrars)+Vrars;
    ode(Vrv, t) = Fra-Frv;
    Vrvr = (1{dimensionless}-yrv)*(Vrvrd-Vrvrs)+Vrvrs;
    ode(Vsa, t) = Fsap-Fsa;
    ode(Vsap, t) = Faod-Fsap;
    ode(Vsc, t) = Fsa-Fsc;
    ode(Vsv, t) = Fsc-Fsv;
    Vtot = Vra+Vrv+Vpap+Vpad+Vpa+Vpc+Vpv+Vla+Vlv+Vaop+Vaod+Vsa+Vsap+Vsc+Vsv+Vvc+perifl+Vcorcirc;
    ode(Vvc, t) = Fsv+Fcrb-Fvc;
  enddef;
enddef;
// http://www.cellml.org/cellml/1.0#heldt_lpc_2002
// title: The Heldt et al. 2002 computational model of the heart
// comment: This is the CellML description of Heldt et al.'s computational model of the heart. Specifically the left ventricle.; FN Catherine Lloyd
// bio_entity: left ventricle
// reference: subject_type keyword; lumped parameter; cardiac; cardiovascular circulation; cardiac activation
// reference: Pubmed_id 11842064; Family Heldt; Given T; Family Shim; Given E; Other B; Family Kamm; Given R; Other D; Family Mark; Given R; Other G; title Computational modeling of cardiovascular response to orthostatic stress; W3CDTF 2002; title Journal of Applied Physiology; volume 92; first_page 1239; last_page 1254
// http://www.cellml.org/cellml/1.0
// creator: Family Cumin; Given David; value d.cumin@auckland.ac.nz; Orgname Auckland Bioengineering Institute
// created: W3CDTF 2009-10-26
// #Heldt_Shim_2002
// compartmentOf: http://purl.obolibrary.org/obo/FMA_7098
// located_in: http://purl.obolibrary.org/obo/FMA_84669
// compartmentOf: http://purl.obolibrary.org/obo/FMA_7088
// located_in: http://purl.obolibrary.org/obo/FMA_9670
// compartmentOf: http://purl.obolibrary.org/obo/FMA_9670
// located_in: http://purl.obolibrary.org/obo/FMA_7098
// modelOf: http://purl.obolibrary.org/obo/UBERON_0004535
// located_in: http://purl.obolibrary.org/obo/FMA_7101
// located_in: http://purl.obolibrary.org/obo/FMA_7088
// compartmentOf: http://purl.obolibrary.org/obo/FMA_84669
// compartmentOf: http://purl.obolibrary.org/obo/FMA_7101
