// isDescribedBy 15036180
// modelName Smith_2004
// isDescribedBy 15036180
// modelName: smith_chase_nokes_shaw_wake_2004
def model smith_2004 as
  def unit kPa_second_per_mL as
    unit pascal {pref: kilo};
    unit mL {expo: -1.0};
    unit second;
  enddef;
  def unit per_mL as
    unit liter {expo: -1.0, pref: milli};
  enddef;
  def unit mL_per_second as
    unit mL;
    unit second {expo: -1.0};
  enddef;
  def unit per_second2 as
    unit second {expo: -2.0};
  enddef;
  def unit mL as
    unit liter {pref: milli};
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit kPa_second2_per_mL as
    unit second {expo: 2.0};
    unit mL {expo: -1.0};
    unit pascal {pref: kilo};
  enddef;
  def unit mL_per_second2 as
    unit second {expo: -2.0};
    unit mL;
  enddef;
  def unit kPa_per_mL as
    unit per_mL;
    unit kPa;
  enddef;

  def comp right_ventricle as
    // isComputationalComponentFor: #property_0; physicalPropertyOf #force_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural blood Pressure in the Vena Cava
    // isPropertyOf: smith_2004.cellml#force_0
    // description: Transmural blood Pressure in the Vena Cava
    var P_vc: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#force_1
    // description: Chamber pressure of blood in the pulmonary artery
    // isComputationalComponentFor: #property_1; physicalPropertyOf #force_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of blood in the pulmonary artery
    var P_pa: kPa {pub: in};
    // isComputationalComponentFor: #property_2; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow across tricuspid valve
    // isPropertyOf: smith_2004.cellml#process_0
    // description: Blood flow across tricuspid valve
    var Q_tc: mL_per_second {pub: in};
    // description: Tricuspid valve fluid resistance
    // description: Tricuspid valve fluid resistance
    var R_tc: kPa_second_per_mL {pub: in};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // description: Right ventricular free wall end diastolic pressure
    // description: Right ventricular free wall end diastolic pressure
    var P_0_rvf: kPa {priv: in, pub: out};
    // isPropertyOf: smith_2004.cellml#force_2
    // description: Pressure across the right ventricular free wall
    // isComputationalComponentFor: #property_3; #force_2; #sink_2; hasPhysicalEntityReference #entity_8; #source_3; hasPhysicalEntityReference #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure across the right ventricular free wall
    var P_rvf: kPa {pub: out};
    // isPropertyOf: smith_2004.cellml#entity_10; is http://identifiers.org/fma/FMA:9533
    // description: Right ventricular free wall volume
    // isComputationalComponentFor: #property_4; physicalPropertyOf #entity_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Right ventricular free wall volume
    var V_rvf: mL {priv: out, pub: out};
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    var lambda_rvf: per_mL {priv: in, pub: out};
    // isPropertyOf: smith_2004.cellml#entity_6; is http://identifiers.org/fma/FMA:9670
    // description: Right ventricle blood volume
    // isComputationalComponentFor: #property_5; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Right ventricle blood volume
    var V_rv: mL {init: 90.7302, pub: out};
    // isPropertyOf: smith_2004.cellml#process_1
    // description: Blood flow through pulmonary valve
    // isComputationalComponentFor: #property_6; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through pulmonary valve
    var Q_pv: mL_per_second {pub: in};
    // isPropertyOf: smith_2004.cellml#force_3
    // description: Chamber pressure of right ventricular blood
    // isComputationalComponentFor: #property_7; physicalPropertyOf #force_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of right ventricular blood
    var P_rv: kPa {pub: out};
    // description: Right ventricular free wall end diastolic pressure
    // description: Right ventricular free wall end diastolic pressure
    var P_ed_rvf: kPa {priv: in};
    // isComputationalComponentFor: #property_8; physicalPropertyOf #force_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pericardial chamber pressure
    // isPropertyOf: smith_2004.cellml#force_4
    // description: Pericardial chamber pressure
    var P_peri: kPa {pub: in};
    // description: Right ventricular free wall end systolic elastance
    // description: Right ventricular free wall end systolic elastance
    var E_es_rvf: kPa_per_mL {priv: in, pub: out};
    // description: Right ventricular free wall end systolic pressure
    // description: Right ventricular free wall end systolic pressure
    var P_es_rvf: kPa {priv: in};
    // description: Pulmonary valve fluid resistance
    // description: Pulmonary valve fluid resistance
    var R_pv: kPa_second_per_mL {pub: in};
    // isPropertyOf: smith_2004.cellml#entity_13
    // description: Septal wall volume
    // isComputationalComponentFor: #property_9; #entity_13; hasPhysicalDefinition http://identifiers.org/fma/FMA:7180; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Septal wall volume
    var V_spt: mL {pub: in};
    // description: Heart beat driver function
    // description: Heart beat driver function
    var e_t: dimensionless {pub: in};
    V_rvf = V_rv+V_spt;
    P_rvf = e_t*P_es_rvf+(1{dimensionless}-e_t)*P_ed_rvf;
    P_rv = P_rvf+P_peri;
    ode(V_rv, time) = sel
      case (Q_tc < 0{mL_per_second}) and (Q_pv < 0{mL_per_second}):
        0{mL_per_second};
      case Q_tc < 0{mL_per_second}:
        -Q_pv;
      case Q_pv < 0{mL_per_second}:
        Q_tc;
      otherwise:
        Q_tc-Q_pv;
    endsel;
  enddef;

  def comp septum as
    // isPropertyOf: smith_2004.cellml#entity_14; is http://identifiers.org/fma/FMA:9670
    // description: Volume of blood contained in left ventricle
    // isComputationalComponentFor: #property_10; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of blood contained in left ventricle
    var V_lv: mL {pub: in};
    // isComputationalComponentFor: #property_11; physicalPropertyOf #force_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of right ventricular blood
    // isPropertyOf: smith_2004.cellml#force_3
    // description: Chamber pressure of right ventricular blood
    var P_rv: kPa {pub: in};
    // description: Septal wall end diastolic pressure
    // description: Septal wall end diastolic pressure
    var P_0_spt: kPa {init: 1.1101};
    // description: Septal wall volume at end diastolic pressure
    // isComputationalComponentFor: #property_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Septal wall volume at end diastolic pressure
    var V_0_spt: mL {init: 2};
    // description: Septal wall volume at zero pressure
    // isComputationalComponentFor: #property_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Septal wall volume at zero pressure
    var V_d_spt: mL {init: 2};
    var one: dimensionless {init: 1};
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    var lambda_rvf: per_mL {pub: in};
    // description: Heart beat driver function
    // description: Heart beat driver function
    var e_t: dimensionless {pub: in};
    // description: Septal end systolic elastance
    // description: Septal end systolic elastance
    var E_es_spt: kPa_per_mL {init: 48.754};
    // isComputationalComponentFor: #property_14; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Right ventricle blood volume
    // isPropertyOf: smith_2004.cellml#entity_6
    // description: Right ventricle blood volume
    var V_rv: mL {pub: in};
    // description: Left ventricular free wall end systolic elastance
    // description: Left ventricular free wall end systolic elastance
    var E_es_lvf: kPa_per_mL {pub: in};
    // description: Right ventricular free wall end diastolic pressure
    // description: Right ventricular free wall end diastolic pressure
    var P_0_rvf: kPa {pub: in};
    // description: Right ventricular free wall end systolic elastance
    // description: Right ventricular free wall end systolic elastance
    var E_es_rvf: kPa_per_mL {pub: in};
    // isComputationalComponentFor: #property_15; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Septal wall volume
    // isPropertyOf: smith_2004.cellml#entity_13
    // description: Septal wall volume
    var V_spt: mL {pub: out};
    // isPropertyOf: smith_2004.cellml#force_5
    // description: Chamber pressure of left ventricular blood
    // isComputationalComponentFor: #property_16; physicalPropertyOf #force_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of left ventricular blood
    var P_lv: kPa {pub: in};
    // description: Septal Wall Diastolic Exponential Parameter
    // description: Septal Wall Diastolic Exponential Parameter
    var lambda_spt: per_mL {init: 0.435};
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    var lambda_lvf: per_mL {pub: in};
    // description: End diastolic pressure across the left ventricular wall
    // description: End diastolic pressure across the left ventricular wall
    var P_0_lvf: kPa {pub: in};
    var ZZ: kPa {init: 0};
    ZZ = e_t*E_es_spt*(V_spt-V_d_spt)+(one-e_t)*P_0_spt*(exp(lambda_spt*(V_spt-V_0_spt))-one)-e_t*E_es_lvf*(V_lv-V_spt)-(1{dimensionless}-e_t)*P_0_lvf*(exp(lambda_lvf*(V_lv-V_spt))-1{dimensionless})+e_t*E_es_rvf*(V_rv+V_spt)+(1{dimensionless}-e_t)*P_0_rvf*(exp(lambda_rvf*(V_rv+V_spt))-1{dimensionless});
  enddef;

  def comp lvf_calculator as
    // description: Left ventricular free wall end systolic pressure
    // description: Left ventricular free wall end systolic pressure
    var E_es_lvf: kPa_per_mL {init: 2.8798, pub: out};
    // description: Left ventricular freewall end systolic blood pressure
    // description: Left ventricular freewall end systolic blood pressure
    var P_es_lvf: kPa {pub: out};
    // isPropertyOf: smith_2004.cellml#entity_16; is http://identifiers.org/fma/FMA:9556
    // description: Volume of the free wall of the left ventricle
    // isComputationalComponentFor: #property_17; #entity_16; hasPhysicalDefinition http://identifiers.org/fma/FMA:9556; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Volume of the free wall of the left ventricle
    var V_lvf: mL {pub: in};
    // description: End diastolic pressure across the left ventricular free wall
    // description: End diastolic pressure across the left ventricular free wall
    var P_ed_lvf: kPa {pub: out};
    // description: Left ventricular free wall volume at end zero pressure
    // description: Left ventricular free wall volume at end zero pressure
    var V_d_lvf: mL {init: 0};
    // description: End diastolic pressure across the left ventricular wall
    // description: End diastolic pressure across the left ventricular wall
    var P_0_lvf: kPa {init: 0.1203, pub: out};
    // description: Left ventricular free wall volume at end diastolic pressure
    // description: Left ventricular free wall volume at end diastolic pressure
    var V_0_lvf: mL {init: 0};
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    var lambda_lvf: per_mL {init: 0.033, pub: out};
    P_es_lvf = E_es_lvf*(V_lvf-V_d_lvf);
    P_ed_lvf = P_0_lvf*(exp(lambda_lvf*(V_lvf-V_0_lvf))-1{dimensionless});
  enddef;

  def comp aorta as
    // description: Atrial valve fluid resistance
    // description: Atrial valve fluid resistance
    var R_av: kPa_second_per_mL {pub: in};
    // description: Aortic end systolic elastance
    // description: Aortic end systolic elastance
    var E_es_ao: kPa_per_mL {init: 0.6913};
    // isComputationalComponentFor: #property_18; #process_2; #sink_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_17; #source_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_14; description Blood flow from the left ventricle through the atrial valve to the aorta.; name Blood flow through aortic valve; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through atrial valve
    // isPropertyOf: smith_2004.cellml#process_2
    // description: Blood flow through atrial valve
    var Q_av: mL_per_second {pub: in};
    // description: Aortic blood volume at zero pressure
    // description: Aortic blood volume at zero pressure
    var V_d_ao: mL {init: 0};
    // isPropertyOf: smith_2004.cellml#force_6
    // description: Transmural pressure in systemic arteries
    // isComputationalComponentFor: #property_19; #force_6; #sink_5; hasPhysicalEntityReference #entity_2; #source_9; hasPhysicalEntityReference #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pressure in systemic arteries
    var P_ao: kPa {pub: out};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // isComputationalComponentFor: #property_20; #force_5; #source_7; #entity_14; #entity_15; hasPhysicalDefinition http://identifiers.org/fma/FMA:9466; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of left ventricular blood
    // isPropertyOf: smith_2004.cellml#force_5
    // description: Chamber pressure of left ventricular blood
    var P_lv: kPa {pub: in};
    // isComputationalComponentFor: #property_21; physicalPropertyOf #force_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural blood Pressure in the Vena Cava
    // isPropertyOf: smith_2004.cellml#force_0
    // description: Transmural blood Pressure in the Vena Cava
    var P_vc: kPa {pub: in};
    // isComputationalComponentFor: #property_22; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of blood contained in aorta
    // isPropertyOf: smith_2004.cellml#entity_17; is http://identifiers.org/fma/FMA:9670
    // description: Volume of blood contained in aorta
    var V_ao: mL {init: 133.3381};
    // description: Systemic circulatory fluid resistance
    // description: Systemic circulatory fluid resistance
    var R_sys: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_23; #process_3; #sink_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; #source_10; hasMultiplier 1.0; #entity_17; #entity_18; hasPhysicalDefinition http://identifiers.org/fma/FMA:12239; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; description Blood flow from the aorta through systemic system to the vena cava.; name Systemic circulatory blood flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic circulatory blood flow
    // isPropertyOf: smith_2004.cellml#process_3
    // description: Systemic circulatory blood flow
    var Q_sys: mL_per_second {pub: in};
    P_ao = E_es_ao*(V_ao-V_d_ao);
    ode(V_ao, time) = sel
      case Q_av < 0{mL_per_second}:
        -Q_sys;
      otherwise:
        Q_av-Q_sys;
    endsel;
  enddef;

  def comp pulmonary_artery as
    // isPropertyOf: smith_2004.cellml#force_1
    // description: Chamber pressure of blood in the pulmonary artery
    // isComputationalComponentFor: #property_24; #force_1; #source_1; hasPhysicalEntityReference #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of blood in the pulmonary artery
    var P_pa: kPa {pub: out};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // isPropertyOf: smith_2004.cellml#force_3
    // description: Chamber pressure of right ventricular blood
    // isComputationalComponentFor: #property_25; physicalPropertyOf #force_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of right ventricular blood
    var P_rv: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#force_7
    // description: Thoracic cavity pressure
    // isComputationalComponentFor: #property_26; physicalPropertyOf #force_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Thoracic cavity pressure
    var P_th: kPa {pub: in};
    // description: Pulmonary valve fluid resistance
    // description: Pulmonary valve fluid resistance
    var R_pv: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_27; physicalPropertyOf #force_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of pulmonary venous blood
    // isPropertyOf: smith_2004.cellml#force_8
    // description: Chamber pressure of pulmonary venous blood
    var P_pu: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#process_1
    // description: Blood flow through pulmonary valve
    // isComputationalComponentFor: #property_28; #process_1; #sink_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; #source_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_6; description Blood flow from the right ventricle through the pulmonary valve to the pulmonary artery.; name Blood flow through pulmonary valve; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through pulmonary valve
    var Q_pv: mL_per_second {pub: in};
    // description: Pulmonary arterial blood volume at zero pressure
    // isComputationalComponentFor: #property_29; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary arterial blood volume at zero pressure
    var V_d_pa: mL {init: 0};
    // description: Pulmonary arterial end systolic elastance
    // description: Pulmonary arterial end systolic elastance
    var E_es_pa: kPa_per_mL {init: 0.369};
    // isComputationalComponentFor: #property_30; #entity_4; #entity_5; hasPhysicalDefinition http://identifiers.org/fma/FMA:52449; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary arterial blood volume
    // isPropertyOf: smith_2004.cellml#entity_4; is http://identifiers.org/fma/FMA:9670
    // description: Pulmonary arterial blood volume
    var V_pa: mL {init: 43.0123};
    // isComputationalComponentFor: #property_31; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary blood flow
    // isPropertyOf: smith_2004.cellml#process_4
    // description: Pulmonary blood flow
    var Q_pul: mL_per_second {pub: in};
    // description: Pulmonary circulatory fluid resistance
    // description: Pulmonary circulatory fluid resistance
    var R_pul: kPa_second_per_mL {pub: in};
    P_pa = E_es_pa*(V_pa-V_d_pa)+P_th;
    ode(V_pa, time) = sel
      case Q_pv < 0{mL_per_second}:
        -Q_pul;
      otherwise:
        Q_pv-Q_pul;
    endsel;
  enddef;

  def comp pericardium as
    // isPropertyOf: smith_2004.cellml#entity_14
    // description: Volume of blood contained in left ventricle
    // isComputationalComponentFor: #property_32; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of blood contained in left ventricle
    var V_lv: mL {pub: in};
    // isComputationalComponentFor: #property_33; physicalPropertyOf #force_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Thoracic cavity pressure
    // isPropertyOf: smith_2004.cellml#force_7
    // description: Thoracic cavity pressure
    var P_th: kPa {pub: in};
    // isComputationalComponentFor: #property_34; #entity_21; hasPhysicalDefinition http://identifiers.org/fma/FMA:9869; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of the pericardium
    // isPropertyOf: smith_2004.cellml#entity_21; is http://identifiers.org/fma/FMA:9869
    // description: Volume of the pericardium
    var V_pcd: mL {pub: out};
    // description: Pericardial volume at end diastolic pressure
    // description: Pericardial volume at end diastolic pressure
    var V_0_pcd: mL {init: 200};
    // isPropertyOf: smith_2004.cellml#force_9
    // description: Pressure across the pericardial wall
    // isComputationalComponentFor: #property_35; #force_9; #sink_8; hasPhysicalEntityReference #entity_2; #source_14; hasPhysicalEntityReference #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure across the pericardial wall
    var P_pcd: kPa {pub: out};
    // isComputationalComponentFor: #property_36; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Right ventricle blood volume
    // isPropertyOf: smith_2004.cellml#entity_6
    // description: Right ventricle blood volume
    var V_rv: mL {pub: in};
    // description: End diastolic pressure across the pericardium
    // description: End diastolic pressure across the pericardium
    var P_0_pcd: kPa {init: 0.5003};
    // isComputationalComponentFor: #property_37; #force_4; #source_6; #entity_8; #entity_9; hasPhysicalDefinition http://identifiers.org/fma/FMA:11350; hasPhysicalDefinition http://identifiers.org/fma/FMA:280556; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pericardial chamber pressure
    // isPropertyOf: smith_2004.cellml#force_4
    // description: Pericardial chamber pressure
    var P_peri: kPa {pub: out};
    // description: Pericardial Diastolic Exponential Parameter
    // description: Pericardial Diastolic Exponential Parameter
    var lambda_pcd: per_mL {init: 0.03};
    V_pcd = V_lv+V_rv;
    P_pcd = P_0_pcd*(exp(lambda_pcd*(V_pcd-V_0_pcd))-1{dimensionless});
    P_peri = P_pcd+P_th;
  enddef;

  def comp driver_function as
    // description: Gaussian Curve Width
    // description: Gaussian Curve Width
    var B: per_second2 {init: 80};
    // description: Gaussian Curve Magnitude
    // description: Gaussian Curve Magnitude
    var A: dimensionless {init: 1};
    // description: Heart beat driver function
    // description: Heart beat driver function
    var e_t: dimensionless {pub: out};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // description: Gaussian Curve Delay
    // description: Gaussian Curve Delay
    var C: second {init: 0.375};
    // description: Contraction Time Elapsed
    // description: Contraction Time Elapsed
    var tau: second;
    // description: Length of Heart Contraction
    // description: Length of Heart Contraction
    var period: second {init: 0.75};
    tau = sel
      case time <= period:
        time;
      case time <= period*2{dimensionless}:
        time-period;
      case time <= period*3{dimensionless}:
        time-period*2{dimensionless};
      case time <= period*4{dimensionless}:
        time-period*3{dimensionless};
      case time <= period*5{dimensionless}:
        time-period*4{dimensionless};
      case time <= period*6{dimensionless}:
        time-period*5{dimensionless};
      case time <= period*7{dimensionless}:
        time-period*6{dimensionless};
      case time <= period*8{dimensionless}:
        time-period*7{dimensionless};
      case time <= period*9{dimensionless}:
        time-period*8{dimensionless};
      case time <= period*10{dimensionless}:
        time-period*9{dimensionless};
      case time <= period*11{dimensionless}:
        time-period*10{dimensionless};
      case time <= period*12{dimensionless}:
        time-period*11{dimensionless};
      case time <= period*13{dimensionless}:
        time-period*12{dimensionless};
    endsel;
    e_t = A*exp(-B*sqr(tau-C));
  enddef;

  def comp pulmonary_vein as
    // description: Mitrial valve fluid resistance
    // description: Mitrial valve fluid resistance
    var R_mt: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_38; #process_5; #sink_9; hasMultiplier 1.0; hasPhysicalEntityReference #entity_14; #source_15; hasMultiplier 1.0; hasPhysicalEntityReference #entity_19; description Blood flow from the pulmonary vein through the mitral valve to the left ventricle.; name Blood flow through mitral valve; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through mitrial valve
    // isPropertyOf: smith_2004.cellml#process_5
    // description: Blood flow through mitrial valve
    var Q_mt: mL_per_second {pub: in};
    // isPropertyOf: smith_2004.cellml#force_5
    // description: Chamber pressure of left ventricular blood
    // isComputationalComponentFor: #property_39; physicalPropertyOf #force_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of left ventricular blood
    var P_lv: kPa {pub: in};
    // description: End systolic pulmonary vein elastance
    // description: End systolic pulmonary vein elastance
    var E_es_pu: kPa_per_mL {init: 0.0073};
    // isComputationalComponentFor: #property_40; #force_8; #source_12; hasPhysicalEntityReference #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of pulmonary venous blood
    // isPropertyOf: smith_2004.cellml#force_8
    // description: Chamber pressure of pulmonary venous blood
    var P_pu: kPa {pub: out};
    // isPropertyOf: smith_2004.cellml#force_7
    // description: Thoracic cavity pressure
    // isComputationalComponentFor: #property_41; physicalPropertyOf #force_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Thoracic cavity pressure
    var P_th: kPa {pub: in};
    // isComputationalComponentFor: #property_42; #entity_19; #entity_20; hasPhysicalDefinition http://identifiers.org/fma/FMA:52455; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Pulmonary venous blood volume
    // isPropertyOf: smith_2004.cellml#entity_19; is http://identifiers.org/fma/FMA:9670
    // description: Pulmonary venous blood volume
    var V_pu: mL {init: 808.4579};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // isComputationalComponentFor: #property_43; #process_4; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_19; #source_13; hasMultiplier 1.0; #entity_11; #entity_12; hasPhysicalDefinition http://identifiers.org/fma/FMA:14167; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; description Blood flow from the pulmonary artery through the pulmonary circulatory system to the pulmonary vein.; name Pulmonary circulatory blood flow; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary blood flow
    // isPropertyOf: smith_2004.cellml#process_4; description Blood flow from the pulmonary artery through the pulmonary circulatory system to the pulmonary vein.
    // description: Pulmonary blood flow
    var Q_pul: mL_per_second {pub: in};
    // isPropertyOf: smith_2004.cellml#force_1
    // description: Chamber pressure of blood in the pulmonary artery
    // isComputationalComponentFor: #property_44; physicalPropertyOf #force_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of blood in the pulmonary artery
    var P_pa: kPa {pub: in};
    // description: Pulmonary circulatory fluid resistance
    // description: Pulmonary circulatory fluid resistance
    var R_pul: kPa_second_per_mL {pub: in};
    var V_d_pu: mL {init: 0};
    P_pu = E_es_pu*(V_pu-V_d_pu)+P_th;
    ode(V_pu, time) = sel
      case Q_mt < 0{mL_per_second}:
        Q_pul;
      otherwise:
        Q_pul-Q_mt;
    endsel;
  enddef;

  def comp rvf_calculator as
    // isComputationalComponentFor: #property_45; #entity_10; hasPhysicalDefinition http://identifiers.org/fma/FMA:9533; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Right ventricular free wall volume
    // isPropertyOf: smith_2004.cellml#entity_10
    // description: Right ventricular free wall volume
    var V_rvf: mL {pub: in};
    // description: Right ventricular free wall end systolic elastance
    // description: Right ventricular free wall end systolic elastance
    var E_es_rvf: kPa_per_mL {init: 0.585, pub: out};
    // description: Right ventricular free wall end diastolic pressure
    // description: Right ventricular free wall end diastolic pressure
    var P_0_rvf: kPa {init: 0.2157, pub: out};
    // description: Right ventricular free wall end diastolic pressure
    // description: Right ventricular free wall end diastolic pressure
    var P_ed_rvf: kPa {pub: out};
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    // description: Right Ventricular Freewall Diastolic Exponential Parameter
    var lambda_rvf: per_mL {init: 0.023, pub: out};
    // description: Right ventricular free wall end systolic pressure
    // description: Right ventricular free wall end systolic pressure
    var P_es_rvf: kPa {pub: out};
    // description: Right ventricular free wall volume at zero pressure
    // description: Right ventricular free wall volume at zero pressure
    var V_d_rvf: mL {init: 0};
    // description: Right ventricular free wall volume at end diastolic pressure
    // description: Right ventricular free wall volume at end diastolic pressure
    var V_0_rvf: mL {init: 0};
    P_es_rvf = E_es_rvf*(V_rvf-V_d_rvf);
    P_ed_rvf = P_0_rvf*(exp(lambda_rvf*(V_rvf-V_0_rvf))-1{dimensionless});
  enddef;

  def comp vena_cava as
    // isPropertyOf: smith_2004.cellml#force_0
    // description: Transmural blood Pressure in the Vena Cava
    // isComputationalComponentFor: #property_46; physicalPropertyOf #force_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural blood Pressure in the Vena Cava
    var P_vc: kPa {pub: out};
    // isComputationalComponentFor: #property_47; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow across tricuspid valve
    // isPropertyOf: smith_2004.cellml#process_0
    // description: Blood flow across tricuspid valve
    var Q_tc: mL_per_second {pub: in};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // isPropertyOf: smith_2004.cellml#force_6
    // description: Transmural pressure in systemic arteries
    // isComputationalComponentFor: #property_48; physicalPropertyOf #force_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pressure in systemic arteries
    var P_ao: kPa {pub: in};
    // description: Tricuspid valve fluid resistance
    // description: Tricuspid valve fluid resistance
    var R_tc: kPa_second_per_mL {pub: in};
    // description: Vena cava volume at zero pressure
    // description: Vena cava volume at zero pressure
    var V_d_vc: mL {init: 0};
    // isPropertyOf: smith_2004.cellml#process_3
    // description: Systemic circulatory blood flow
    // isComputationalComponentFor: #property_49; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic circulatory blood flow
    var Q_sys: mL_per_second {pub: in};
    // description: Systemic circulatory fluid resistance
    // description: Systemic circulatory fluid resistance
    var R_sys: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_50; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Vena cava blood volume
    // isPropertyOf: smith_2004.cellml#entity_0; is http://identifiers.org/fma/FMA:9670
    // description: Vena cava blood volume
    var V_vc: mL {init: 329.7803};
    // isComputationalComponentFor: #property_51; #force_3; #source_5; hasPhysicalEntityReference #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of right ventricular blood
    // isPropertyOf: smith_2004.cellml#force_3
    // description: Chamber pressure of right ventricular blood
    var P_rv: kPa {pub: in};
    // description: Vena cava end systolic elastance
    // description: Vena cava end systolic elastance
    var E_es_vc: kPa_per_mL {init: 0.0059};
    P_vc = E_es_vc*(V_vc-V_d_vc);
    ode(V_vc, time) = sel
      case Q_tc < 0{mL_per_second}:
        Q_sys;
      otherwise:
        Q_sys-Q_tc;
    endsel;
  enddef;

  def comp heart_parameters as
    // description: Tricuspid valve fluid inertance
    // description: Tricuspid valve fluid inertance
    var L_tc: kPa_second2_per_mL {init: 8.0093e-5, pub: out};
    // description: Mitrial valve fluid resistance
    // description: Mitrial valve fluid resistance
    var R_mt: kPa_second_per_mL {init: 0.0158, pub: out};
    // isPropertyOf: smith_2004.cellml#force_7
    // description: Thoracic cavity pressure
    // isComputationalComponentFor: #property_52; #force_7; #source_11; hasPhysicalEntityReference #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Thoracic cavity pressure
    var P_th: kPa {init: -4, pub: out};
    // description: Pulmonary circulatory fluid resistance
    // description: Pulmonary circulatory fluid resistance
    var R_pul: kPa_second_per_mL {init: 0.1552, pub: out};
    // description: Pulmonary valve fluid resistance
    // description: Pulmonary valve fluid resistance
    var R_pv: kPa_second_per_mL {init: 0.0055, pub: out};
    // description: Total blood volume in the body
    // description: Total blood volume in the body
    var V_tot: mL {init: 5.5, pub: out};
    // description: Mitrial valve fluid inertance
    // description: Mitrial valve fluid inertance
    var L_mt: kPa_second2_per_mL {init: 7.6968e-5, pub: out};
    // description: Tricuspid valve fluid resistance
    // description: Tricuspid valve fluid resistance
    var R_tc: kPa_second_per_mL {init: 0.0237, pub: out};
    // description: Pulmonary valve fluid inertance
    // description: Pulmonary valve fluid inertance
    var L_pv: kPa_second2_per_mL {init: 1.4868e-4, pub: out};
    // description: Atrial valve fluid inertance
    // description: Atrial valve fluid inertance
    var L_av: kPa_second2_per_mL {init: 1.2189e-4, pub: out};
    // description: Atrial valve fluid resistance
    // description: Atrial valve fluid resistance
    var R_av: kPa_second_per_mL {init: 0.0180, pub: out};
    // description: Systemic circulatory fluid resistance
    // description: Systemic circulatory fluid resistance
    var R_sys: kPa_second_per_mL {init: 1.0889, pub: out};
  enddef;

  def comp left_ventricle as
    // isPropertyOf: smith_2004.cellml#entity_16
    // description: Volume of the free wall of the left ventricle
    // isComputationalComponentFor: #property_53; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Volume of the free wall of the left ventricle
    var V_lvf: mL {priv: out, pub: out};
    // isPropertyOf: smith_2004.cellml#force_4
    // description: Pericardial chamber pressure
    // isComputationalComponentFor: #property_54; physicalPropertyOf #force_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pericardial chamber pressure
    var P_peri: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#process_2
    // description: Blood flow through atrial valve
    // isComputationalComponentFor: #property_55; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through atrial valve
    var Q_av: mL_per_second {pub: in};
    // description: Atrial valve fluid resistance
    // description: Atrial valve fluid resistance
    var R_av: kPa_second_per_mL {pub: in};
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    // description: Left Ventricular Freewall Diastolic Exponential Parameter
    var lambda_lvf: per_mL {priv: in, pub: out};
    // description: End diastolic pressure across the left ventricular wall
    // description: End diastolic pressure across the left ventricular wall
    var P_0_lvf: kPa {priv: in, pub: out};
    // isPropertyOf: smith_2004.cellml#force_8
    // description: Chamber pressure of pulmonary venous blood
    // isComputationalComponentFor: #property_56; physicalPropertyOf #force_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of pulmonary venous blood
    var P_pu: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#force_10
    // description: Pressure across the left ventricular freewall
    // isComputationalComponentFor: #property_57; #force_10; #sink_10; hasPhysicalEntityReference #entity_8; #source_16; hasPhysicalEntityReference #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Pressure across the left ventricular freewall
    var P_lvf: kPa {pub: out};
    // isPropertyOf: smith_2004.cellml#process_5; description Blood flow from the pulmonary vein through the mitral valve to the left ventricle.
    // description: Blood flow through mitrial valve
    // isComputationalComponentFor: #property_58; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through mitrial valve
    var Q_mt: mL_per_second {pub: in};
    // description: Mitrial valve fluid resistance
    // description: Mitrial valve fluid resistance
    var R_mt: kPa_second_per_mL {pub: in};
    // description: End diastolic pressure across the left ventricular free wall
    // description: End diastolic pressure across the left ventricular free wall
    var P_ed_lvf: kPa {priv: in};
    // isPropertyOf: smith_2004.cellml#force_6
    // description: Transmural pressure in systemic arteries
    // isComputationalComponentFor: #property_59; physicalPropertyOf #force_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pressure in systemic arteries
    var P_ao: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#entity_14
    // description: Volume of blood contained in left ventricle
    // isComputationalComponentFor: #property_60; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00154
    // description: Volume of blood contained in left ventricle
    var V_lv: mL {init: 94.6812, pub: out};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // description: Left ventricular free wall end systolic pressure
    // description: Left ventricular free wall end systolic pressure
    var E_es_lvf: kPa_per_mL {priv: in, pub: out};
    // description: Left ventricular freewall end systolic blood pressure
    // description: Left ventricular freewall end systolic blood pressure
    var P_es_lvf: kPa {priv: in};
    // isPropertyOf: smith_2004.cellml#entity_13; is http://identifiers.org/fma/FMA:7180
    // description: Septal wall volume
    // isComputationalComponentFor: #property_61; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_01061
    // description: Septal wall volume
    var V_spt: mL {pub: in};
    // description: Heart beat driver function
    // description: Heart beat driver function
    var e_t: dimensionless {pub: in};
    // isPropertyOf: smith_2004.cellml#force_5
    // description: Chamber pressure of left ventricular blood
    // isComputationalComponentFor: #property_62; physicalPropertyOf #force_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of left ventricular blood
    var P_lv: kPa {pub: out};
    V_lvf = V_lv-V_spt;
    P_lvf = e_t*P_es_lvf+(1{dimensionless}-e_t)*P_ed_lvf;
    P_lv = P_lvf+P_peri;
    ode(V_lv, time) = sel
      case (Q_mt < 0{mL_per_second}) and (Q_av < 0{mL_per_second}):
        0{mL_per_second};
      case Q_mt < 0{mL_per_second}:
        -Q_av;
      case Q_av < 0{mL_per_second}:
        Q_mt;
      otherwise:
        Q_mt-Q_av;
    endsel;
  enddef;

  def comp environment as
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: out};
  enddef;

  def comp flow as
    // isPropertyOf: smith_2004.cellml#force_3
    // description: Chamber pressure of right ventricular blood
    // isComputationalComponentFor: #property_63; physicalPropertyOf #force_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of right ventricular blood
    var P_rv: kPa {pub: in};
    // description: Pulmonary valve fluid resistance
    // description: Pulmonary valve fluid resistance
    var R_pv: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_64; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through mitrial valve
    // isPropertyOf: smith_2004.cellml#process_5
    // description: Blood flow through mitrial valve
    var Q_mt: mL_per_second {init: 245.5813, pub: out};
    // isPropertyOf: smith_2004.cellml#force_8
    // description: Chamber pressure of pulmonary venous blood
    // isComputationalComponentFor: #property_65; physicalPropertyOf #force_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of pulmonary venous blood
    var P_pu: kPa {pub: in};
    // isPropertyOf: smith_2004.cellml#process_1; description Blood flow from the right ventricle through the pulmonary valve to the pulmonary artery.
    // description: Blood flow through pulmonary valve
    // isComputationalComponentFor: #property_66; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through pulmonary valve
    var Q_pv: mL_per_second {init: 0, pub: out};
    // description: Mitrial valve fluid resistance
    // description: Mitrial valve fluid resistance
    var R_mt: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_67; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Systemic circulatory blood flow
    // isPropertyOf: smith_2004.cellml#process_3; description Blood flow from the aorta through systemic system to the vena cava.
    // description: Systemic circulatory blood flow
    var Q_sys: mL_per_second {pub: out};
    // description: Atrial valve fluid inertance
    // description: Atrial valve fluid inertance
    var L_av: kPa_second2_per_mL {pub: in};
    // isPropertyOf: smith_2004.cellml#process_2; description Blood flow from the left ventricle through the atrial valve to the aorta.
    // description: Blood flow through atrial valve
    // isComputationalComponentFor: #property_68; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow through atrial valve
    var Q_av: mL_per_second {init: 0, pub: out};
    // description: Pulmonary circulatory fluid resistance
    // description: Pulmonary circulatory fluid resistance
    var R_pul: kPa_second_per_mL {pub: in};
    // description: Atrial valve fluid resistance
    // description: Atrial valve fluid resistance
    var R_av: kPa_second_per_mL {pub: in};
    // description: Systemic circulatory fluid resistance
    // description: Systemic circulatory fluid resistance
    var R_sys: kPa_second_per_mL {pub: in};
    // description: Tricuspid valve fluid inertance
    // description: Tricuspid valve fluid inertance
    var L_tc: kPa_second2_per_mL {pub: in};
    // isComputationalComponentFor: #property_69; physicalPropertyOf #force_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of blood in the pulmonary artery
    // isPropertyOf: smith_2004.cellml#force_1
    // description: Chamber pressure of blood in the pulmonary artery
    var P_pa: kPa {pub: in};
    // description: Pulmonary valve fluid inertance
    // description: Pulmonary valve fluid inertance
    var L_pv: kPa_second2_per_mL {pub: in};
    // isPropertyOf: smith_2004.cellml#force_6
    // description: Transmural pressure in systemic arteries
    // isComputationalComponentFor: #property_70; physicalPropertyOf #force_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural pressure in systemic arteries
    var P_ao: kPa {pub: in};
    // isComputationalComponentFor: #property_71; #process_0; #sink_1; hasMultiplier 1.0; #entity_6; #entity_7; hasPhysicalDefinition http://identifiers.org/fma/FMA:9291; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_0; description Blood flow from the vena cava through the tricuspid valve to the right ventricle.; name Blood flow through tricuspid valve; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Blood flow across tricuspid valve
    // isPropertyOf: smith_2004.cellml#process_0; description Blood flow from the vena cava through the tricuspid valve to the right ventricle.
    // description: Blood flow across tricuspid valve
    var Q_tc: mL_per_second {init: 190.0661, pub: out};
    // is: https://identifiers.org/opb/OPB01023
    // is: https://identifiers.org/opb/OPB01023
    var time: second {pub: in};
    // isComputationalComponentFor: #property_72; #force_0; #sink_0; #entity_2; #entity_3; hasPhysicalDefinition http://identifiers.org/fma/FMA:7565; hasPhysicalDefinition http://identifiers.org/fma/FMA:280556; #source_0; #entity_0; #entity_1; hasPhysicalDefinition http://identifiers.org/fma/FMA:280059; hasPhysicalDefinition http://identifiers.org/fma/FMA:9670; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Transmural blood Pressure in the Vena Cava
    // isPropertyOf: smith_2004.cellml#force_0
    // description: Transmural blood Pressure in the Vena Cava
    var P_vc: kPa {pub: in};
    // description: Tricuspid valve fluid resistance
    // description: Tricuspid valve fluid resistance
    var R_tc: kPa_second_per_mL {pub: in};
    // isComputationalComponentFor: #property_73; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00299
    // description: Pulmonary blood flow
    // isPropertyOf: smith_2004.cellml#process_4
    // description: Pulmonary blood flow
    var Q_pul: mL_per_second {pub: out};
    // isComputationalComponentFor: #property_74; physicalPropertyOf #force_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00509
    // description: Chamber pressure of left ventricular blood
    // isPropertyOf: smith_2004.cellml#force_5
    // description: Chamber pressure of left ventricular blood
    var P_lv: kPa {pub: in};
    // description: Mitrial valve fluid inertance
    // description: Mitrial valve fluid inertance
    var L_mt: kPa_second2_per_mL {pub: in};
    Q_sys = (P_ao-P_vc)/R_sys;
    Q_pul = (P_pa-P_pu)/R_pul;
    ode(Q_mt, time) = sel
      case (P_pu-P_lv < 0{kPa}) and (Q_mt < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_pu-P_lv-Q_mt*R_mt)/L_mt;
    endsel;
    ode(Q_av, time) = sel
      case (P_lv-P_ao < 0{kPa}) and (Q_av < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_lv-P_ao-Q_av*R_av)/L_av;
    endsel;
    ode(Q_tc, time) = sel
      case (P_vc-P_rv < 0{kPa}) and (Q_tc < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_vc-P_rv-Q_tc*R_tc)/L_tc;
    endsel;
    ode(Q_pv, time) = sel
      case (P_rv-P_pa < 0{kPa}) and (Q_pv < 0{mL_per_second}):
        0{mL_per_second2};
      otherwise:
        (P_rv-P_pa-Q_pv*R_pv)/L_pv;
    endsel;
  enddef;

  def group as encapsulation for
    comp left_ventricle incl
      comp lvf_calculator;
    endcomp;
    comp right_ventricle incl
      comp rvf_calculator;
    endcomp;
  enddef;
  def map between pulmonary_artery and flow for
    vars P_pa and P_pa;
  enddef;
  def map between left_ventricle and pulmonary_vein for
    vars P_lv and P_lv;
  enddef;
  def map between aorta and flow for
    vars P_ao and P_ao;
  enddef;
  def map between heart_parameters and flow for
    vars R_mt and R_mt;
    vars R_pv and R_pv;
    vars R_sys and R_sys;
    vars R_av and R_av;
    vars L_tc and L_tc;
    vars R_tc and R_tc;
    vars L_av and L_av;
    vars L_mt and L_mt;
    vars R_pul and R_pul;
    vars L_pv and L_pv;
  enddef;
  def map between left_ventricle and aorta for
    vars P_lv and P_lv;
  enddef;
  def map between vena_cava and flow for
    vars P_vc and P_vc;
  enddef;
  def map between pulmonary_vein and pulmonary_artery for
    vars P_pu and P_pu;
  enddef;
  def map between environment and aorta for
    vars time and time;
  enddef;
  def map between pulmonary_vein and left_ventricle for
    vars P_pu and P_pu;
  enddef;
  def map between heart_parameters and pericardium for
    vars P_th and P_th;
  enddef;
  def map between environment and right_ventricle for
    vars time and time;
  enddef;
  def map between environment and pulmonary_artery for
    vars time and time;
  enddef;
  def map between vena_cava and right_ventricle for
    vars P_vc and P_vc;
  enddef;
  def map between flow and vena_cava for
    vars Q_sys and Q_sys;
    vars Q_tc and Q_tc;
  enddef;
  def map between right_ventricle and pulmonary_artery for
    vars P_rv and P_rv;
  enddef;
  def map between pulmonary_artery and right_ventricle for
    vars P_pa and P_pa;
  enddef;
  def map between right_ventricle and pericardium for
    vars V_rv and V_rv;
  enddef;
  def map between left_ventricle and pericardium for
    vars V_lv and V_lv;
  enddef;
  def map between environment and left_ventricle for
    vars time and time;
  enddef;
  def map between right_ventricle and rvf_calculator for
    vars V_rvf and V_rvf;
  enddef;
  def map between septum and right_ventricle for
    vars V_spt and V_spt;
  enddef;
  def map between heart_parameters and right_ventricle for
    vars R_pv and R_pv;
    vars R_tc and R_tc;
  enddef;
  def map between flow and pulmonary_artery for
    vars Q_pv and Q_pv;
    vars Q_pul and Q_pul;
  enddef;
  def map between right_ventricle and septum for
    vars lambda_rvf and lambda_rvf;
    vars P_0_rvf and P_0_rvf;
    vars V_rv and V_rv;
    vars P_rv and P_rv;
    vars E_es_rvf and E_es_rvf;
  enddef;
  def map between environment and vena_cava for
    vars time and time;
  enddef;
  def map between flow and aorta for
    vars Q_av and Q_av;
    vars Q_sys and Q_sys;
  enddef;
  def map between flow and left_ventricle for
    vars Q_av and Q_av;
    vars Q_mt and Q_mt;
  enddef;
  def map between driver_function and right_ventricle for
    vars e_t and e_t;
  enddef;
  def map between left_ventricle and septum for
    vars lambda_lvf and lambda_lvf;
    vars P_0_lvf and P_0_lvf;
    vars P_lv and P_lv;
    vars E_es_lvf and E_es_lvf;
    vars V_lv and V_lv;
  enddef;
  def map between heart_parameters and pulmonary_vein for
    vars R_mt and R_mt;
    vars P_th and P_th;
    vars R_pul and R_pul;
  enddef;
  def map between driver_function and septum for
    vars e_t and e_t;
  enddef;
  def map between pulmonary_vein and flow for
    vars P_pu and P_pu;
  enddef;
  def map between septum and left_ventricle for
    vars V_spt and V_spt;
  enddef;
  def map between right_ventricle and flow for
    vars P_rv and P_rv;
  enddef;
  def map between aorta and left_ventricle for
    vars P_ao and P_ao;
  enddef;
  def map between vena_cava and aorta for
    vars P_vc and P_vc;
  enddef;
  def map between heart_parameters and aorta for
    vars R_sys and R_sys;
    vars R_av and R_av;
  enddef;
  def map between right_ventricle and vena_cava for
    vars P_rv and P_rv;
  enddef;
  def map between aorta and vena_cava for
    vars P_ao and P_ao;
  enddef;
  def map between left_ventricle and lvf_calculator for
    vars V_lvf and V_lvf;
  enddef;
  def map between flow and pulmonary_vein for
    vars Q_mt and Q_mt;
    vars Q_pul and Q_pul;
  enddef;
  def map between environment and flow for
    vars time and time;
  enddef;
  def map between rvf_calculator and right_ventricle for
    vars P_0_rvf and P_0_rvf;
    vars P_es_rvf and P_es_rvf;
    vars lambda_rvf and lambda_rvf;
    vars E_es_rvf and E_es_rvf;
    vars P_ed_rvf and P_ed_rvf;
  enddef;
  def map between flow and right_ventricle for
    vars Q_pv and Q_pv;
    vars Q_tc and Q_tc;
  enddef;
  def map between pericardium and right_ventricle for
    vars P_peri and P_peri;
  enddef;
  def map between environment and driver_function for
    vars time and time;
  enddef;
  def map between lvf_calculator and left_ventricle for
    vars lambda_lvf and lambda_lvf;
    vars P_ed_lvf and P_ed_lvf;
    vars P_0_lvf and P_0_lvf;
    vars P_es_lvf and P_es_lvf;
    vars E_es_lvf and E_es_lvf;
  enddef;
  def map between pericardium and left_ventricle for
    vars P_peri and P_peri;
  enddef;
  def map between driver_function and left_ventricle for
    vars e_t and e_t;
  enddef;
  def map between heart_parameters and left_ventricle for
    vars R_mt and R_mt;
    vars R_av and R_av;
  enddef;
  def map between left_ventricle and flow for
    vars P_lv and P_lv;
  enddef;
  def map between environment and pulmonary_vein for
    vars time and time;
  enddef;
  def map between pulmonary_artery and pulmonary_vein for
    vars P_pa and P_pa;
  enddef;
  def map between heart_parameters and pulmonary_artery for
    vars R_pv and R_pv;
    vars P_th and P_th;
    vars R_pul and R_pul;
  enddef;
  def map between heart_parameters and vena_cava for
    vars R_sys and R_sys;
    vars R_tc and R_tc;
  enddef;
  // Minimal haemodynamic system model including ventricular interaction and valve dynamics.
  //
  // Geoffrey Nunns
  //
  // Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model will run in PCEnv and OpenCell to recreate the published results. Note that the model will not run in COR because it contains differential algebraic equations (DAEs). The CellML transaltion of the model is based on the original Matlab code obtained from the model authors. However, the CellML model will only simulate 14 heart beats, because if statements (piecewise equations) were used instead of a remainder operator to cycle the heart beat, but this number of beats can be increased if desired.
  //
  // Model Structure
  //
  // Abstract: Characterising circulatory dysfunction and choosing a suitable treatment is often difficult and time consuming, and can result in a deterioration in patient condition, or unsuitable therapy choices. A stable minimal model of the human cardiovascular system (CVS) is developed with the ultimate specific aim of assisting medical staff for rapid, on site modelling to assist in diagnosis and treatment. Models found in the literature simulate specific areas of the CVS with limited direct usefulness to medical staff. Others model the full CVS as a closed loop system, but they were found to be very complex, difficult to solve, or unstable. This paper develops a model that uses a minimal number of governing equations with the primary goal of accurately capturing trends in the CVS dynamics in a simple, easily solved, robust model. The model is shown to have long term stability and consistency with non-specific initial conditions as a result. An "open on pressure close on flow" valve law is created to capture the effects of inertia and the resulting dynamics of blood flow through the cardiac valves. An accurate, stable solution is performed using a method that varies the number of states in the model depending on the specific phase of the cardiac cycle, better matching the real physiological conditions. Examples of results include a 9% drop in cardiac output when increasing the thoracic pressure from -4 to 0 mmHg, and an increase in blood pressure from 120/80 to 165/130 mmHg when the systemic resistance is doubled. These results show that the model adequately provides appropriate magnitudes and trends that are in agreement with existing data for a variety of physiologically verified test cases simulating human CVS function.
  //
  // The complete original paper reference is cited below:
  //
  // Minimal haemodynamic system model including ventricular interaction and valve dynamics, Bram W Smith, J Geoffrey Chase, Roger I Nokes, Geoffrey M Shaw, Graeme Wake, 2004, Medical Engineering and Physics , 26, 131-139. PubMed ID: 15036180 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=15036180&dopt=Abstract)
  //
  // model diagram
  //
  // Schematic diagram of the minimal closed loop model of the cardiovascular system.
enddef;
// smith_2004.cellml#entity_20
// is: http://identifiers.org/fma/FMA:52455
// smith_2004.cellml#entity_12
// is: http://identifiers.org/fma/FMA:14167
// smith_2004.cellml#entity_11
// is: http://identifiers.org/fma/FMA:9670
// smith_2004.cellml#entity_3
// is: http://identifiers.org/fma/FMA:7565
// smith_2004.cellml#entity_15
// is: http://identifiers.org/fma/FMA:9466
// smith_2004.cellml#entity_2
// is: http://identifiers.org/fma/FMA:280556
// smith_2004.cellml#entity_1
// is: http://identifiers.org/fma/FMA:280059
// smith_2004.cellml#entity_7
// is: http://identifiers.org/fma/FMA:9291
// smith_2004.cellml#entity_18
// is: http://identifiers.org/fma/FMA:12239
// smith_2004.cellml#entity_5
// is: http://identifiers.org/fma/FMA:52449
// smith_2004.cellml#entity_9
// is: http://identifiers.org/fma/FMA:11350
// smith_2004.cellml#entity_8
// is: http://identifiers.org/fma/FMA:280556
