// creator: Family Nicodemus; Given Camille; Other Emily; value cnic041@aucklanduni.ac.nz; Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute
// created: W3CDTF 2010-11-19
// isDescribedBy 20007375
// modelName gerard_2009
// reference: Pubmed_id 20007375; Family Gerard; Given C; Family Goldbeter; Given A; title Temporal self-organization of the cyclin/Cdk network driving the mammalian cell cycle; W3CDTF 2010-11-19; title Unite de Chronobiologie Theorique; volume 106(51); first_page 21643; last_page 21648
// reference: subject_type keyword; circadian rhythms; mitotic oscillation
def model gerard_2009 as
  def unit hour as
    unit second {mult: 3600.0};
  enddef;
  def unit second_order_rate_constant_nano as
    unit hour {expo: -1.0};
    unit nanomolar {expo: -1.0};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1.0};
  enddef;
  def unit micromolar as
    unit litre {expo: -1.0};
    unit mole {pref: micro};
  enddef;
  def unit nano_flux as
    unit hour {expo: -1.0};
    unit nanomolar;
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1.0};
    unit hour {expo: -1.0};
  enddef;
  def unit flux as
    unit micromolar;
    unit hour {expo: -1.0};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1.0};
  enddef;
  def unit first_order_rate_constant as
    unit hour {expo: -1.0};
  enddef;
  def unit first_order_rate_constant_nano as
    unit hour {expo: -1.0};
  enddef;

  def comp environment as
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: out};
  enddef;

  def comp AP1 as
    // isComputationalComponentFor: #property_0; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var AP1: micromolar {init: 0.01, pub: out};
    var v_sap1: flux {pub: in};
    var GF: micromolar {pub: in};
    var K_agf: micromolar {pub: in};
    var k_dap1: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(AP1, time) = (v_sap1*GF/(K_agf+GF)-k_dap1*AP1)*eps;
  enddef;

  def comp pRB as
    // isComputationalComponentFor: #property_1; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {init: 1, pub: out};
    var v_sprb: flux {pub: in};
    var k_pc1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_2; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var k_pc2: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_3; #entity_4; hasPhysicalDefinition http://identifiers.org/go/GO:0035189; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc1: micromolar {pub: in};
    var V_1: first_order_rate_constant {pub: in};
    var K_1: micromolar {pub: in};
    // isComputationalComponentFor: #property_4; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    // isComputationalComponentFor: #property_5; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var V_2: flux {pub: in};
    // isComputationalComponentFor: #property_6; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var K_2: micromolar {pub: in};
    var k_dprb: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(pRB, time) = (v_sprb-k_pc1*pRB*E2F+k_pc2*pRBc1-V_1*pRB/(K_1+pRB)*(Md+Mdp27)+V_2*pRBp/(K_2+pRBp)-k_dprb*pRB)*eps;
  enddef;

  def comp pRBc1 as
    // isComputationalComponentFor: #property_7; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc1: micromolar {init: 0.1, pub: out};
    var k_pc1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_8; #entity_2; name Unphosphorylated Retinoblastoma protein; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    // isComputationalComponentFor: #property_9; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var k_pc2: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(pRBc1, time) = (k_pc1*pRB*E2F-k_pc2*pRBc1)*eps;
  enddef;

  def comp pRBp as
    // isComputationalComponentFor: #property_10; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {init: 0.25, pub: out};
    var V_1: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_11; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    var K_1: micromolar {pub: in};
    // isComputationalComponentFor: #property_12; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    // isComputationalComponentFor: #property_13; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var V_2: flux {pub: in};
    var K_2: micromolar {pub: in};
    var V_3: first_order_rate_constant {pub: in};
    var K_3: micromolar {pub: in};
    // isComputationalComponentFor: #property_14; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var V_4: flux {pub: in};
    // isComputationalComponentFor: #property_15; #entity_9; name Retinoblastoma protein phosphorylated twice; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBpp: micromolar {pub: in};
    var K_4: micromolar {pub: in};
    var k_pc3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_16; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var k_pc4: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_17; physicalPropertyOf #entity_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc2: micromolar {pub: in};
    var k_dpRBp: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(pRBp, time) = (V_1*pRB/(K_1+pRB)*(Md+Mdp27)-V_2*pRBp/(K_2+pRBp)-V_3*pRBp/(K_3+pRBp)*Me+V_4*pRBpp/(K_4+pRBpp)-k_pc3*pRBp*E2F+k_pc4*pRBc2-k_dpRBp*pRBp)*eps;
  enddef;

  def comp pRBc2 as
    // isComputationalComponentFor: #property_18; physicalPropertyOf #entity_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc2: micromolar {init: 0.05, pub: out};
    var k_pc3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    // isComputationalComponentFor: #property_20; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var k_pc4: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(pRBc2, time) = (k_pc3*pRBp*E2F-k_pc4*pRBc2)*eps;
  enddef;

  def comp pRBpp as
    // isComputationalComponentFor: #property_21; physicalPropertyOf #entity_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBpp: micromolar {init: 0.1, pub: out};
    var V_3: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_22; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var K_3: micromolar {pub: in};
    // isComputationalComponentFor: #property_23; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var V_4: flux {pub: in};
    var K_4: micromolar {pub: in};
    var k_dpRBpp: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(pRBpp, time) = (V_3*pRBp/(K_3+pRBp)*Me-V_4*pRBpp/(K_4+pRBpp)-k_dpRBpp*pRBpp)*eps;
  enddef;

  def comp E2F as
    // isComputationalComponentFor: #property_24; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {init: 0.01, pub: out};
    var v_se2f: flux {pub: in};
    var k_pc1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_25; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    var k_pc2: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_26; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc1: micromolar {pub: in};
    var k_pc3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_27; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var k_pc4: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_28; #entity_10; name Complex between Retinoblastoma protein phosphorylated once/Transcription factor E2F; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBc2: micromolar {pub: in};
    var V_1e2f: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_29; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    var K_1e2f: micromolar {pub: in};
    var V_2e2f: flux {pub: in};
    // isComputationalComponentFor: #property_30; #entity_12; name Phosphorylated transcription factor E2F; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2Fp: micromolar {pub: in};
    var K_2e2f: micromolar {pub: in};
    var k_de2f: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(E2F, time) = (v_se2f-k_pc1*pRB*E2F+k_pc2*pRBc1-k_pc3*pRBp*E2F+k_pc4*pRBc2-V_1e2f*Ma*E2F/(K_1e2f+E2F)+V_2e2f*E2Fp/(K_2e2f+E2Fp)-k_de2f*E2F)*eps;
  enddef;

  def comp E2Fp as
    // isComputationalComponentFor: #property_31; physicalPropertyOf #entity_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2Fp: micromolar {init: 0.01, pub: out};
    var V_1e2f: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_32; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_33; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var K_1e2f: micromolar {pub: in};
    var V_2e2f: flux {pub: in};
    var K_2e2f: micromolar {pub: in};
    var k_de2fp: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(E2Fp, time) = (V_1e2f*Ma*E2F/(K_1e2f+E2F)-V_2e2f*E2Fp/(K_2e2f+E2Fp)-k_de2fp*E2Fp)*eps;
  enddef;

  def comp Cd as
    // isComputationalComponentFor: #property_34; #entity_13; name Cyclin D (includes cyclin D1,D2 and D3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cd: micromolar {init: 0.01, pub: out};
    var k_cd1: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_35; #entity_0; #entity_1; name Mammalian cell; hasPhysicalDefinition http://identifiers.org/go/GO:0035976; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var AP1: micromolar {pub: in};
    var k_cd2: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_36; #entity_3; hasPhysicalDefinition http://identifiers.org/go/GO:0005667; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var K_i7: micromolar {pub: in};
    // isComputationalComponentFor: #property_37; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    var K_i8: micromolar {pub: in};
    // isComputationalComponentFor: #property_38; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var k_com1: second_order_rate_constant {pub: in};
    var Cdk4_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_39; #entity_14; name Inactive complex cyclin D/Cdk4-6 (includes cyclin D1,D2 and D3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdi: micromolar {pub: in};
    // isComputationalComponentFor: #property_40; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    // isComputationalComponentFor: #property_41; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var k_decom1: first_order_rate_constant {pub: in};
    var V_dd: flux {pub: in};
    var K_dd: micromolar {pub: in};
    var k_ddd: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cd, time) = (k_cd1*AP1+k_cd2*E2F*K_i7/(K_i7+pRB)*K_i8/(K_i8+pRBp)-k_com1*Cd*(Cdk4_tot-(Mdi+Md+Mdp27))+k_decom1*Mdi-V_dd*Cd/(K_dd+Cd)-k_ddd*Cd)*eps;
  enddef;

  def comp Mdi as
    // isComputationalComponentFor: #property_42; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdi: micromolar {init: 0.01, pub: out};
    var k_com1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_43; physicalPropertyOf #entity_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cd: micromolar {pub: in};
    var Cdk4_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_44; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    // isComputationalComponentFor: #property_45; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var k_decom1: first_order_rate_constant {pub: in};
    var V_m2d: flux {pub: in};
    var K_2d: micromolar {pub: in};
    var V_m1d: flux {pub: in};
    var K_1d: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mdi, time) = (k_com1*Cd*(Cdk4_tot-(Mdi+Md+Mdp27))-k_decom1*Mdi+V_m2d*Md/(K_2d+Md)-V_m1d*Mdi/(K_1d+Mdi))*eps;
  enddef;

  def comp Md as
    // isComputationalComponentFor: #property_46; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {init: 0.01, pub: out};
    var V_m1d: flux {pub: in};
    // isComputationalComponentFor: #property_47; physicalPropertyOf #entity_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdi: micromolar {pub: in};
    var K_1d: micromolar {pub: in};
    var V_m2d: flux {pub: in};
    var K_2d: micromolar {pub: in};
    var k_c1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_48; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c2: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_49; #entity_6; name Complex cyclin D/Cdk4-6/p27 (including cyclin D1,D2 and D3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Md, time) = (V_m1d*Mdi/(K_1d+Mdi)-V_m2d*Md/(K_2d+Md)-k_c1*Md*p27+k_c2*Mdp27)*eps;
  enddef;

  def comp Mdp27 as
    // isComputationalComponentFor: #property_50; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {init: 0.01, pub: out};
    var k_c1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_51; physicalPropertyOf #entity_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    // isComputationalComponentFor: #property_52; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c2: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mdp27, time) = (k_c1*Md*p27-k_c2*Mdp27)*eps;
  enddef;

  def comp Ce as
    // isComputationalComponentFor: #property_53; #entity_16; name Cyclin E (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ce: micromolar {init: 0.01, pub: out};
    var k_ce: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_54; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var K_i9: micromolar {pub: in};
    // isComputationalComponentFor: #property_55; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    var K_i10: micromolar {pub: in};
    // isComputationalComponentFor: #property_56; #entity_7; name Retinoblastoma protein phosphorylated once; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var k_com2: second_order_rate_constant {pub: in};
    var Cdk2_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_57; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mei: micromolar {pub: in};
    // isComputationalComponentFor: #property_58; #entity_8; name Active complex cyclin E/Cdk2 (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_59; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    // isComputationalComponentFor: #property_60; physicalPropertyOf #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mai: micromolar {pub: in};
    // isComputationalComponentFor: #property_61; #entity_11; name Active complex cyclin A/Cdk2 (includes A1, A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_62; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var k_decom2: first_order_rate_constant {pub: in};
    var V_de: flux {pub: in};
    // isComputationalComponentFor: #property_63; physicalPropertyOf #entity_21; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Skp2: micromolar {pub: in};
    var K_dceskp2: micromolar {pub: in};
    var K_de: micromolar {pub: in};
    var k_dde: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Ce, time) = (k_ce*E2F*K_i9/(K_i9+pRB)*K_i10/(K_i10+pRBp)-k_com2*Ce*(Cdk2_tot-(Mei+Me+Mep27+Mai+Ma+Map27))+k_decom2*Mei-V_de*Skp2/(K_dceskp2+Skp2)*Ce/(K_de+Ce)-k_dde*Ce)*eps;
  enddef;

  def comp Mei as
    // isComputationalComponentFor: #property_64; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mei: micromolar {init: 0.01, pub: out};
    var k_com2: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_65; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ce: micromolar {pub: in};
    var Cdk2_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_66; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_67; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    // isComputationalComponentFor: #property_68; #entity_19; name Inactive complex cyclin A/Cdk2 (includes cyclin A1, A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mai: micromolar {pub: in};
    // isComputationalComponentFor: #property_69; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_70; #entity_20; name Complex cyclin A/Cdk2/p27 (includes cyclin A1, A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var k_decom2: first_order_rate_constant {pub: in};
    var V_m2e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_71; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    var i_b1: micromolar {pub: in};
    var K_2e: micromolar {pub: in};
    var V_m1e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_72; physicalPropertyOf #entity_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pe: micromolar {pub: in};
    var K_1e: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mei, time) = (k_com2*Ce*(Cdk2_tot-(Mei+Me+Mep27+Mai+Ma+Map27))-k_decom2*Mei+V_m2e*(Wee1+i_b1)*Me/(K_2e+Me)-V_m1e*Pe*Mei/(K_1e+Mei))*eps;
  enddef;

  def comp Me as
    // isComputationalComponentFor: #property_73; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {init: 0.01, pub: out};
    var V_m1e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_74; #entity_23; name Active, phosphorylated form of phosphatase Cdc25 acting on cyclin E/Cdk2 (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pe: micromolar {pub: in};
    // isComputationalComponentFor: #property_75; #entity_17; name Inactive complex cyclin E/Cdk2 (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mei: micromolar {pub: in};
    var K_1e: micromolar {pub: in};
    var V_m2e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_76; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    var i_b1: micromolar {pub: in};
    var K_2e: micromolar {pub: in};
    var k_c3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_77; #entity_15; name Cyclin-dependent kinase inhibitor p27 (or p21); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c4: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_78; #entity_18; name Complex cyclin E/Cdk2/p27 (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Me, time) = (V_m1e*Pe*Mei/(K_1e+Mei)-V_m2e*(Wee1+i_b1)*Me/(K_2e+Me)-k_c3*Me*p27+k_c4*Mep27)*eps;
  enddef;

  def comp Skp2 as
    // isComputationalComponentFor: #property_79; physicalPropertyOf #entity_21; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Skp2: micromolar {init: 0.01, pub: out};
    var v_sskp2: flux {pub: in};
    var V_dskp2: flux {pub: in};
    var K_dskp2: micromolar {pub: in};
    // isComputationalComponentFor: #property_80; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Active form of CDH-1
    var Cdh1a: micromolar {pub: in};
    var K_cdh1: micromolar {pub: in};
    var k_ddskp2: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Skp2, time) = (v_sskp2-V_dskp2*Skp2/(K_dskp2+Skp2)*Cdh1a/(K_cdh1+Cdh1a)-k_ddskp2*Skp2)*eps;
  enddef;

  def comp Mep27 as
    // isComputationalComponentFor: #property_81; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {init: 0.01, pub: out};
    var k_c3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_82; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_83; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c4: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mep27, time) = (k_c3*Me*p27-k_c4*Mep27)*eps;
  enddef;

  def comp Pei as
    // isComputationalComponentFor: #property_84; physicalPropertyOf #entity_25; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pei: micromolar {init: 0.01, pub: out};
    var v_spei: flux {pub: in};
    var V_6e: flux {pub: in};
    var x_e1: dimensionless {pub: in};
    var x_e2: per_micromolar {pub: in};
    // isComputationalComponentFor: #property_85; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    // isComputationalComponentFor: #property_86; physicalPropertyOf #entity_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pe: micromolar {pub: in};
    var K_6e: micromolar {pub: in};
    var V_m5e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_87; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var a_e: micromolar {pub: in};
    var K_5e: micromolar {pub: in};
    var k_dpei: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pei, time) = (v_spei+V_6e*(x_e1+x_e2*Chk1)*Pe/(K_6e+Pe)-V_m5e*(Me+a_e)*Pei/(K_5e+Pei)-k_dpei*Pei)*eps;
  enddef;

  def comp Pe as
    // isComputationalComponentFor: #property_88; physicalPropertyOf #entity_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pe: micromolar {init: 0.01, pub: out};
    var V_m5e: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_89; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var a_e: micromolar {pub: in};
    // isComputationalComponentFor: #property_90; #entity_25; name Inactive, dephosphorylated form of phosphatase Cdc25 acting on cyclin E/Cdk2 (includes cyclin E1 and E2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pei: micromolar {pub: in};
    var K_5e: micromolar {pub: in};
    var V_6e: flux {pub: in};
    var x_e1: dimensionless {pub: in};
    var x_e2: per_micromolar {pub: in};
    // isComputationalComponentFor: #property_91; #entity_26; hasPhysicalDefinition https://identifiers.org/uniprot/O14757; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    var K_6e: micromolar {pub: in};
    var k_dpe: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pe, time) = (V_m5e*(Me+a_e)*Pei/(K_5e+Pei)-V_6e*(x_e1+x_e2*Chk1)*Pe/(K_6e+Pe)-k_dpe*Pe)*eps;
  enddef;

  def comp Ca as
    // isComputationalComponentFor: #property_92; #entity_27; name Cyclin A (includes both cyclin A1 and cyclin A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ca: micromolar {init: 0.01, pub: out};
    var k_ca: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_93; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var K_i11: micromolar {pub: in};
    var K_i12: micromolar {pub: in};
    // isComputationalComponentFor: #property_94; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    // isComputationalComponentFor: #property_95; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var k_com3: second_order_rate_constant {pub: in};
    var Cdk2_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_96; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mei: micromolar {pub: in};
    // isComputationalComponentFor: #property_97; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_98; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    // isComputationalComponentFor: #property_99; physicalPropertyOf #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mai: micromolar {pub: in};
    // isComputationalComponentFor: #property_100; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_101; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var k_decom3: first_order_rate_constant {pub: in};
    var V_da: flux {pub: in};
    var K_da: micromolar {pub: in};
    // isComputationalComponentFor: #property_102; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc20a: micromolar {pub: in};
    var K_acdc20: micromolar {pub: in};
    var k_dda: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Ca, time) = (k_ca*E2F*K_i11/(K_i11+pRB)*K_i12/(K_i12+pRBp)-k_com3*Ca*(Cdk2_tot-(Mei+Me+Mep27+Mai+Ma+Map27))+k_decom3*Mai-V_da*Ca/(K_da+Ca)*Cdc20a/(K_acdc20+Cdc20a)-k_dda*Ca)*eps;
  enddef;

  def comp Mai as
    // isComputationalComponentFor: #property_103; physicalPropertyOf #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mai: micromolar {init: 0.01, pub: out};
    var k_com3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_104; physicalPropertyOf #entity_27; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ca: micromolar {pub: in};
    var Cdk2_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_105; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mei: micromolar {pub: in};
    // isComputationalComponentFor: #property_106; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_107; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    // isComputationalComponentFor: #property_108; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_109; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var k_decom3: first_order_rate_constant {pub: in};
    var V_m2a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_110; #entity_22; name Active, dephosphorylated form of kinase Wee1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    var i_b2: micromolar {pub: in};
    var K_2a: micromolar {pub: in};
    var V_m1a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_111; physicalPropertyOf #entity_29; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pa: micromolar {pub: in};
    var K_1a: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mai, time) = (k_com3*Ca*(Cdk2_tot-(Mei+Me+Mep27+Mai+Ma+Map27))-k_decom3*Mai+V_m2a*(Wee1+i_b2)*Ma/(K_2a+Ma)-V_m1a*Pa*Mai/(K_1a+Mai))*eps;
  enddef;

  def comp Ma as
    // isComputationalComponentFor: #property_112; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {init: 0.01, pub: out};
    var V_m1a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_113; physicalPropertyOf #entity_29; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pa: micromolar {pub: in};
    // isComputationalComponentFor: #property_114; physicalPropertyOf #entity_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mai: micromolar {pub: in};
    var K_1a: micromolar {pub: in};
    var V_m2a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_115; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    var i_b2: micromolar {pub: in};
    var K_2a: micromolar {pub: in};
    var k_c5: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_116; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c6: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_117; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Ma, time) = (V_m1a*Pa*Mai/(K_1a+Mai)-V_m2a*(Wee1+i_b2)*Ma/(K_2a+Ma)-k_c5*Ma*p27+k_c6*Map27)*eps;
  enddef;

  def comp Map27 as
    // isComputationalComponentFor: #property_118; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {init: 0.01, pub: out};
    var k_c5: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_119; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_120; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c6: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Map27, time) = (k_c5*Ma*p27-k_c6*Map27)*eps;
  enddef;

  def comp p27 as
    // isComputationalComponentFor: #property_121; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {init: 0.01, pub: out};
    var v_s1p27: flux {pub: in};
    var v_s2p27: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_122; physicalPropertyOf #entity_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var E2F: micromolar {pub: in};
    var K_i13: micromolar {pub: in};
    // isComputationalComponentFor: #property_123; physicalPropertyOf #entity_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRB: micromolar {pub: in};
    var K_i14: micromolar {pub: in};
    // isComputationalComponentFor: #property_124; physicalPropertyOf #entity_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var pRBp: micromolar {pub: in};
    var k_c1: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_125; #entity_5; name Active complex cyclin D/Cdk4-6 (includes cyclinD1,D2 and D3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Md: micromolar {pub: in};
    var k_c2: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_126; physicalPropertyOf #entity_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mdp27: micromolar {pub: in};
    var k_c3: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_127; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var k_c4: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_128; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mep27: micromolar {pub: in};
    var k_c5: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_129; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    var k_c6: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_130; physicalPropertyOf #entity_20; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Map27: micromolar {pub: in};
    var k_c7: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_131; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var k_c8: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_132; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {pub: in};
    var V_1p27: first_order_rate_constant {pub: in};
    var K_1p27: micromolar {pub: in};
    var V_2p27: flux {pub: in};
    var K_2p27: micromolar {pub: in};
    // isComputationalComponentFor: #property_133; #entity_32; name Phosphorylated form of cyclin-dependent kinase inhibitor p27(or p21); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27p: micromolar {pub: in};
    var k_ddp27: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(p27, time) = (v_s1p27+v_s2p27*E2F*K_i13/(K_i13+pRB)*K_i14/(K_i14+pRBp)-k_c1*Md*p27+k_c2*Mdp27-k_c3*Me*p27+k_c4*Mep27-k_c5*Ma*p27+k_c6*Map27-k_c7*Mb*p27+k_c8*Mbp27-V_1p27*Me*p27/(K_1p27+p27)+V_2p27*p27p/(K_2p27+p27p)-k_ddp27*p27)*eps;
  enddef;

  def comp p27p as
    // isComputationalComponentFor: #property_134; physicalPropertyOf #entity_32; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27p: micromolar {init: 0.01, pub: out};
    var V_1p27: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_135; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    // isComputationalComponentFor: #property_136; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var K_1p27: micromolar {pub: in};
    var V_2p27: flux {pub: in};
    var K_2p27: micromolar {pub: in};
    var V_dp27p: flux {pub: in};
    // isComputationalComponentFor: #property_137; #entity_21; hasPhysicalDefinition https://identifiers.org/uniprot/Q13309; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Skp2: micromolar {pub: in};
    var K_dp27skp2: micromolar {pub: in};
    var K_dp27p: micromolar {pub: in};
    var k_ddp27p: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(p27p, time) = (V_1p27*Me*p27/(K_1p27+p27)-V_2p27*p27p/(K_2p27+p27p)-V_dp27p*Skp2/(K_dp27skp2+Skp2)*p27p/(K_dp27p+p27p)-k_ddp27p*p27p)*eps;
  enddef;

  def comp Cdh1i as
    // isComputationalComponentFor: #property_138; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Inactive form of CDH-1
    var Cdh1i: micromolar {init: 0.01, pub: out};
    var V_2cdh1: first_order_rate_constant {pub: in};
    var K_2cdh1: micromolar {pub: in};
    var V_1cdh1: flux {pub: in};
    var K_1cdh1: micromolar {pub: in};
    var k_dcdh1i: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_139; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Active form of CDH-1
    var Cdh1a: micromolar {pub: in};
    // isComputationalComponentFor: #property_140; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_141; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cdh1i, time) = (V_2cdh1*Cdh1a/(K_2cdh1+Cdh1a)*(Ma+Mb)-V_1cdh1*Cdh1i/(K_1cdh1+Cdh1i)-k_dcdh1i*Cdh1i)*eps;
  enddef;

  def comp Cdh1a as
    // isComputationalComponentFor: #property_142; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Active form of CDH-1
    var Cdh1a: micromolar {init: 0.01, pub: out};
    var v_scdh1a: flux {pub: in};
    var V_1cdh1: flux {pub: in};
    var K_1cdh1: micromolar {pub: in};
    var V_2cdh1: first_order_rate_constant {pub: in};
    var K_2cdh1: micromolar {pub: in};
    var k_dcdh1a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_143; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Inactive form of CDH-1
    var Cdh1i: micromolar {pub: in};
    // isComputationalComponentFor: #property_144; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_145; #entity_30; name Active complex cyclin B/Cdk1 (includes cyclin B1, B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cdh1a, time) = (v_scdh1a+V_1cdh1*Cdh1i/(K_1cdh1+Cdh1i)-V_2cdh1*Cdh1a/(K_2cdh1+Cdh1a)*(Ma+Mb)-k_dcdh1a*Cdh1a)*eps;
  enddef;

  def comp Pai as
    // isComputationalComponentFor: #property_146; physicalPropertyOf #entity_33; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pai: micromolar {init: 0.01, pub: out};
    var v_spai: flux {pub: in};
    var V_6a: flux {pub: in};
    var x_a1: dimensionless {pub: in};
    var x_a2: per_micromolar {pub: in};
    var K_6a: micromolar {pub: in};
    var V_m5a: first_order_rate_constant {pub: in};
    var a_a: micromolar {pub: in};
    var K_5a: micromolar {pub: in};
    var k_dpai: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_147; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    // isComputationalComponentFor: #property_148; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // isComputationalComponentFor: #property_149; physicalPropertyOf #entity_29; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pa: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pai, time) = (v_spai+V_6a*(x_a1+x_a2*Chk1)*Pa/(K_6a+Pa)-V_m5a*(Ma+a_a)*Pai/(K_5a+Pai)-k_dpai*Pai)*eps;
  enddef;

  def comp Pa as
    // isComputationalComponentFor: #property_150; #entity_29; name Active, phosphorylated form of phosphatase Cdc25 acting on cyclin A/Cdk2 (including cyclin A1 and A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pa: micromolar {init: 0.01, pub: out};
    var V_m5a: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_151; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    var a_a: micromolar {pub: in};
    // isComputationalComponentFor: #property_152; #entity_33; name Inactive, dephosphorylated form of phosphatase Cdc25 acting on cyclin A/Cdk2 (includes cyclin A1 and A2); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pai: micromolar {pub: in};
    var K_5a: micromolar {pub: in};
    var V_6a: flux {pub: in};
    var x_a1: dimensionless {pub: in};
    var x_a2: per_micromolar {pub: in};
    // isComputationalComponentFor: #property_153; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    var K_6a: micromolar {pub: in};
    var k_dpa: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pa, time) = (V_m5a*(Ma+a_a)*Pai/(K_5a+Pai)-V_6a*(x_a1+x_a2*Chk1)*Pa/(K_6a+Pa)-k_dpa*Pa)*eps;
  enddef;

  def comp Cb as
    // isComputationalComponentFor: #property_154; #entity_34; name Cyclin B (contain cyclin B1, B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cb: micromolar {init: 0.01, pub: out};
    var v_cb: flux {pub: in};
    var k_com4: second_order_rate_constant {pub: in};
    var Cdk1_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_155; physicalPropertyOf #entity_35; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbi: micromolar {pub: in};
    // isComputationalComponentFor: #property_156; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    // isComputationalComponentFor: #property_157; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {pub: in};
    var k_decom4: first_order_rate_constant {pub: in};
    var V_db: flux {pub: in};
    var K_db: micromolar {pub: in};
    // isComputationalComponentFor: #property_158; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc20a: micromolar {pub: in};
    var K_dbcdc20: micromolar {pub: in};
    // isComputationalComponentFor: #property_159; physicalPropertyOf #entity_24; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Active form of CDH-1
    var Cdh1a: micromolar {pub: in};
    var K_dbcdh1: micromolar {pub: in};
    var k_ddb: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cb, time) = (v_cb-k_com4*Cb*(Cdk1_tot-(Mbi+Mb+Mbp27))+k_decom4*Mbi-V_db*Cb/(K_db+Cb)*(Cdc20a/(K_dbcdc20+Cdc20a)+Cdh1a/(K_dbcdh1+Cdh1a))-k_ddb*Cb)*eps;
  enddef;

  def comp Mbi as
    // isComputationalComponentFor: #property_160; #entity_35; name Inactive complex cyclin B/Cdk1 (includes cyclin B1,B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbi: micromolar {init: 0.01, pub: out};
    var k_com4: second_order_rate_constant {pub: in};
    var Cdk1_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_161; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    // isComputationalComponentFor: #property_162; #entity_31; name Complex cyclin B/Cdk1/p27 (includes cyclin B1,B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {pub: in};
    var k_decom4: first_order_rate_constant {pub: in};
    var V_m2b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_163; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    // isComputationalComponentFor: #property_164; physicalPropertyOf #entity_34; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cb: micromolar {pub: in};
    var i_b3: micromolar {pub: in};
    var K_2b: micromolar {pub: in};
    var V_m1b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_165; physicalPropertyOf #entity_36; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pb: micromolar {pub: in};
    var K_1b: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mbi, time) = (k_com4*Cb*(Cdk1_tot-(Mbi+Mb+Mbp27))-k_decom4*Mbi+V_m2b*(Wee1+i_b3)*Mb/(K_2b+Mb)-V_m1b*Pb*Mbi/(K_1b+Mbi))*eps;
  enddef;

  def comp Mb as
    // isComputationalComponentFor: #property_166; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {init: 0.01, pub: out};
    var V_m1b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_167; physicalPropertyOf #entity_36; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pb: micromolar {pub: in};
    // isComputationalComponentFor: #property_168; physicalPropertyOf #entity_35; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbi: micromolar {pub: in};
    var K_1b: micromolar {pub: in};
    var V_m2b: first_order_rate_constant {pub: in};
    var i_b3: micromolar {pub: in};
    var K_2b: micromolar {pub: in};
    var k_c7: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_169; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c8: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_170; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    // isComputationalComponentFor: #property_171; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mb, time) = (V_m1b*Pb*Mbi/(K_1b+Mbi)-V_m2b*(Wee1+i_b3)*Mb/(K_2b+Mb)-k_c7*Mb*p27+k_c8*Mbp27)*eps;
  enddef;

  def comp Mbp27 as
    // isComputationalComponentFor: #property_172; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {init: 0.01, pub: out};
    var k_c7: second_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_173; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    // isComputationalComponentFor: #property_174; physicalPropertyOf #entity_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var p27: micromolar {pub: in};
    var k_c8: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mbp27, time) = (k_c7*Mb*p27-k_c8*Mbp27)*eps;
  enddef;

  def comp Cdc20i as
    // isComputationalComponentFor: #property_175; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Inactivated Cdc20
    var Cdc20i: micromolar {init: 0.01, pub: out};
    var v_scdc20i: flux {pub: in};
    var V_m3b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_176; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var K_3b: micromolar {pub: in};
    var V_m4b: flux {pub: in};
    // isComputationalComponentFor: #property_177; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc20a: micromolar {pub: in};
    var K_4b: micromolar {pub: in};
    var k_dcdc20i: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cdc20i, time) = (v_scdc20i-V_m3b*Mb*Cdc20i/(K_3b+Cdc20i)+V_m4b*Cdc20a/(K_4b+Cdc20a)-k_dcdc20i*Cdc20i)*eps;
  enddef;

  def comp Cdc20a as
    // isComputationalComponentFor: #property_178; #entity_28; hasPhysicalDefinition https://identifiers.org/uniprot/Q12834; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc20a: micromolar {init: 0.01, pub: out};
    var V_m3b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_179; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    // isComputationalComponentFor: #property_180; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Inactivated Cdc20
    var Cdc20i: micromolar {pub: in};
    var K_3b: micromolar {pub: in};
    var V_m4b: flux {pub: in};
    var K_4b: micromolar {pub: in};
    var k_dcdc20a: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cdc20a, time) = (V_m3b*Mb*Cdc20i/(K_3b+Cdc20i)-V_m4b*Cdc20a/(K_4b+Cdc20a)-k_dcdc20a*Cdc20a)*eps;
  enddef;

  def comp Pbi as
    // isComputationalComponentFor: #property_181; physicalPropertyOf #entity_37; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pbi: micromolar {init: 0.01, pub: out};
    var v_spbi: flux {pub: in};
    var V_6b: flux {pub: in};
    var x_b1: dimensionless {pub: in};
    var x_b2: per_micromolar {pub: in};
    // isComputationalComponentFor: #property_182; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    // isComputationalComponentFor: #property_183; #entity_36; name Active, phosphorylated form of phosphatase Cdc25 acting on cyclin B/Cdk1 (including cyclin B1,B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pb: micromolar {pub: in};
    var K_6b: micromolar {pub: in};
    var V_m5b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_184; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var a_b: micromolar {pub: in};
    var K_5b: micromolar {pub: in};
    var k_dpbi: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pbi, time) = (v_spbi+V_6b*(x_b1+x_b2*Chk1)*Pb/(K_6b+Pb)-V_m5b*(Mb+a_b)*Pbi/(K_5b+Pbi)-k_dpbi*Pbi)*eps;
  enddef;

  def comp Pb as
    // isComputationalComponentFor: #property_185; physicalPropertyOf #entity_36; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pb: micromolar {init: 0.01, pub: out};
    var V_m5b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_186; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var a_b: micromolar {pub: in};
    // isComputationalComponentFor: #property_187; #entity_37; name Inactive, dephosphorylated form of phosphatase Cdc25 acting on cyclin B/Cdk1 (includes cyclin B1,B2 and B3); hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pbi: micromolar {pub: in};
    var K_5b: micromolar {pub: in};
    var V_6b: flux {pub: in};
    var x_b1: dimensionless {pub: in};
    var x_b2: per_micromolar {pub: in};
    // isComputationalComponentFor: #property_188; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {pub: in};
    var K_6b: micromolar {pub: in};
    var k_dpb: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pb, time) = (V_m5b*(Mb+a_b)*Pbi/(K_5b+Pbi)-V_6b*(x_b1+x_b2*Chk1)*Pb/(K_6b+Pb)-k_dpb*Pb)*eps;
  enddef;

  def comp Wee1 as
    // isComputationalComponentFor: #property_189; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {init: 0.1, pub: out};
    var v_swee1: flux {pub: in};
    var k_sw: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_190; #entity_38; name Wee1 mRNA induced by the circadian clock; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mw: micromolar {pub: in};
    var V_m7b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_191; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var i_b: micromolar {pub: in};
    var K_7b: micromolar {pub: in};
    var V_m8b: flux {pub: in};
    // isComputationalComponentFor: #property_192; physicalPropertyOf #entity_39; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1p: micromolar {pub: in};
    var K_8b: micromolar {pub: in};
    var k_dwee1: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Wee1, time) = (v_swee1+k_sw*Mw-V_m7b*(Mb+i_b)*Wee1/(K_7b+Wee1)+V_m8b*Wee1p/(K_8b+Wee1p)-k_dwee1*Wee1)*eps;
  enddef;

  def comp Wee1p as
    // isComputationalComponentFor: #property_193; #entity_39; name Inactive, phosphorylated form of kinase Wee1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1p: micromolar {init: 0.01, pub: out};
    var V_m7b: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_194; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    var i_b: micromolar {pub: in};
    // isComputationalComponentFor: #property_195; physicalPropertyOf #entity_22; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Wee1: micromolar {pub: in};
    var K_7b: micromolar {pub: in};
    var V_m8b: flux {pub: in};
    var K_8b: micromolar {pub: in};
    var k_dwee1p: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Wee1p, time) = (V_m7b*(Mb+i_b)*Wee1/(K_7b+Wee1)-V_m8b*Wee1p/(K_8b+Wee1p)-k_dwee1p*Wee1p)*eps;
  enddef;

  def comp Cdc45 as
    // isComputationalComponentFor: #property_196; physicalPropertyOf #entity_40; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc45: micromolar {init: 0.01, pub: out};
    var V_1cdc45: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_197; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Me: micromolar {pub: in};
    var Cdc45_tot: micromolar {pub: in};
    var K_1cdc45: micromolar {pub: in};
    var V_2cdc45: flux {pub: in};
    var K_2cdc45: micromolar {pub: in};
    var k_spol: second_order_rate_constant {pub: in};
    var Pol_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_198; physicalPropertyOf #entity_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pol: micromolar {pub: in};
    var k_dpol: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Cdc45, time) = (V_1cdc45*Me*(Cdc45_tot-Cdc45)/(K_1cdc45+Cdc45_tot-Cdc45)-V_2cdc45*Cdc45/(K_2cdc45+Cdc45)-k_spol*(Pol_tot-Pol)*Cdc45+k_dpol*Pol)*eps;
  enddef;

  def comp Pol as
    // isComputationalComponentFor: #property_199; #entity_41; hasPhysicalDefinition http://identifiers.org/go/GO:0034061; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pol: micromolar {init: 0.01, pub: out};
    var k_spol: second_order_rate_constant {pub: in};
    var Pol_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_200; #entity_40; hasPhysicalDefinition https://identifiers.org/uniprot/Q9YHZ6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc45: micromolar {pub: in};
    var k_dpol: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Pol, time) = (k_spol*(Pol_tot-Pol)*Cdc45-k_dpol*Pol)*eps;
  enddef;

  def comp Primer as
    // isComputationalComponentFor: #property_201; #entity_42; name RNA primer; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Primer: micromolar {init: 0.01, pub: out};
    var k_sprim: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_202; physicalPropertyOf #entity_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Pol: micromolar {pub: in};
    var k_dprim: first_order_rate_constant {pub: in};
    var k_aatr: second_order_rate_constant {pub: in};
    var ATR_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_203; #entity_43; hasPhysicalDefinition https://identifiers.org/uniprot/Q13535; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATR: micromolar {pub: in};
    var k_datr: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Primer, time) = (k_sprim*Pol-k_dprim*Primer-k_aatr*(ATR_tot-ATR)*Primer+k_datr*ATR)*eps;
  enddef;

  def comp ATR as
    // isComputationalComponentFor: #property_204; physicalPropertyOf #entity_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATR: micromolar {init: 0.01, pub: out};
    var k_aatr: second_order_rate_constant {pub: in};
    var ATR_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_205; physicalPropertyOf #entity_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Primer: micromolar {pub: in};
    var k_datr: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(ATR, time) = (k_aatr*(ATR_tot-ATR)*Primer-k_datr*ATR)*eps;
  enddef;

  def comp Chk1 as
    // isComputationalComponentFor: #property_206; physicalPropertyOf #entity_26; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Chk1: micromolar {init: 0.01, pub: out};
    var V_1chk: first_order_rate_constant {pub: in};
    // isComputationalComponentFor: #property_207; physicalPropertyOf #entity_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var ATR: micromolar {pub: in};
    var Chk1_tot: micromolar {pub: in};
    var K_1chk: micromolar {pub: in};
    var V_2chk: flux {pub: in};
    var K_2chk: micromolar {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Chk1, time) = (V_1chk*ATR*(Chk1_tot-Chk1)/(K_1chk+Chk1_tot-Chk1)-V_2chk*Chk1/(K_2chk+Chk1))*eps;
  enddef;

  def comp Mw as
    // isComputationalComponentFor: #property_208; physicalPropertyOf #entity_38; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mw: micromolar {init: 0, pub: out};
    var eps: dimensionless {pub: in};
    var v_sw: flux {pub: in};
    // isComputationalComponentFor: #property_209; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    var n_gerard: dimensionless {pub: in};
    var K_iw: nanomolar {pub: in};
    var v_dw: flux {pub: in};
    var K_dw: micromolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(Mw, time) = v_sw*pow(BN, n_gerard)/(pow(K_iw, n_gerard)+pow(BN, n_gerard))-v_dw*Mw/(K_dw+Mw);
  enddef;

  def comp X as
    // isComputationalComponentFor: #property_210; #entity_45; name transcription factor X; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var X: micromolar {init: 0.01, pub: out};
    var eps: dimensionless {pub: in};
    var V_1x: first_order_rate_constant {pub: in};
    var X_tot: micromolar {pub: in};
    var K_1x: micromolar {pub: in};
    var V_2x: flux {pub: in};
    var K_2x: micromolar {pub: in};
    // isComputationalComponentFor: #property_211; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Ma: micromolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(X, time) = (V_1x*Ma*(X_tot-X)/(K_1x+X_tot-X)-V_2x*X/(K_2x+X))*eps;
  enddef;

  def comp CbA as
    // isComputationalComponentFor: #property_212; physicalPropertyOf #entity_34; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CbA: micromolar {init: 0.01, pub: out};
    var v_cb: flux {pub: in};
    // isComputationalComponentFor: #property_213; physicalPropertyOf #entity_45; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var X: micromolar {pub: in};
    var k_com4: second_order_rate_constant {pub: in};
    var Cdk1_tot: micromolar {pub: in};
    // isComputationalComponentFor: #property_214; physicalPropertyOf #entity_35; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbi: micromolar {pub: in};
    // isComputationalComponentFor: #property_215; physicalPropertyOf #entity_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mb: micromolar {pub: in};
    // isComputationalComponentFor: #property_216; physicalPropertyOf #entity_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Mbp27: micromolar {pub: in};
    var k_decom4: first_order_rate_constant {pub: in};
    var V_db: flux {pub: in};
    var K_db: micromolar {pub: in};
    // isComputationalComponentFor: #property_217; physicalPropertyOf #entity_28; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var Cdc20a: micromolar {pub: in};
    var K_dbcdc20: micromolar {pub: in};
    // isComputationalComponentFor: #property_218; #entity_24; hasPhysicalDefinition https://identifiers.org/uniprot/P12830; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Active form of CDH-1
    var Cdh1a: micromolar {pub: in};
    var K_dbcdh1: micromolar {pub: in};
    var k_ddb: first_order_rate_constant {pub: in};
    var eps: dimensionless {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(CbA, time) = (v_cb*X*1{per_micromolar}-k_com4*CbA*(Cdk1_tot-(Mbi+Mb+Mbp27))+k_decom4*Mbi-V_db*CbA/(K_db+CbA)*(Cdc20a/(K_dbcdc20+Cdc20a)+Cdh1a/(K_dbcdh1+Cdh1a))-k_ddb*CbA)*eps;
  enddef;

  def comp MP as
    // isComputationalComponentFor: #property_219; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MP: nanomolar {init: 0.1, pub: out};
    var vsP: nano_flux {init: 2.4};
    var vmP: nano_flux {init: 2.2};
    var kdmp: first_order_rate_constant_nano {init: 0.02};
    var KAP: nanomolar {init: 0.6};
    var KmP: nanomolar {init: 0.3};
    var n: dimensionless {pub: in};
    // isComputationalComponentFor: #property_220; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(MP, time) = vsP*pow(BN, n)/(pow(KAP, n)+pow(BN, n))-(vmP*MP/(KmP+MP)+kdmp*MP);
  enddef;

  def comp MC as
    // isComputationalComponentFor: #property_221; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MC: nanomolar {init: 1.2, pub: out};
    var vsC: nano_flux {init: 2.2};
    var vmC: nano_flux {init: 2};
    var kdmc: first_order_rate_constant_nano {init: 0.02};
    var KAC: nanomolar {init: 0.6};
    var KmC: nanomolar {init: 0.4};
    var n: dimensionless {pub: in};
    // isComputationalComponentFor: #property_222; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(MC, time) = vsC*pow(BN, n)/(pow(KAC, n)+pow(BN, n))-(vmC*MC/(KmC+MC)+kdmc*MC);
  enddef;

  def comp MB as
    // isComputationalComponentFor: #property_223; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MB: nanomolar {init: 9, pub: out};
    var vsB: nano_flux {init: 1.8};
    var vmB: nano_flux {init: 1.3};
    var kdmb: first_order_rate_constant_nano {init: 0.02};
    var KIB: nanomolar {init: 2.2};
    var KmB: nanomolar {init: 0.4};
    var m: dimensionless {pub: in};
    // isComputationalComponentFor: #property_224; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var RN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(MB, time) = vsB*pow(KIB, m)/(pow(KIB, m)+pow(RN, m))-(vmB*MB/(KmB+MB)+kdmb*MB);
  enddef;

  def comp MR as
    // isComputationalComponentFor: #property_225; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MR: nanomolar {init: 1.5, pub: out};
    var vsR: nano_flux {init: 1.6};
    var vmR: nano_flux {init: 1.6};
    var kdmr: first_order_rate_constant_nano {init: 0.02};
    var KAR: nanomolar {init: 0.6};
    var KmR: nanomolar {init: 0.4};
    var h: dimensionless {pub: in};
    // isComputationalComponentFor: #property_226; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(MR, time) = vsR*pow(BN, h)/(pow(KAR, h)+pow(BN, h))-(vmR*MR/(KmR+MR)+kdmr*MR);
  enddef;

  def comp PC as
    // isComputationalComponentFor: #property_227; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PC: nanomolar {init: 0.1, pub: out};
    var ksP: first_order_rate_constant_nano {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k3: second_order_rate_constant_nano {pub: in};
    var k4: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1P: nano_flux {pub: in};
    var V2P: nano_flux {pub: in};
    // isComputationalComponentFor: #property_228; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_229; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_230; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_231; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MP: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PC, time) = ksP*MP+V2P*PCP/(Kdp+PCP)+k4*PCC-(V1P*PC/(Kp+PC)+k3*PC*CC+kdn*PC);
  enddef;

  def comp CC as
    // isComputationalComponentFor: #property_232; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CC: nanomolar {init: 0.1, pub: out};
    var ksC: first_order_rate_constant_nano {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k3: second_order_rate_constant_nano {pub: in};
    var k4: first_order_rate_constant_nano {pub: in};
    var kdnc: first_order_rate_constant_nano {pub: in};
    var V1C: nano_flux {pub: in};
    var V2C: nano_flux {pub: in};
    // isComputationalComponentFor: #property_233; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CCP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_234; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_235; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_236; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(CC, time) = ksC*MC+V2C*CCP/(Kdp+CCP)+k4*PCC-(V1C*CC/(Kp+CC)+k3*PC*CC+kdnc*CC);
  enddef;

  def comp RC as
    // isComputationalComponentFor: #property_237; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var RC: nanomolar {init: 0.1, pub: out};
    var ksR: first_order_rate_constant_nano {pub: in};
    var Kd: nanomolar {pub: in};
    var k9: first_order_rate_constant_nano {pub: in};
    var k10: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var vdRC: nano_flux {pub: in};
    // isComputationalComponentFor: #property_238; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var RN: nanomolar {pub: in};
    // isComputationalComponentFor: #property_239; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MR: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(RC, time) = ksR*MR+k10*RN-(k9*RC+vdRC*RC/(Kd+RC)+kdn*RC);
  enddef;

  def comp PCP as
    // isComputationalComponentFor: #property_240; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCP: nanomolar {init: 0.1, pub: out};
    var vdPC: nano_flux {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1P: nano_flux {pub: in};
    var V2P: nano_flux {pub: in};
    // isComputationalComponentFor: #property_241; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PCP, time) = V1P*PC/(Kp+PC)-(V2P*PCP/(Kdp+PCP)+vdPC*PCP/(Kd+PCP)+kdn*PCP);
  enddef;

  def comp CCP as
    // isComputationalComponentFor: #property_242; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CCP: nanomolar {init: 0.1, pub: out};
    var vdCC: nano_flux {pub: in};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1C: nano_flux {pub: in};
    var V2C: nano_flux {pub: in};
    // isComputationalComponentFor: #property_243; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(CCP, time) = V1C*CC/(Kp+CC)-(V2C*CCP/(Kdp+CCP)+vdCC*CCP/(Kd+CCP)+kdn*CCP);
  enddef;

  def comp PCC as
    // isComputationalComponentFor: #property_244; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCC: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k1: first_order_rate_constant_nano {pub: in};
    var k2: first_order_rate_constant_nano {pub: in};
    var k3: second_order_rate_constant_nano {pub: in};
    var k4: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1PC: nano_flux {pub: in};
    var V2PC: nano_flux {pub: in};
    // isComputationalComponentFor: #property_245; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCCP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_246; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCN: nanomolar {pub: in};
    // isComputationalComponentFor: #property_247; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_248; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var CC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PCC, time) = V2PC*PCCP/(Kdp+PCCP)+k3*PC*CC+k2*PCN-(V1PC*PCC/(Kp+PCC)+k4*PCC+k1*PCC+kdn*PCC);
  enddef;

  def comp PCN as
    // isComputationalComponentFor: #property_249; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCN: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k1: first_order_rate_constant_nano {pub: in};
    var k2: first_order_rate_constant_nano {pub: in};
    var k7: second_order_rate_constant_nano {pub: in};
    var k8: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V3PC: nano_flux {pub: in};
    var V4PC: nano_flux {pub: in};
    // isComputationalComponentFor: #property_250; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCNP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_251; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_252; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // isComputationalComponentFor: #property_253; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var IN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PCN, time) = V4PC*PCNP/(Kdp+PCNP)+k1*PCC+k8*IN-(V3PC*PCN/(Kp+PCN)+k2*PCN+k7*BN*PCN+kdn*PCN);
  enddef;

  def comp RN as
    // isComputationalComponentFor: #property_254; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var RN: nanomolar {init: 0.1, pub: out};
    var Kd: nanomolar {pub: in};
    var k9: first_order_rate_constant_nano {pub: in};
    var k10: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var vdRN: nano_flux {pub: in};
    // isComputationalComponentFor: #property_255; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var RC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(RN, time) = k9*RC-(k10*RN+vdRN*RN/(Kd+RN)+kdn*RN);
  enddef;

  def comp PCCP as
    // isComputationalComponentFor: #property_256; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCCP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1PC: nano_flux {pub: in};
    var V2PC: nano_flux {pub: in};
    var vdPCC: nano_flux {pub: in};
    // isComputationalComponentFor: #property_257; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PCCP, time) = V1PC*PCC/(Kp+PCC)-(V2PC*PCCP/(Kdp+PCCP)+vdPCC*PCCP/(Kd+PCCP)+kdn*PCCP);
  enddef;

  def comp PCNP as
    // isComputationalComponentFor: #property_258; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCNP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V3PC: nano_flux {pub: in};
    var V4PC: nano_flux {pub: in};
    var vdPCN: nano_flux {pub: in};
    // isComputationalComponentFor: #property_259; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(PCNP, time) = V3PC*PCN/(Kp+PCN)-(V4PC*PCNP/(Kdp+PCNP)+vdPCN*PCNP/(Kd+PCNP)+kdn*PCNP);
  enddef;

  def comp BC as
    // isComputationalComponentFor: #property_260; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BC: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var ksB: first_order_rate_constant_nano {pub: in};
    var k5: first_order_rate_constant_nano {pub: in};
    var k6: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1B: nano_flux {pub: in};
    var V2B: nano_flux {pub: in};
    // isComputationalComponentFor: #property_261; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var MB: nanomolar {pub: in};
    // isComputationalComponentFor: #property_262; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BCP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_263; #entity_44; hasPhysicalDefinition http://identifiers.org/go/GO:1990513; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(BC, time) = V2B*BCP/(Kdp+BCP)+k6*BN+ksB*MB-(V1B*BC/(Kp+BC)+k5*BC+kdn*BC);
  enddef;

  def comp BCP as
    // isComputationalComponentFor: #property_264; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BCP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V1B: nano_flux {pub: in};
    var V2B: nano_flux {pub: in};
    var vdBC: nano_flux {pub: in};
    // isComputationalComponentFor: #property_265; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BC: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(BCP, time) = V1B*BC/(Kp+BC)-(V2B*BCP/(Kdp+BCP)+vdBC*BCP/(Kd+BCP)+kdn*BCP);
  enddef;

  def comp BN as
    // isComputationalComponentFor: #property_266; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var k5: first_order_rate_constant_nano {pub: in};
    var k6: first_order_rate_constant_nano {pub: in};
    var k7: second_order_rate_constant_nano {pub: in};
    var k8: first_order_rate_constant_nano {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V3B: nano_flux {pub: in};
    var V4B: nano_flux {pub: in};
    // isComputationalComponentFor: #property_267; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BNP: nanomolar {pub: in};
    // isComputationalComponentFor: #property_268; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BC: nanomolar {pub: in};
    // isComputationalComponentFor: #property_269; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCN: nanomolar {pub: in};
    // isComputationalComponentFor: #property_270; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var IN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(BN, time) = V4B*BNP/(Kdp+BNP)+k5*BC+k8*IN-(V3B*BN/(Kp+BN)+k6*BN+k7*BN*PCN+kdn*BN);
  enddef;

  def comp BNP as
    // isComputationalComponentFor: #property_271; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BNP: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {pub: in};
    var Kdp: nanomolar {pub: in};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant_nano {pub: in};
    var V3B: nano_flux {pub: in};
    var V4B: nano_flux {pub: in};
    var vdBN: nano_flux {pub: in};
    // isComputationalComponentFor: #property_272; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(BNP, time) = V3B*BN/(Kp+BN)-(V4B*BNP/(Kdp+BNP)+vdBN*BNP/(Kd+BNP)+kdn*BNP);
  enddef;

  def comp IN as
    // isComputationalComponentFor: #property_273; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var IN: nanomolar {init: 0.1, pub: out};
    var Kd: nanomolar {pub: in};
    var kdn: first_order_rate_constant {pub: in};
    var k7: second_order_rate_constant_nano {pub: in};
    var k8: first_order_rate_constant {pub: in};
    var vdIN: nano_flux {pub: in};
    // isComputationalComponentFor: #property_274; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var PCN: nanomolar {pub: in};
    // isComputationalComponentFor: #property_275; physicalPropertyOf #entity_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var BN: nanomolar {pub: in};
    // is: https://identifiers.org/opb/OPB_01023
    var time: hour {pub: in};
    ode(IN, time) = k7*BN*PCN-(k8*IN+vdIN*IN/(Kd+IN)+kdn*IN);
  enddef;

  def comp model_parameters as
    var GF: micromolar {init: 1, pub: out};
    var eps: dimensionless {init: 17, pub: out};
    var K_agf: micromolar {init: 0.1, pub: out};
    var k_dap1: first_order_rate_constant {init: 0.15, pub: out};
    var v_sap1: flux {init: 1, pub: out};
    var k_de2f: first_order_rate_constant {init: 0.002, pub: out};
    var k_de2fp: first_order_rate_constant {init: 1.1, pub: out};
    var k_dprb: first_order_rate_constant {init: 0.01, pub: out};
    var k_dpRBp: first_order_rate_constant {init: 0.06, pub: out};
    var k_dpRBpp: first_order_rate_constant {init: 0.04, pub: out};
    var k_pc1: second_order_rate_constant {init: 0.05, pub: out};
    var k_pc2: first_order_rate_constant {init: 0.5, pub: out};
    var k_pc3: second_order_rate_constant {init: 0.025, pub: out};
    var k_pc4: first_order_rate_constant {init: 0.5, pub: out};
    var K_1: micromolar {init: 0.1, pub: out};
    var K_2: micromolar {init: 0.1, pub: out};
    var K_3: micromolar {init: 0.1, pub: out};
    var K_4: micromolar {init: 0.1, pub: out};
    var V_1: first_order_rate_constant {init: 2.2, pub: out};
    var V_2: flux {init: 2, pub: out};
    var V_3: first_order_rate_constant {init: 1, pub: out};
    var V_4: flux {init: 2, pub: out};
    var K_1e2f: micromolar {init: 5, pub: out};
    var K_2e2f: micromolar {init: 5, pub: out};
    var V_1e2f: first_order_rate_constant {init: 4, pub: out};
    var V_2e2f: flux {init: 0.75, pub: out};
    var v_se2f: flux {init: 0.17, pub: out};
    var v_sprb: flux {init: 0.8, pub: out};
    var Cdk4_tot: micromolar {init: 1.5, pub: out};
    var K_i7: micromolar {init: 0.1, pub: out};
    var K_i8: micromolar {init: 2, pub: out};
    var k_cd1: first_order_rate_constant {init: 0.4, pub: out};
    var k_cd2: first_order_rate_constant {init: 0.005, pub: out};
    var k_decom1: first_order_rate_constant {init: 0.1, pub: out};
    var k_com1: second_order_rate_constant {init: 0.175, pub: out};
    var k_c1: second_order_rate_constant {init: 0.15, pub: out};
    var k_c2: first_order_rate_constant {init: 0.05, pub: out};
    var k_ddd: first_order_rate_constant {init: 0.005, pub: out};
    var K_dd: micromolar {init: 0.1, pub: out};
    var K_1d: micromolar {init: 0.1, pub: out};
    var K_2d: micromolar {init: 0.1, pub: out};
    var V_dd: flux {init: 5, pub: out};
    var V_m1d: flux {init: 1, pub: out};
    var V_m2d: flux {init: 0.2, pub: out};
    var a_e: micromolar {init: 0.25, pub: out};
    var Cdk2_tot: micromolar {init: 2, pub: out};
    var i_b1: micromolar {init: 0.5, pub: out};
    var K_i9: micromolar {init: 0.1, pub: out};
    var K_i10: micromolar {init: 2, pub: out};
    var k_ce: first_order_rate_constant {init: 0.29, pub: out};
    var k_c3: second_order_rate_constant {init: 0.2, pub: out};
    var k_c4: first_order_rate_constant {init: 0.1, pub: out};
    var k_decom2: first_order_rate_constant {init: 0.1, pub: out};
    var k_com2: second_order_rate_constant {init: 0.2, pub: out};
    var k_dde: first_order_rate_constant {init: 0.005, pub: out};
    var k_ddskp2: first_order_rate_constant {init: 0.005, pub: out};
    var k_dpe: first_order_rate_constant {init: 0.075, pub: out};
    var k_dpei: first_order_rate_constant {init: 0.15, pub: out};
    var K_de: micromolar {init: 0.1, pub: out};
    var K_dceskp2: micromolar {init: 2, pub: out};
    var K_dskp2: micromolar {init: 0.5, pub: out};
    var K_cdh1: micromolar {init: 0.4, pub: out};
    var K_1e: micromolar {init: 0.1, pub: out};
    var K_2e: micromolar {init: 0.1, pub: out};
    var K_5e: micromolar {init: 0.1, pub: out};
    var K_6e: micromolar {init: 0.1, pub: out};
    var V_de: flux {init: 3, pub: out};
    var V_dskp2: flux {init: 1.1, pub: out};
    var V_m1e: first_order_rate_constant {init: 2, pub: out};
    var V_m2e: first_order_rate_constant {init: 1.4, pub: out};
    var V_m5e: first_order_rate_constant {init: 5, pub: out};
    var V_6e: flux {init: 0.8, pub: out};
    var v_spei: flux {init: 0.13, pub: out};
    var v_sskp2: flux {init: 0.15, pub: out};
    var x_e1: dimensionless {init: 1, pub: out};
    var x_e2: per_micromolar {init: 1, pub: out};
    var a_a: micromolar {init: 0.2, pub: out};
    var i_b2: micromolar {init: 0.5, pub: out};
    var K_i11: micromolar {init: 0.1, pub: out};
    var K_i12: micromolar {init: 2, pub: out};
    var K_i13: micromolar {init: 0.1, pub: out};
    var K_i14: micromolar {init: 2, pub: out};
    var k_ca: first_order_rate_constant {init: 0.0375, pub: out};
    var k_decom3: first_order_rate_constant {init: 0.1, pub: out};
    var k_com3: second_order_rate_constant {init: 0.2, pub: out};
    var k_c5: second_order_rate_constant {init: 0.15, pub: out};
    var k_c6: first_order_rate_constant {init: 0.125, pub: out};
    var k_dda: first_order_rate_constant {init: 0.005, pub: out};
    var k_ddp27: first_order_rate_constant {init: 0.06, pub: out};
    var k_ddp27p: first_order_rate_constant {init: 0.01, pub: out};
    var k_dcdh1a: first_order_rate_constant {init: 0.1, pub: out};
    var k_dcdh1i: first_order_rate_constant {init: 0.2, pub: out};
    var k_dpa: first_order_rate_constant {init: 0.075, pub: out};
    var k_dpai: first_order_rate_constant {init: 0.15, pub: out};
    var K_da: micromolar {init: 1.1, pub: out};
    var K_dp27p: micromolar {init: 0.1, pub: out};
    var K_dp27skp2: micromolar {init: 0.1, pub: out};
    var K_acdc20: micromolar {init: 2, pub: out};
    var K_1a: micromolar {init: 0.1, pub: out};
    var K_2a: micromolar {init: 0.1, pub: out};
    var K_1cdh1: micromolar {init: 0.01, pub: out};
    var K_2cdh1: micromolar {init: 0.01, pub: out};
    var K_5a: micromolar {init: 0.1, pub: out};
    var K_6a: micromolar {init: 0.1, pub: out};
    var K_1p27: micromolar {init: 0.5, pub: out};
    var K_2p27: micromolar {init: 0.5, pub: out};
    var V_dp27p: flux {init: 5, pub: out};
    var V_da: flux {init: 2.5, pub: out};
    var V_m1a: first_order_rate_constant {init: 2, pub: out};
    var V_m2a: first_order_rate_constant {init: 1.85, pub: out};
    var V_m5a: first_order_rate_constant {init: 4, pub: out};
    var V_6a: flux {init: 1, pub: out};
    var v_scdh1a: flux {init: 0.11, pub: out};
    var v_spai: flux {init: 0.105, pub: out};
    var v_s1p27: flux {init: 0.8, pub: out};
    var v_s2p27: first_order_rate_constant {init: 0.1, pub: out};
    var V_1cdh1: flux {init: 1.25, pub: out};
    var V_2cdh1: first_order_rate_constant {init: 8, pub: out};
    var V_1p27: first_order_rate_constant {init: 100, pub: out};
    var V_2p27: flux {init: 0.1, pub: out};
    var x_a1: dimensionless {init: 1, pub: out};
    var x_a2: per_micromolar {init: 1, pub: out};
    var a_b: micromolar {init: 0.11, pub: out};
    var Cdk1_tot: micromolar {init: 0.5, pub: out};
    var i_b: micromolar {init: 0.75, pub: out};
    var i_b3: micromolar {init: 0.5, pub: out};
    var k_c7: second_order_rate_constant {init: 0.12, pub: out};
    var k_c8: first_order_rate_constant {init: 0.2, pub: out};
    var k_decom4: first_order_rate_constant {init: 0.1, pub: out};
    var k_com4: second_order_rate_constant {init: 0.25, pub: out};
    var k_dcdc20a: first_order_rate_constant {init: 0.05, pub: out};
    var k_dcdc20i: first_order_rate_constant {init: 0.14, pub: out};
    var k_ddb: first_order_rate_constant {init: 0.005, pub: out};
    var k_dpb: first_order_rate_constant {init: 0.1, pub: out};
    var k_dpbi: first_order_rate_constant {init: 0.2, pub: out};
    var k_dwee1: first_order_rate_constant {init: 0.1, pub: out};
    var k_dwee1p: first_order_rate_constant {init: 0.2, pub: out};
    var K_db: micromolar {init: 0.005, pub: out};
    var K_dbcdc20: micromolar {init: 0.2, pub: out};
    var K_dbcdh1: micromolar {init: 0.1, pub: out};
    var k_sw: first_order_rate_constant {init: 5, pub: out};
    var K_1b: micromolar {init: 0.1, pub: out};
    var K_2b: micromolar {init: 0.1, pub: out};
    var K_3b: micromolar {init: 0.1, pub: out};
    var K_4b: micromolar {init: 0.1, pub: out};
    var K_5b: micromolar {init: 0.1, pub: out};
    var K_6b: micromolar {init: 0.1, pub: out};
    var K_7b: micromolar {init: 0.1, pub: out};
    var K_8b: micromolar {init: 0.1, pub: out};
    var v_cb: flux {init: 0.05, pub: out};
    var V_db: flux {init: 0.06, pub: out};
    var V_m1b: first_order_rate_constant {init: 3.9, pub: out};
    var V_m2b: first_order_rate_constant {init: 2.1, pub: out};
    var v_scdc20i: flux {init: 0.1, pub: out};
    var V_m3b: first_order_rate_constant {init: 8, pub: out};
    var V_m4b: flux {init: 0.7, pub: out};
    var V_m5b: first_order_rate_constant {init: 5, pub: out};
    var V_6b: flux {init: 1, pub: out};
    var V_m7b: first_order_rate_constant {init: 1.2, pub: out};
    var V_m8b: flux {init: 1, pub: out};
    var v_spbi: flux {init: 0.12, pub: out};
    var v_swee1: flux {init: 0.06, pub: out};
    var x_b1: dimensionless {init: 1, pub: out};
    var x_b2: per_micromolar {init: 1, pub: out};
    var ATR_tot: micromolar {init: 0.5, pub: out};
    var Chk1_tot: micromolar {init: 0.5, pub: out};
    var Cdc45_tot: micromolar {init: 0.5, pub: out};
    var k_aatr: second_order_rate_constant {init: 0.022, pub: out};
    var k_datr: first_order_rate_constant {init: 0.15, pub: out};
    var k_dpol: first_order_rate_constant {init: 0.2, pub: out};
    var k_dprim: first_order_rate_constant {init: 0.15, pub: out};
    var k_spol: second_order_rate_constant {init: 0.8, pub: out};
    var k_sprim: first_order_rate_constant {init: 0.05, pub: out};
    var K_1cdc45: micromolar {init: 0.02, pub: out};
    var K_2cdc45: micromolar {init: 0.02, pub: out};
    var K_1chk: micromolar {init: 0.5, pub: out};
    var K_2chk: micromolar {init: 0.5, pub: out};
    var Pol_tot: micromolar {init: 0.5, pub: out};
    var V_1cdc45: first_order_rate_constant {init: 0.8, pub: out};
    var V_2cdc45: flux {init: 0.12, pub: out};
    var V_1chk: first_order_rate_constant {init: 4, pub: out};
    var V_2chk: flux {init: 0.1, pub: out};
    var K_dw: micromolar {init: 0.5, pub: out};
    var K_iw: nanomolar {init: 0.5, pub: out};
    var n_gerard: dimensionless {init: 4, pub: out};
    var v_dw: flux {init: 0.12, pub: out};
    var v_sw: flux {init: 0, pub: out};
    var k1: first_order_rate_constant_nano {init: 0.8, pub: out};
    var k2: first_order_rate_constant_nano {init: 0.4, pub: out};
    var k3: second_order_rate_constant_nano {init: 0.8, pub: out};
    var k4: first_order_rate_constant_nano {init: 0.4, pub: out};
    var k5: first_order_rate_constant_nano {init: 0.8, pub: out};
    var k6: first_order_rate_constant_nano {init: 0.4, pub: out};
    var k7: second_order_rate_constant_nano {init: 1, pub: out};
    var k8: first_order_rate_constant_nano {init: 0.2, pub: out};
    var k9: first_order_rate_constant_nano {init: 0.8, pub: out};
    var k10: first_order_rate_constant_nano {init: 0.4, pub: out};
    var kdnc: first_order_rate_constant_nano {init: 0.02, pub: out};
    var kdn: first_order_rate_constant_nano {init: 0.02, pub: out};
    var ksB: first_order_rate_constant_nano {init: 0.32, pub: out};
    var ksC: first_order_rate_constant_nano {init: 3.2, pub: out};
    var ksP: first_order_rate_constant_nano {init: 1.2, pub: out};
    var ksR: first_order_rate_constant_nano {init: 1.7, pub: out};
    var m: dimensionless {init: 2, pub: out};
    var n: dimensionless {init: 2, pub: out};
    var h: dimensionless {init: 2, pub: out};
    var Kd: nanomolar {init: 0.3, pub: out};
    var Kdp: nanomolar {init: 0.1, pub: out};
    var Kp: nanomolar {init: 1.006, pub: out};
    var V1B: nano_flux {init: 1.4, pub: out};
    var V1C: nano_flux {init: 1.2, pub: out};
    var V1P: nano_flux {init: 9.6, pub: out};
    var V1PC: nano_flux {init: 2.4, pub: out};
    var V2B: nano_flux {init: 0.2, pub: out};
    var V2C: nano_flux {init: 0.2, pub: out};
    var V2P: nano_flux {init: 0.6, pub: out};
    var V2PC: nano_flux {init: 0.2, pub: out};
    var V3B: nano_flux {init: 1.4, pub: out};
    var V3PC: nano_flux {init: 2.4, pub: out};
    var V4B: nano_flux {init: 0.4, pub: out};
    var V4PC: nano_flux {init: 0.2, pub: out};
    var vdBC: nano_flux {init: 3, pub: out};
    var vdBN: nano_flux {init: 3, pub: out};
    var vdCC: nano_flux {init: 1.4, pub: out};
    var vdIN: nano_flux {init: 1.6, pub: out};
    var vdPC: nano_flux {init: 3.4, pub: out};
    var vdPCC: nano_flux {init: 1.4, pub: out};
    var vdPCN: nano_flux {init: 1.4, pub: out};
    var vdRC: nano_flux {init: 4.4, pub: out};
    var vdRN: nano_flux {init: 0.8, pub: out};
    var K_1x: micromolar {init: 0.1, pub: out};
    var K_2x: micromolar {init: 0.1, pub: out};
    var V_1x: first_order_rate_constant {init: 10, pub: out};
    var V_2x: flux {init: 2, pub: out};
    var X_tot: micromolar {init: 1, pub: out};
  enddef;
  def map between Me and pRBpp for
    vars Me and Me;
  enddef;
  def map between model_parameters and Primer for
    vars k_aatr and k_aatr;
    vars k_sprim and k_sprim;
    vars eps and eps;
    vars ATR_tot and ATR_tot;
    vars k_dprim and k_dprim;
    vars k_datr and k_datr;
  enddef;
  def map between environment and pRBpp for
    vars time and time;
  enddef;
  def map between pRBc1 and E2F for
    vars pRBc1 and pRBc1;
  enddef;
  def map between model_parameters and Pbi for
    vars eps and eps;
    vars K_6b and K_6b;
    vars K_5b and K_5b;
    vars V_m5b and V_m5b;
    vars x_b2 and x_b2;
    vars a_b and a_b;
    vars v_spbi and v_spbi;
    vars V_6b and V_6b;
    vars k_dpbi and k_dpbi;
    vars x_b1 and x_b1;
  enddef;
  def map between Md and pRBp for
    vars Md and Md;
  enddef;
  def map between Pb and Mb for
    vars Pb and Pb;
  enddef;
  def map between pRB and Cd for
    vars pRB and pRB;
  enddef;
  def map between p27 and Mbp27 for
    vars p27 and p27;
  enddef;
  def map between RN and RC for
    vars RN and RN;
  enddef;
  def map between environment and p27p for
    vars time and time;
  enddef;
  def map between PCC and PC for
    vars PCC and PCC;
  enddef;
  def map between pRB and pRBc1 for
    vars pRB and pRB;
  enddef;
  def map between environment and MB for
    vars time and time;
  enddef;
  def map between Me and Ca for
    vars Me and Me;
  enddef;
  def map between IN and BN for
    vars IN and IN;
  enddef;
  def map between Chk1 and Pa for
    vars Chk1 and Chk1;
  enddef;
  def map between model_parameters and Pol for
    vars eps and eps;
    vars Pol_tot and Pol_tot;
    vars k_spol and k_spol;
    vars k_dpol and k_dpol;
  enddef;
  def map between model_parameters and Mbp27 for
    vars eps and eps;
    vars k_c7 and k_c7;
    vars k_c8 and k_c8;
  enddef;
  def map between Pa and Pai for
    vars Pa and Pa;
  enddef;
  def map between model_parameters and MR for
    vars h and h;
  enddef;
  def map between BC and BCP for
    vars BC and BC;
  enddef;
  def map between IN and PCN for
    vars IN and IN;
  enddef;
  def map between Wee1 and Mbi for
    vars Wee1 and Wee1;
  enddef;
  def map between model_parameters and X for
    vars K_1x and K_1x;
    vars eps and eps;
    vars V_2x and V_2x;
    vars V_1x and V_1x;
    vars K_2x and K_2x;
    vars X_tot and X_tot;
  enddef;
  def map between Chk1 and Pbi for
    vars Chk1 and Chk1;
  enddef;
  def map between environment and Ma for
    vars time and time;
  enddef;
  def map between p27 and Mdp27 for
    vars p27 and p27;
  enddef;
  def map between Pe and Me for
    vars Pe and Pe;
  enddef;
  def map between model_parameters and Cdh1a for
    vars eps and eps;
    vars K_2cdh1 and K_2cdh1;
    vars v_scdh1a and v_scdh1a;
    vars k_dcdh1a and k_dcdh1a;
    vars V_1cdh1 and V_1cdh1;
    vars V_2cdh1 and V_2cdh1;
    vars K_1cdh1 and K_1cdh1;
  enddef;
  def map between PCC and PCCP for
    vars PCC and PCC;
  enddef;
  def map between Md and Cd for
    vars Md and Md;
  enddef;
  def map between environment and Mbi for
    vars time and time;
  enddef;
  def map between Ma and Pai for
    vars Ma and Ma;
  enddef;
  def map between model_parameters and Mdi for
    vars eps and eps;
    vars V_m1d and V_m1d;
    vars k_com1 and k_com1;
    vars K_1d and K_1d;
    vars Cdk4_tot and Cdk4_tot;
    vars k_decom1 and k_decom1;
    vars K_2d and K_2d;
    vars V_m2d and V_m2d;
  enddef;
  def map between environment and Cdc20i for
    vars time and time;
  enddef;
  def map between pRB and Ce for
    vars pRB and pRB;
  enddef;
  def map between environment and p27 for
    vars time and time;
  enddef;
  def map between Mb and Wee1 for
    vars Mb and Mb;
  enddef;
  def map between PCC and PCN for
    vars PCC and PCC;
  enddef;
  def map between E2F and pRBc1 for
    vars E2F and E2F;
  enddef;
  def map between model_parameters and Mai for
    vars K_1a and K_1a;
    vars eps and eps;
    vars k_com3 and k_com3;
    vars i_b2 and i_b2;
    vars V_m1a and V_m1a;
    vars Cdk2_tot and Cdk2_tot;
    vars K_2a and K_2a;
    vars k_decom3 and k_decom3;
    vars V_m2a and V_m2a;
  enddef;
  def map between model_parameters and BN for
    vars V3B and V3B;
    vars k8 and k8;
    vars V4B and V4B;
    vars k7 and k7;
    vars k5 and k5;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars k6 and k6;
    vars kdn and kdn;
  enddef;
  def map between Mdp27 and Md for
    vars Mdp27 and Mdp27;
  enddef;
  def map between environment and Pa for
    vars time and time;
  enddef;
  def map between pRB and E2F for
    vars pRB and pRB;
  enddef;
  def map between Me and Mep27 for
    vars Me and Me;
  enddef;
  def map between model_parameters and Map27 for
    vars eps and eps;
    vars k_c6 and k_c6;
    vars k_c5 and k_c5;
  enddef;
  def map between model_parameters and MP for
    vars n and n;
  enddef;
  def map between Cdc20a and CbA for
    vars Cdc20a and Cdc20a;
  enddef;
  def map between Me and Cdc45 for
    vars Me and Me;
  enddef;
  def map between Mei and Me for
    vars Mei and Mei;
  enddef;
  def map between PCC and CC for
    vars PCC and PCC;
  enddef;
  def map between model_parameters and RN for
    vars k9 and k9;
    vars vdRN and vdRN;
    vars k10 and k10;
    vars Kd and Kd;
    vars kdn and kdn;
  enddef;
  def map between environment and MC for
    vars time and time;
  enddef;
  def map between Mdp27 and Mdi for
    vars Mdp27 and Mdp27;
  enddef;
  def map between Cdh1a and Cdh1i for
    vars Cdh1a and Cdh1a;
  enddef;
  def map between PCCP and PCC for
    vars PCCP and PCCP;
  enddef;
  def map between Me and Pe for
    vars Me and Me;
  enddef;
  def map between Mb and p27 for
    vars Mb and Mb;
  enddef;
  def map between model_parameters and Pe for
    vars K_5e and K_5e;
    vars eps and eps;
    vars x_e2 and x_e2;
    vars k_dpe and k_dpe;
    vars K_6e and K_6e;
    vars x_e1 and x_e1;
    vars a_e and a_e;
    vars V_m5e and V_m5e;
    vars V_6e and V_6e;
  enddef;
  def map between Mbp27 and Mb for
    vars Mbp27 and Mbp27;
  enddef;
  def map between environment and PCP for
    vars time and time;
  enddef;
  def map between environment and X for
    vars time and time;
  enddef;
  def map between environment and Ce for
    vars time and time;
  enddef;
  def map between BN and BC for
    vars BN and BN;
  enddef;
  def map between Ma and E2Fp for
    vars Ma and Ma;
  enddef;
  def map between Map27 and Ca for
    vars Map27 and Map27;
  enddef;
  def map between PC and CC for
    vars PC and PC;
  enddef;
  def map between environment and Pai for
    vars time and time;
  enddef;
  def map between Ma and Cdh1i for
    vars Ma and Ma;
  enddef;
  def map between Mai and Ma for
    vars Mai and Mai;
  enddef;
  def map between CCP and CC for
    vars CCP and CCP;
  enddef;
  def map between Mb and CbA for
    vars Mb and Mb;
  enddef;
  def map between model_parameters and Md for
    vars eps and eps;
    vars V_m1d and V_m1d;
    vars k_c1 and k_c1;
    vars K_1d and K_1d;
    vars k_c2 and k_c2;
    vars K_2d and K_2d;
    vars V_m2d and V_m2d;
  enddef;
  def map between model_parameters and E2Fp for
    vars eps and eps;
    vars k_de2fp and k_de2fp;
    vars K_1e2f and K_1e2f;
    vars V_1e2f and V_1e2f;
    vars V_2e2f and V_2e2f;
    vars K_2e2f and K_2e2f;
  enddef;
  def map between Skp2 and p27p for
    vars Skp2 and Skp2;
  enddef;
  def map between Mw and Wee1 for
    vars Mw and Mw;
  enddef;
  def map between BN and MR for
    vars BN and BN;
  enddef;
  def map between model_parameters and pRB for
    vars eps and eps;
    vars V_1 and V_1;
    vars v_sprb and v_sprb;
    vars K_1 and K_1;
    vars V_2 and V_2;
    vars k_pc1 and k_pc1;
    vars K_2 and K_2;
    vars k_pc2 and k_pc2;
    vars k_dprb and k_dprb;
  enddef;
  def map between PCN and PCC for
    vars PCN and PCN;
  enddef;
  def map between Mdp27 and pRBp for
    vars Mdp27 and Mdp27;
  enddef;
  def map between pRBp and E2F for
    vars pRBp and pRBp;
  enddef;
  def map between model_parameters and Pb for
    vars k_dpb and k_dpb;
    vars eps and eps;
    vars K_6b and K_6b;
    vars K_5b and K_5b;
    vars V_m5b and V_m5b;
    vars x_b2 and x_b2;
    vars a_b and a_b;
    vars V_6b and V_6b;
    vars x_b1 and x_b1;
  enddef;
  def map between Ma and p27 for
    vars Ma and Ma;
  enddef;
  def map between environment and Wee1p for
    vars time and time;
  enddef;
  def map between Cdh1a and Skp2 for
    vars Cdh1a and Cdh1a;
  enddef;
  def map between RC and RN for
    vars RC and RC;
  enddef;
  def map between pRBp and pRBpp for
    vars pRBp and pRBp;
  enddef;
  def map between p27 and Me for
    vars p27 and p27;
  enddef;
  def map between environment and AP1 for
    vars time and time;
  enddef;
  def map between Md and pRB for
    vars Md and Md;
  enddef;
  def map between Cd and Mdi for
    vars Cd and Cd;
  enddef;
  def map between environment and Mbp27 for
    vars time and time;
  enddef;
  def map between PCP and PC for
    vars PCP and PCP;
  enddef;
  def map between environment and PCC for
    vars time and time;
  enddef;
  def map between Me and p27 for
    vars Me and Me;
  enddef;
  def map between environment and CC for
    vars time and time;
  enddef;
  def map between pRBp and Ca for
    vars pRBp and pRBp;
  enddef;
  def map between Mep27 and Mai for
    vars Mep27 and Mep27;
  enddef;
  def map between BN and PCN for
    vars BN and BN;
  enddef;
  def map between model_parameters and E2F for
    vars k_pc3 and k_pc3;
    vars eps and eps;
    vars k_pc1 and k_pc1;
    vars k_pc4 and k_pc4;
    vars K_1e2f and K_1e2f;
    vars k_de2f and k_de2f;
    vars V_1e2f and V_1e2f;
    vars V_2e2f and V_2e2f;
    vars k_pc2 and k_pc2;
    vars K_2e2f and K_2e2f;
    vars v_se2f and v_se2f;
  enddef;
  def map between pRB and pRBp for
    vars pRB and pRB;
  enddef;
  def map between model_parameters and BNP for
    vars V3B and V3B;
    vars V4B and V4B;
    vars vdBN and vdBN;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars kdn and kdn;
  enddef;
  def map between Mai and Ca for
    vars Mai and Mai;
  enddef;
  def map between ATR and Chk1 for
    vars ATR and ATR;
  enddef;
  def map between model_parameters and Mbi for
    vars Cdk1_tot and Cdk1_tot;
    vars eps and eps;
    vars i_b3 and i_b3;
    vars k_com4 and k_com4;
    vars V_m2b and V_m2b;
    vars K_1b and K_1b;
    vars V_m1b and V_m1b;
    vars k_decom4 and k_decom4;
    vars K_2b and K_2b;
  enddef;
  def map between Mep27 and Ca for
    vars Mep27 and Mep27;
  enddef;
  def map between Ma and Mei for
    vars Ma and Ma;
  enddef;
  def map between Mbp27 and p27 for
    vars Mbp27 and Mbp27;
  enddef;
  def map between pRBp and pRBc2 for
    vars pRBp and pRBp;
  enddef;
  def map between environment and Pb for
    vars time and time;
  enddef;
  def map between pRBpp and pRBp for
    vars pRBpp and pRBpp;
  enddef;
  def map between Ma and Ca for
    vars Ma and Ma;
  enddef;
  def map between Ma and Cdh1a for
    vars Ma and Ma;
  enddef;
  def map between Wee1 and Me for
    vars Wee1 and Wee1;
  enddef;
  def map between environment and PC for
    vars time and time;
  enddef;
  def map between AP1 and Cd for
    vars AP1 and AP1;
  enddef;
  def map between E2F and Ca for
    vars E2F and E2F;
  enddef;
  def map between Map27 and p27 for
    vars Map27 and Map27;
  enddef;
  def map between p27 and Ma for
    vars p27 and p27;
  enddef;
  def map between environment and BNP for
    vars time and time;
  enddef;
  def map between model_parameters and PC for
    vars V1P and V1P;
    vars k3 and k3;
    vars Kdp and Kdp;
    vars ksP and ksP;
    vars Kp and Kp;
    vars kdn and kdn;
    vars k4 and k4;
    vars V2P and V2P;
  enddef;
  def map between model_parameters and PCC for
    vars V1PC and V1PC;
    vars V2PC and V2PC;
    vars k2 and k2;
    vars k3 and k3;
    vars Kdp and Kdp;
    vars k1 and k1;
    vars Kp and Kp;
    vars kdn and kdn;
    vars k4 and k4;
  enddef;
  def map between Map27 and Mai for
    vars Map27 and Map27;
  enddef;
  def map between model_parameters and p27p for
    vars K_dp27p and K_dp27p;
    vars V_2p27 and V_2p27;
    vars eps and eps;
    vars k_ddp27p and k_ddp27p;
    vars K_2p27 and K_2p27;
    vars V_dp27p and V_dp27p;
    vars V_1p27 and V_1p27;
    vars K_dp27skp2 and K_dp27skp2;
    vars K_1p27 and K_1p27;
  enddef;
  def map between Cdc20a and Ca for
    vars Cdc20a and Cdc20a;
  enddef;
  def map between Wee1 and Mai for
    vars Wee1 and Wee1;
  enddef;
  def map between Chk1 and Pb for
    vars Chk1 and Chk1;
  enddef;
  def map between Cdh1a and Cb for
    vars Cdh1a and Cdh1a;
  enddef;
  def map between model_parameters and MC for
    vars n and n;
  enddef;
  def map between model_parameters and Wee1p for
    vars i_b and i_b;
    vars eps and eps;
    vars K_7b and K_7b;
    vars V_m7b and V_m7b;
    vars K_8b and K_8b;
    vars k_dwee1p and k_dwee1p;
    vars V_m8b and V_m8b;
  enddef;
  def map between model_parameters and MB for
    vars m and m;
  enddef;
  def map between pRBc2 and E2F for
    vars pRBc2 and pRBc2;
  enddef;
  def map between E2F and Cd for
    vars E2F and E2F;
  enddef;
  def map between CC and CCP for
    vars CC and CC;
  enddef;
  def map between BN and MC for
    vars BN and BN;
  enddef;
  def map between PC and PCP for
    vars PC and PC;
  enddef;
  def map between Pbi and Pb for
    vars Pbi and Pbi;
  enddef;
  def map between CC and PC for
    vars CC and CC;
  enddef;
  def map between model_parameters and pRBc2 for
    vars k_pc3 and k_pc3;
    vars eps and eps;
    vars k_pc4 and k_pc4;
  enddef;
  def map between Ma and E2F for
    vars Ma and Ma;
  enddef;
  def map between Cdh1i and Cdh1a for
    vars Cdh1i and Cdh1i;
  enddef;
  def map between model_parameters and PCN for
    vars k8 and k8;
    vars V3PC and V3PC;
    vars k7 and k7;
    vars k2 and k2;
    vars V4PC and V4PC;
    vars Kdp and Kdp;
    vars k1 and k1;
    vars Kp and Kp;
    vars kdn and kdn;
  enddef;
  def map between environment and Mei for
    vars time and time;
  enddef;
  def map between model_parameters and pRBp for
    vars k_pc3 and k_pc3;
    vars eps and eps;
    vars V_1 and V_1;
    vars K_4 and K_4;
    vars k_dpRBp and k_dpRBp;
    vars V_4 and V_4;
    vars K_1 and K_1;
    vars V_2 and V_2;
    vars k_pc4 and k_pc4;
    vars K_2 and K_2;
    vars V_3 and V_3;
    vars K_3 and K_3;
  enddef;
  def map between BCP and BC for
    vars BCP and BCP;
  enddef;
  def map between model_parameters and Cdc20i for
    vars K_3b and K_3b;
    vars V_m3b and V_m3b;
    vars eps and eps;
    vars k_dcdc20i and k_dcdc20i;
    vars V_m4b and V_m4b;
    vars v_scdc20i and v_scdc20i;
    vars K_4b and K_4b;
  enddef;
  def map between pRBp and p27 for
    vars pRBp and pRBp;
  enddef;
  def map between E2F and pRBc2 for
    vars E2F and E2F;
  enddef;
  def map between model_parameters and Ca for
    vars K_da and K_da;
    vars K_acdc20 and K_acdc20;
    vars K_i12 and K_i12;
    vars k_dda and k_dda;
    vars eps and eps;
    vars k_com3 and k_com3;
    vars K_i11 and K_i11;
    vars Cdk2_tot and Cdk2_tot;
    vars V_da and V_da;
    vars k_ca and k_ca;
    vars k_decom3 and k_decom3;
  enddef;
  def map between Me and Ce for
    vars Me and Me;
  enddef;
  def map between E2F and Ce for
    vars E2F and E2F;
  enddef;
  def map between BN and MP for
    vars BN and BN;
  enddef;
  def map between environment and Pe for
    vars time and time;
  enddef;
  def map between E2F and pRBp for
    vars E2F and E2F;
  enddef;
  def map between environment and E2F for
    vars time and time;
  enddef;
  def map between E2F and p27 for
    vars E2F and E2F;
  enddef;
  def map between p27 and Mb for
    vars p27 and p27;
  enddef;
  def map between Mbi and CbA for
    vars Mbi and Mbi;
  enddef;
  def map between environment and Pol for
    vars time and time;
  enddef;
  def map between Mep27 and Mei for
    vars Mep27 and Mep27;
  enddef;
  def map between pRBp and Ce for
    vars pRBp and pRBp;
  enddef;
  def map between Mdi and Cd for
    vars Mdi and Mdi;
  enddef;
  def map between Cdc45 and Pol for
    vars Cdc45 and Cdc45;
  enddef;
  def map between environment and IN for
    vars time and time;
  enddef;
  def map between p27 and Md for
    vars p27 and p27;
  enddef;
  def map between BN and Mw for
    vars BN and BN;
  enddef;
  def map between model_parameters and Mdp27 for
    vars eps and eps;
    vars k_c1 and k_c1;
    vars k_c2 and k_c2;
  enddef;
  def map between model_parameters and Pa for
    vars V_m5a and V_m5a;
    vars a_a and a_a;
    vars eps and eps;
    vars k_dpa and k_dpa;
    vars K_6a and K_6a;
    vars x_a2 and x_a2;
    vars V_6a and V_6a;
    vars x_a1 and x_a1;
    vars K_5a and K_5a;
  enddef;
  def map between Pe and Mei for
    vars Pe and Pe;
  enddef;
  def map between BN and IN for
    vars BN and BN;
  enddef;
  def map between environment and Chk1 for
    vars time and time;
  enddef;
  def map between p27p and p27 for
    vars p27p and p27p;
  enddef;
  def map between Cdc20a and Cb for
    vars Cdc20a and Cdc20a;
  enddef;
  def map between model_parameters and Cd for
    vars V_dd and V_dd;
    vars eps and eps;
    vars K_i7 and K_i7;
    vars k_com1 and k_com1;
    vars K_dd and K_dd;
    vars Cdk4_tot and Cdk4_tot;
    vars k_cd1 and k_cd1;
    vars K_i8 and K_i8;
    vars k_cd2 and k_cd2;
    vars k_decom1 and k_decom1;
    vars k_ddd and k_ddd;
  enddef;
  def map between Mb and Pbi for
    vars Mb and Mb;
  enddef;
  def map between model_parameters and Ma for
    vars K_1a and K_1a;
    vars eps and eps;
    vars k_c6 and k_c6;
    vars i_b2 and i_b2;
    vars V_m1a and V_m1a;
    vars k_c5 and k_c5;
    vars K_2a and K_2a;
    vars V_m2a and V_m2a;
  enddef;
  def map between Chk1 and Pai for
    vars Chk1 and Chk1;
  enddef;
  def map between X and CbA for
    vars X and X;
  enddef;
  def map between Me and Mai for
    vars Me and Me;
  enddef;
  def map between Mdi and Md for
    vars Mdi and Mdi;
  enddef;
  def map between Pei and Pe for
    vars Pei and Pei;
  enddef;
  def map between Ma and Map27 for
    vars Ma and Ma;
  enddef;
  def map between E2F and E2Fp for
    vars E2F and E2F;
  enddef;
  def map between environment and PCNP for
    vars time and time;
  enddef;
  def map between environment and Mdp27 for
    vars time and time;
  enddef;
  def map between Pol and Primer for
    vars Pol and Pol;
  enddef;
  def map between Primer and ATR for
    vars Primer and Primer;
  enddef;
  def map between Mai and Mei for
    vars Mai and Mai;
  enddef;
  def map between Mb and Cdc20a for
    vars Mb and Mb;
  enddef;
  def map between Ma and X for
    vars Ma and Ma;
  enddef;
  def map between model_parameters and Wee1 for
    vars i_b and i_b;
    vars eps and eps;
    vars v_swee1 and v_swee1;
    vars k_dwee1 and k_dwee1;
    vars k_sw and k_sw;
    vars K_7b and K_7b;
    vars V_m7b and V_m7b;
    vars K_8b and K_8b;
    vars V_m8b and V_m8b;
  enddef;
  def map between Mbp27 and Mbi for
    vars Mbp27 and Mbp27;
  enddef;
  def map between Pb and Pbi for
    vars Pb and Pb;
  enddef;
  def map between Ma and Mai for
    vars Ma and Ma;
  enddef;
  def map between Md and Mdp27 for
    vars Md and Md;
  enddef;
  def map between Cdc20a and Cdc20i for
    vars Cdc20a and Cdc20a;
  enddef;
  def map between Mei and Ce for
    vars Mei and Mei;
  enddef;
  def map between environment and CCP for
    vars time and time;
  enddef;
  def map between environment and Mw for
    vars time and time;
  enddef;
  def map between environment and BC for
    vars time and time;
  enddef;
  def map between Cdc20i and Cdc20a for
    vars Cdc20i and Cdc20i;
  enddef;
  def map between MP and PC for
    vars MP and MP;
  enddef;
  def map between Me and pRBp for
    vars Me and Me;
  enddef;
  def map between PCN and IN for
    vars PCN and PCN;
  enddef;
  def map between model_parameters and Skp2 for
    vars V_dskp2 and V_dskp2;
    vars v_sskp2 and v_sskp2;
    vars eps and eps;
    vars K_dskp2 and K_dskp2;
    vars K_cdh1 and K_cdh1;
    vars k_ddskp2 and k_ddskp2;
  enddef;
  def map between Mb and Pb for
    vars Mb and Mb;
  enddef;
  def map between environment and PCCP for
    vars time and time;
  enddef;
  def map between environment and Pbi for
    vars time and time;
  enddef;
  def map between Wee1 and Wee1p for
    vars Wee1 and Wee1;
  enddef;
  def map between Mdp27 and p27 for
    vars Mdp27 and Mdp27;
  enddef;
  def map between model_parameters and Cdc20a for
    vars K_3b and K_3b;
    vars V_m3b and V_m3b;
    vars eps and eps;
    vars k_dcdc20a and k_dcdc20a;
    vars V_m4b and V_m4b;
    vars K_4b and K_4b;
  enddef;
  def map between Map27 and Ce for
    vars Map27 and Map27;
  enddef;
  def map between model_parameters and BC for
    vars V1B and V1B;
    vars ksB and ksB;
    vars V2B and V2B;
    vars k5 and k5;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars k6 and k6;
    vars kdn and kdn;
  enddef;
  def map between model_parameters and pRBc1 for
    vars eps and eps;
    vars k_pc1 and k_pc1;
    vars k_pc2 and k_pc2;
  enddef;
  def map between environment and Map27 for
    vars time and time;
  enddef;
  def map between environment and Mai for
    vars time and time;
  enddef;
  def map between environment and Cb for
    vars time and time;
  enddef;
  def map between model_parameters and IN for
    vars k8 and k8;
    vars k7 and k7;
    vars Kd and Kd;
    vars kdn and kdn;
    vars vdIN and vdIN;
  enddef;
  def map between environment and Cdh1a for
    vars time and time;
  enddef;
  def map between Pai and Pa for
    vars Pai and Pai;
  enddef;
  def map between E2F and pRB for
    vars E2F and E2F;
  enddef;
  def map between model_parameters and Cdh1i for
    vars eps and eps;
    vars K_2cdh1 and K_2cdh1;
    vars V_1cdh1 and V_1cdh1;
    vars V_2cdh1 and V_2cdh1;
    vars k_dcdh1i and k_dcdh1i;
    vars K_1cdh1 and K_1cdh1;
  enddef;
  def map between pRBp and Cd for
    vars pRBp and pRBp;
  enddef;
  def map between Ma and Pa for
    vars Ma and Ma;
  enddef;
  def map between Pol and Cdc45 for
    vars Pol and Pol;
  enddef;
  def map between Mei and Ca for
    vars Mei and Mei;
  enddef;
  def map between model_parameters and p27 for
    vars eps and eps;
    vars K_2p27 and K_2p27;
    vars K_i14 and K_i14;
    vars k_ddp27 and k_ddp27;
    vars k_c8 and k_c8;
    vars V_1p27 and V_1p27;
    vars k_c5 and k_c5;
    vars v_s2p27 and v_s2p27;
    vars k_c4 and k_c4;
    vars V_2p27 and V_2p27;
    vars k_c7 and k_c7;
    vars k_c1 and k_c1;
    vars k_c3 and k_c3;
    vars k_c6 and k_c6;
    vars v_s1p27 and v_s1p27;
    vars K_1p27 and K_1p27;
    vars K_i13 and K_i13;
    vars k_c2 and k_c2;
  enddef;
  def map between environment and BCP for
    vars time and time;
  enddef;
  def map between environment and PCN for
    vars time and time;
  enddef;
  def map between Ca and Mai for
    vars Ca and Ca;
  enddef;
  def map between Pb and Mbi for
    vars Pb and Pb;
  enddef;
  def map between ATR and Primer for
    vars ATR and ATR;
  enddef;
  def map between Mb and Mbp27 for
    vars Mb and Mb;
  enddef;
  def map between model_parameters and BCP for
    vars V1B and V1B;
    vars vdBC and vdBC;
    vars V2B and V2B;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars kdn and kdn;
  enddef;
  def map between pRBc1 and pRB for
    vars pRBc1 and pRBc1;
  enddef;
  def map between PC and PCC for
    vars PC and PC;
  enddef;
  def map between environment and E2Fp for
    vars time and time;
  enddef;
  def map between Mep27 and Me for
    vars Mep27 and Mep27;
  enddef;
  def map between model_parameters and RC for
    vars k9 and k9;
    vars ksR and ksR;
    vars k10 and k10;
    vars Kd and Kd;
    vars kdn and kdn;
    vars vdRC and vdRC;
  enddef;
  def map between environment and Md for
    vars time and time;
  enddef;
  def map between Mep27 and p27 for
    vars Mep27 and Mep27;
  enddef;
  def map between environment and Cd for
    vars time and time;
  enddef;
  def map between Mei and Mai for
    vars Mei and Mei;
  enddef;
  def map between model_parameters and PCNP for
    vars V3PC and V3PC;
    vars V4PC and V4PC;
    vars vdPCN and vdPCN;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars kdn and kdn;
  enddef;
  def map between Pa and Mai for
    vars Pa and Pa;
  enddef;
  def map between Me and Mei for
    vars Me and Me;
  enddef;
  def map between Chk1 and Pe for
    vars Chk1 and Chk1;
  enddef;
  def map between Mb and Cdh1i for
    vars Mb and Mb;
  enddef;
  def map between environment and Wee1 for
    vars time and time;
  enddef;
  def map between model_parameters and Cdc45 for
    vars K_2cdc45 and K_2cdc45;
    vars V_2cdc45 and V_2cdc45;
    vars eps and eps;
    vars Pol_tot and Pol_tot;
    vars K_1cdc45 and K_1cdc45;
    vars V_1cdc45 and V_1cdc45;
    vars k_spol and k_spol;
    vars k_dpol and k_dpol;
    vars Cdc45_tot and Cdc45_tot;
  enddef;
  def map between environment and Me for
    vars time and time;
  enddef;
  def map between PCNP and PCN for
    vars PCNP and PCNP;
  enddef;
  def map between environment and pRBc2 for
    vars time and time;
  enddef;
  def map between environment and Cdc45 for
    vars time and time;
  enddef;
  def map between E2Fp and E2F for
    vars E2Fp and E2Fp;
  enddef;
  def map between model_parameters and Cb for
    vars Cdk1_tot and Cdk1_tot;
    vars K_db and K_db;
    vars eps and eps;
    vars v_cb and v_cb;
    vars k_com4 and k_com4;
    vars K_dbcdc20 and K_dbcdc20;
    vars K_dbcdh1 and K_dbcdh1;
    vars V_db and V_db;
    vars k_decom4 and k_decom4;
    vars k_ddb and k_ddb;
  enddef;
  def map between model_parameters and ATR for
    vars k_aatr and k_aatr;
    vars eps and eps;
    vars ATR_tot and ATR_tot;
    vars k_datr and k_datr;
  enddef;
  def map between Mb and Cb for
    vars Mb and Mb;
  enddef;
  def map between environment and ATR for
    vars time and time;
  enddef;
  def map between Mbp27 and Cb for
    vars Mbp27 and Mbp27;
  enddef;
  def map between Mb and Cdh1a for
    vars Mb and Mb;
  enddef;
  def map between CC and PCC for
    vars CC and CC;
  enddef;
  def map between environment and Primer for
    vars time and time;
  enddef;
  def map between model_parameters and CCP for
    vars vdCC and vdCC;
    vars V2C and V2C;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars kdn and kdn;
    vars V1C and V1C;
  enddef;
  def map between environment and MR for
    vars time and time;
  enddef;
  def map between model_parameters and AP1 for
    vars eps and eps;
    vars K_agf and K_agf;
    vars v_sap1 and v_sap1;
    vars k_dap1 and k_dap1;
    vars GF and GF;
  enddef;
  def map between environment and Pei for
    vars time and time;
  enddef;
  def map between RN and MB for
    vars RN and RN;
  enddef;
  def map between model_parameters and CC for
    vars ksC and ksC;
    vars V2C and V2C;
    vars k3 and k3;
    vars kdnc and kdnc;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars V1C and V1C;
    vars k4 and k4;
  enddef;
  def map between Mbi and Cb for
    vars Mbi and Mbi;
  enddef;
  def map between environment and RN for
    vars time and time;
  enddef;
  def map between environment and Mdi for
    vars time and time;
  enddef;
  def map between model_parameters and Pei for
    vars k_dpei and k_dpei;
    vars K_5e and K_5e;
    vars eps and eps;
    vars x_e2 and x_e2;
    vars v_spei and v_spei;
    vars K_6e and K_6e;
    vars x_e1 and x_e1;
    vars a_e and a_e;
    vars V_m5e and V_m5e;
    vars V_6e and V_6e;
  enddef;
  def map between Pa and Ma for
    vars Pa and Pa;
  enddef;
  def map between environment and CbA for
    vars time and time;
  enddef;
  def map between Ce and Mei for
    vars Ce and Ce;
  enddef;
  def map between Pe and Pei for
    vars Pe and Pe;
  enddef;
  def map between Chk1 and Pei for
    vars Chk1 and Chk1;
  enddef;
  def map between environment and MP for
    vars time and time;
  enddef;
  def map between Ma and Ce for
    vars Ma and Ma;
  enddef;
  def map between Skp2 and Ce for
    vars Skp2 and Skp2;
  enddef;
  def map between Mb and Mbi for
    vars Mb and Mb;
  enddef;
  def map between Mdp27 and Cd for
    vars Mdp27 and Mdp27;
  enddef;
  def map between environment and Ca for
    vars time and time;
  enddef;
  def map between MC and CC for
    vars MC and MC;
  enddef;
  def map between Wee1 and Ma for
    vars Wee1 and Wee1;
  enddef;
  def map between Mai and Ce for
    vars Mai and Mai;
  enddef;
  def map between pRB and p27 for
    vars pRB and pRB;
  enddef;
  def map between BNP and BN for
    vars BNP and BNP;
  enddef;
  def map between model_parameters and PCCP for
    vars V1PC and V1PC;
    vars V2PC and V2PC;
    vars vdPCC and vdPCC;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars Kp and Kp;
    vars kdn and kdn;
  enddef;
  def map between environment and Cdh1i for
    vars time and time;
  enddef;
  def map between environment and BN for
    vars time and time;
  enddef;
  def map between Mb and Wee1p for
    vars Mb and Mb;
  enddef;
  def map between PCN and PCNP for
    vars PCN and PCN;
  enddef;
  def map between model_parameters and Ce for
    vars K_de and K_de;
    vars eps and eps;
    vars K_i10 and K_i10;
    vars k_dde and k_dde;
    vars V_de and V_de;
    vars K_i9 and K_i9;
    vars Cdk2_tot and Cdk2_tot;
    vars k_ce and k_ce;
    vars k_decom2 and k_decom2;
    vars k_com2 and k_com2;
    vars K_dceskp2 and K_dceskp2;
  enddef;
  def map between environment and Cdc20a for
    vars time and time;
  enddef;
  def map between model_parameters and PCP for
    vars V1P and V1P;
    vars Kd and Kd;
    vars Kdp and Kdp;
    vars vdPC and vdPC;
    vars Kp and Kp;
    vars kdn and kdn;
    vars V2P and V2P;
  enddef;
  def map between model_parameters and Mb for
    vars eps and eps;
    vars k_c7 and k_c7;
    vars i_b3 and i_b3;
    vars k_c8 and k_c8;
    vars V_m2b and V_m2b;
    vars K_1b and K_1b;
    vars V_m1b and V_m1b;
    vars K_2b and K_2b;
  enddef;
  def map between Mbp27 and CbA for
    vars Mbp27 and Mbp27;
  enddef;
  def map between Me and Pei for
    vars Me and Me;
  enddef;
  def map between MB and BC for
    vars MB and MB;
  enddef;
  def map between BN and BNP for
    vars BN and BN;
  enddef;
  def map between model_parameters and CbA for
    vars Cdk1_tot and Cdk1_tot;
    vars K_db and K_db;
    vars eps and eps;
    vars v_cb and v_cb;
    vars k_com4 and k_com4;
    vars K_dbcdc20 and K_dbcdc20;
    vars K_dbcdh1 and K_dbcdh1;
    vars V_db and V_db;
    vars k_decom4 and k_decom4;
    vars k_ddb and k_ddb;
  enddef;
  def map between Cdh1a and CbA for
    vars Cdh1a and Cdh1a;
  enddef;
  def map between BC and BN for
    vars BC and BC;
  enddef;
  def map between Mep27 and Ce for
    vars Mep27 and Mep27;
  enddef;
  def map between Wee1 and Mb for
    vars Wee1 and Wee1;
  enddef;
  def map between pRBc2 and pRBp for
    vars pRBc2 and pRBc2;
  enddef;
  def map between pRB and Ca for
    vars pRB and pRB;
  enddef;
  def map between Cb and Mbi for
    vars Cb and Cb;
  enddef;
  def map between Mbi and Mb for
    vars Mbi and Mbi;
  enddef;
  def map between environment and pRBc1 for
    vars time and time;
  enddef;
  def map between environment and pRB for
    vars time and time;
  enddef;
  def map between model_parameters and Me for
    vars k_c4 and k_c4;
    vars eps and eps;
    vars k_c3 and k_c3;
    vars V_m1e and V_m1e;
    vars K_1e and K_1e;
    vars K_2e and K_2e;
    vars i_b1 and i_b1;
    vars V_m2e and V_m2e;
  enddef;
  def map between Wee1 and Mei for
    vars Wee1 and Wee1;
  enddef;
  def map between model_parameters and Mei for
    vars eps and eps;
    vars V_m1e and V_m1e;
    vars K_1e and K_1e;
    vars K_2e and K_2e;
    vars Cdk2_tot and Cdk2_tot;
    vars k_decom2 and k_decom2;
    vars k_com2 and k_com2;
    vars i_b1 and i_b1;
    vars V_m2e and V_m2e;
  enddef;
  def map between PCN and BN for
    vars PCN and PCN;
  enddef;
  def map between Wee1p and Wee1 for
    vars Wee1p and Wee1p;
  enddef;
  def map between environment and Mep27 for
    vars time and time;
  enddef;
  def map between pRBp and pRB for
    vars pRBp and pRBp;
  enddef;
  def map between p27 and Mep27 for
    vars p27 and p27;
  enddef;
  def map between Map27 and Mei for
    vars Map27 and Map27;
  enddef;
  def map between environment and RC for
    vars time and time;
  enddef;
  def map between environment and Skp2 for
    vars time and time;
  enddef;
  def map between model_parameters and Mw for
    vars n_gerard and n_gerard;
    vars v_sw and v_sw;
    vars eps and eps;
    vars K_dw and K_dw;
    vars v_dw and v_dw;
    vars K_iw and K_iw;
  enddef;
  def map between model_parameters and Chk1 for
    vars eps and eps;
    vars Chk1_tot and Chk1_tot;
    vars V_2chk and V_2chk;
    vars V_1chk and V_1chk;
    vars K_2chk and K_2chk;
    vars K_1chk and K_1chk;
  enddef;
  def map between Mdp27 and pRB for
    vars Mdp27 and Mdp27;
  enddef;
  def map between environment and Mb for
    vars time and time;
  enddef;
  def map between p27 and p27p for
    vars p27 and p27;
  enddef;
  def map between MR and RC for
    vars MR and MR;
  enddef;
  def map between p27 and Map27 for
    vars p27 and p27;
  enddef;
  def map between model_parameters and Pai for
    vars k_dpai and k_dpai;
    vars V_m5a and V_m5a;
    vars v_spai and v_spai;
    vars a_a and a_a;
    vars eps and eps;
    vars K_6a and K_6a;
    vars x_a2 and x_a2;
    vars V_6a and V_6a;
    vars x_a1 and x_a1;
    vars K_5a and K_5a;
  enddef;
  def map between model_parameters and pRBpp for
    vars eps and eps;
    vars K_4 and K_4;
    vars V_4 and V_4;
    vars V_3 and V_3;
    vars k_dpRBpp and k_dpRBpp;
    vars K_3 and K_3;
  enddef;
  def map between Me and p27p for
    vars Me and Me;
  enddef;
  def map between Map27 and Ma for
    vars Map27 and Map27;
  enddef;
  def map between Md and Mdi for
    vars Md and Md;
  enddef;
  def map between model_parameters and Mep27 for
    vars k_c4 and k_c4;
    vars eps and eps;
    vars k_c3 and k_c3;
  enddef;
  def map between Md and p27 for
    vars Md and Md;
  enddef;
  def map between Mb and Cdc20i for
    vars Mb and Mb;
  enddef;
  def map between environment and pRBp for
    vars time and time;
  enddef;
  // Temporal self-organization of the cyclin/Cdk network driving the mammalian cell cycle
  //
  // Camille Nicodemus
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in OpenCell and COR. It was created from equations [1] to [46]. The model parameters were taken from the Parameters document. The units have been checked and they are consistent. v_sw has been set to 0 in this particular model which means the model is de-coupled from the circadian clock. The CellML model runs to replicate the first part of figure 7B.
  //
  // Model Structure
  //
  // We propose an integrated computational model for the network of cyclin-dependent kinases (Cdks) that controls the dynamics of the mammalian cell cycle. The model contains four Cdk modules regulated by reversible phosphorylation, Cdk inhibitors, and protein synthesis or degradation. Growth factors (GFs) trigger the transition from a quiescent, stable steady state to self-sustained oscillations in the Cdk network. These oscillations correspond to the repetitive, transient activation of cyclin D/Cdk4-6 in G(1), cyclin E/Cdk2 at the G(1)/S transition, cyclin A/Cdk2 in S and at the S/G(2) transition, and cyclin B/Cdk1 at the G(2)/M transition. The model accounts for the following major properties of the mammalian cell cycle: (i) repetitive cell cycling in the presence of suprathreshold amounts of GF; (ii) control of cell-cycle progression by the balance between antagonistic effects of the tumor suppressor retinoblastoma protein (pRB) and the transcription factor E2F; and (iii) existence of a restriction point in G(1), beyond which completion of the cell cycle becomes independent of GF. The model also accounts for endoreplication. Incorporating the DNA replication checkpoint mediated by kinases ATR and Chk1 slows down the dynamics of the cell cycle without altering its oscillatory nature and leads to better separation of the S and M phases. The model for the mammalian cell cycle shows how the regulatory structure of the Cdk network results in its temporal self-organization, leading to the repetitive, sequential activation of the four Cdk modules that brings about the orderly progression along cell-cycle phases.
  //
  // The original paper reference is cited below:
  //
  // Temporal self-organization of the cyclin/Cdk network driving the mammalian cell cycle. Goldbeter A, Gerard C, 2009, Unite de Chronobiologie Theorique , 106(51), 21643-8. PubMed ID: 20007375 (http://www.ncbi.nlm.nih.gov/pubmed/20007375?dopt=Abstract)
  //
  // reaction diagram
  //
  // GF-induced oscillations in the Cdk network. (A) Below a sharp threshold in the concentration of GF, the Cdk network evolves to a stable steady state, whereas sustained oscillations occur above the threshold that corresponds to a bifurcation beyond which the steady state becomes unstable
enddef;
