// creator: Given Penny; Family Noble; penny.noble@dpag.ox.ac.uk; Orgname The University of Oxford; Orgunit Department of Physiology, Anatomy and Genetics
// created: W3CDTF 2009-09-28
// isDescribedBy 19186122
// modelName: aslanidi_atrial_model_2009_LindbladCa_corrected
// modelName: aslanidi_atrial_model_2009
// unknown: The Aslanidi et al. 2009 Model of Rabbit Atrial Cells@en
// unknown: Rabbit@en
// species: Rabbit
// comment: FN Catherine Lloyd; This is the CellML description of Aslanidi et al.'s mathematical model of membrane action potentials in rabbit atrial cells
// reference: atrial cell; cardiac; electrophysiology; subject_type keyword
// bio_entity: atrial cell
// reference: Pubmed_id 19186122; title Mechanisms of transition from normal to reentrant electrical activity in a model of rabbit atrial tissue: interaction of tissue heterogeneity and anisotropy; W3CDTF 2009-02; Other V; Given O; Family Aslanidi; Other R; Given M; Family Boyett; Given H; Family Dobrzynski; Given J; Family Li; Given H; Family Zhang; volume 96; first_page 798; last_page 817; title Biophysical Journal
// unknown: atrial cell@en
// title: The Aslanidi et al. 2009 Model of Rabbit Atrial Cells
// simulation: maximumStepSize .1; nonstandard-pointDensity 10000; endingValue 5
def model aslanidi_atrial_model_2009_LindbladCa_corrected as
  // Optimal velocity and safety of discontinuous conduction through the heterogeneous Purkinje-ventricular junction
  //
  // Penny Noble
  //
  // University of Oxford
  //
  // Model Status
  //
  // This CellML version of the model has been checked in both PCEnv and COR and it runs to recreate the published results. The units have been checked and they balance. We would like to thank the original model author Oleg Aslanidi for his help in the final stages of model curation.
  //
  // Model Structure
  //
  // ABSTRACT: Experimental evidence suggests that regional differences in action potential (AP) morphology can provide a substrate for initiation and maintenance of reentrant arrhythmias in the right atrium (RA), but the relationships between the complex electrophysiological and anatomical organization of the RA and the genesis of reentry are unclear. In this study, a biophysically detailed three-dimensional computer model of the right atrial tissue was constructed to study the role of tissue heterogeneity and anisotropy in arrhythmogenesis. The model of Lindblad et al. for a rabbit atrial cell was modified to incorporate experimental data on regional differences in several ionic currents (primarily, I(Na), I(CaL), I(K1), I(to), and I(sus)) between the crista terminalis and pectinate muscle cells. The modified model was validated by its ability to reproduce the AP properties measured experimentally. The anatomical model of the rabbit RA (including tissue geometry and fiber orientation) was based on a recent histological reconstruction. Simulations with the resultant electrophysiologically and anatomically detailed three-dimensional model show that complex organization of the RA tissue causes breakdown of regular AP conduction patterns at high pacing rates (>11.75 Hz): as the AP in the crista terminalis cells is longer, and electrotonic coupling transverse to fibers of the crista terminalis is weak, high-frequency pacing at the border between the crista terminalis and pectinate muscles results in a unidirectional conduction block toward the crista terminalis and generation of reentry. Contributions of the tissue heterogeneity and anisotropy to reentry initiation mechanisms are quantified by measuring action potential duration (APD) gradients at the border between the crista terminalis and pectinate muscles: the APD gradients are high in areas where both heterogeneity and anisotropy are high, such that intrinsic APD differences are not diminished by electrotonic interactions. Thus, our detailed computer model reconstructs complex electrical activity in the RA, and provides new insights into the mechanisms of transition from focal atrial tachycardia into reentry.
  //
  // The original paper reference is cited below:
  //
  // Mechanisms of transition from normal to reentrant electrical activity in a model of rabbit atrial tissue: interaction of tissue heterogeneity and anisotropy, Oleg V. Aslanidi, Mark R. Boyett, Halina Dobrzynski, and Henggui Zhang, 2009, Biophysical Journal , 96, 798-817. PubMed ID: 19186122 (http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&db=PubMed&list_uids=19186122&dopt=Abstract)
  //
  // schematic diagram
  //
  // A schematic diagram describing the atrial cell model.
  def unit per_millimolar_second as
    unit millimolar {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit per_millivolt_second as
    unit millivolt {expo: -1.0};
    unit second {expo: -1.0};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1.0};
  enddef;
  def unit picoA_per_millimolar as
    unit ampere {pref: pico};
    unit millimolar {expo: -1.0};
  enddef;
  def unit per_millimolar_4 as
    unit millimolar {expo: -4.0};
  enddef;
  def unit nanoS as
    unit siemens {pref: nano};
  enddef;
  def unit nanoF as
    unit farad {pref: nano};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_second as
    unit second {expo: -1.0};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit millijoule_per_mole_kelvin as
    unit mole {expo: -1.0};
    unit joule {pref: milli};
    unit kelvin {expo: -1.0};
  enddef;
  def unit nanolitre_per_second as
    unit litre {pref: nano};
    unit second {expo: -1.0};
  enddef;
  def unit picoA_per_millimolar_4 as
    unit ampere {pref: pico};
    unit millimolar {expo: -4.0};
  enddef;
  def unit nanolitre as
    unit litre {pref: nano};
  enddef;
  def unit coulomb_per_mole as
    unit mole {expo: -1.0};
    unit coulomb;
  enddef;

  def comp environment as
    var time: second {pub: out};
    var CT: dimensionless {init: 1, pub: out};
    var PM: dimensionless {init: 0, pub: out};
  enddef;

  def comp membrane as
    // isComputationalComponentFor: #property_0; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {init: -80, pub: out};
    var R: millijoule_per_mole_kelvin {init: 8314, pub: out};
    var T: kelvin {init: 308, pub: out};
    var F: coulomb_per_mole {init: 96487, pub: out};
    var Cm: nanoF {init: 0.00005};
    var time: second {pub: in};
    // isComputationalComponentFor: #property_1; #process_0; description ; #mediator_0; hasPhysicalEntityReference #entity_6; #sink_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_4; #source_0; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; name Sodium Current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sodium Current
    var i_Na: picoA {pub: in};
    // isComputationalComponentFor: #property_2; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Long lasting calcium current
    var i_Ca_L: picoA {pub: in};
    // isComputationalComponentFor: #property_3; #process_2; description ; #mediator_2; hasPhysicalEntityReference #entity_10; #sink_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_2; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; name Transient Ca2+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient Ca2+ current
    var i_Ca_T: picoA {pub: in};
    // isComputationalComponentFor: #property_4; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient outward K+ current
    var i_to: picoA {pub: in};
    // isComputationalComponentFor: #property_5; #process_4; description ; #mediator_4; hasPhysicalEntityReference #entity_13; #sink_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_12; #source_4; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; name Sustained background potassium current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sustained background potassium current
    var i_sus: picoA {pub: in};
    // isComputationalComponentFor: #property_6; #process_5; description ; #mediator_5; hasPhysicalEntityReference #entity_13; #sink_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; #source_5; hasMultiplier 1.0; hasPhysicalEntityReference #entity_12; name Inward rectifier K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Inward rectifier K+ current
    var i_K1: picoA {pub: in};
    // isComputationalComponentFor: #property_7; physicalPropertyOf #process_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Fast subtype of delayed rectifier K+ current
    var i_Kr: picoA {pub: in};
    // isComputationalComponentFor: #property_8; #process_7; description ; #mediator_7; hasPhysicalEntityReference #entity_13; #sink_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_12; #source_7; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; name Slow subtype of delayed rectifier K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Slow subtype of delayed rectifier K+ current.
    var i_Ks: picoA {pub: in};
    // isComputationalComponentFor: #property_9; physicalPropertyOf #process_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Backward inward Na+ current
    var i_B_Na: picoA {pub: in};
    // isComputationalComponentFor: #property_10; physicalPropertyOf #process_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background calcium current
    var i_B_Ca: picoA {pub: in};
    // isComputationalComponentFor: #property_11; #process_10; description ; #mediator_10; #entity_14; hasPhysicalDefinition http://identifiers.org/go/GO:0005391; #sink_11; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; #sink_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; #source_11; hasMultiplier 1.0; hasPhysicalEntityReference #entity_4; #source_10; hasMultiplier 1.0; hasPhysicalEntityReference #entity_12; name Sodium-Potassium pump current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na-K pump current.
    var i_p: picoA {pub: in};
    // isComputationalComponentFor: #property_12; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Ca2+ pump current
    var i_CaP: picoA {pub: in};
    // isComputationalComponentFor: #property_13; #process_12; description ; #mediator_12; #entity_15; hasPhysicalDefinition http://identifiers.org/go/GO:0005432; #sink_14; hasMultiplier 1.0; #entity_8; #entity_5; hasPhysicalDefinition http://identifiers.org/fma/FMA:226050; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29108; #sink_13; hasMultiplier 1.0; #entity_4; part_of #entity_5; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; #source_14; hasMultiplier 1.0; #entity_7; #entity_3; hasPhysicalDefinition http://identifiers.org/fma/FMA:70022; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29108; #source_13; hasMultiplier 1.0; #entity_2; part_of #entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29101; name Sodium-Calcium exchanger current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var i_NaCa: picoA {pub: in};
    var i_Stim: picoA;
    var stim_start: second {init: 0.01};
    var stim_end: second {init: 100};
    var stim_period: second {init: 0.5};
    var stim_duration: second {init: 0.0002};
    var stim_amplitude: picoA {init: -20};
    i_Stim = sel
      case (time >= stim_start) and (time <= stim_end) and (time-stim_start-floor((time-stim_start)/stim_period)*stim_period <= stim_duration):
        stim_amplitude;
      otherwise:
        0{picoA};
    endsel;
    ode(V, time) = -1{dimensionless}/Cm*(i_Kr+i_Ks+i_Na+i_Ca_L+i_Ca_T+i_to+i_sus+i_K1+i_B_Na+i_B_Ca+i_p+i_CaP+i_NaCa+i_Stim);
  enddef;

  def comp sodium_current as
    // isComputationalComponentFor: #property_14; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sodium Current
    var i_Na: picoA {pub: out};
    // isComputationalComponentFor: #property_15; #entity_16; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:39000; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Reversal potential for Na+ channel
    var E_Na: millivolt {pub: out};
    var P_Na: nanolitre_per_second {init: 0.0000014};
    var time: second {pub: in, priv: out};
    // isComputationalComponentFor: #property_16; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in, priv: out};
    var Na_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_17; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium.
    var Na_i: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    // description: Sodium current m gate
    var m: dimensionless {priv: in};
    // description: Fast inactivation gating variable for Sodium current
    var h1: dimensionless {priv: in};
    // description: Slow inactivation gating variable for Sodium current
    var h2: dimensionless {priv: in};
    E_Na = R*T/F*ln(Na_c/Na_i);
    i_Na = P_Na*pow(m, 3{dimensionless})*(0.635{dimensionless}*h1+0.365{dimensionless}*h2)*Na_c*V*sqr(F)/(R*T)*(exp((V-E_Na)*F/(R*T))-1{dimensionless})/(exp(V*F/(R*T))-1{dimensionless});
  enddef;

  def comp sodium_current_m_gate as
    // description: Sodium current m gate
    var m: dimensionless {init: 0.01309, pub: out};
    var E0_m: millivolt;
    // description: Voltage-dependent opening rate constant for calcium m gate
    var alpha_m: per_second;
    // description: Voltage-dependent closing rate constant for calium m gate
    var beta_m: per_second;
    // isComputationalComponentFor: #property_18; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_m = V+44.4{millivolt};
    alpha_m = -460{per_millivolt_second}*E0_m/(exp(E0_m/(-12.673{millivolt}))-1{dimensionless});
    beta_m = 18400{per_second}*exp(E0_m/(-12.673{millivolt}));
    ode(m, time) = alpha_m*(1{dimensionless}-m)-beta_m*m;
  enddef;

  def comp sodium_current_h1_gate as
    // description: Fast inactivation gating variable for Sodium current
    var h1: dimensionless {init: 0.706, pub: out};
    var alpha_h: per_second;
    var beta_h: per_second;
    var h_infinity: dimensionless {pub: out};
    var tau_h1: second;
    // isComputationalComponentFor: #property_19; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_h = 44.9{per_second}*exp((V+66.9{millivolt})/(-5.57{millivolt}));
    beta_h = 1491{per_second}/(1{dimensionless}+323.3{dimensionless}*exp((V+94.6{millivolt})/(-12.9{millivolt})));
    h_infinity = alpha_h/(alpha_h+beta_h);
    tau_h1 = 0.03{second}/(1{dimensionless}+exp((V+40{millivolt})/6{millivolt}))+0.00015{second};
    ode(h1, time) = (h_infinity-h1)/tau_h1;
  enddef;

  def comp sodium_current_h2_gate as
    // description: Slow inactivation gating variable for Sodium current
    var h2: dimensionless {init: 0.61493, pub: out};
    var tau_h2: second;
    var h_infinity: dimensionless {pub: in};
    // isComputationalComponentFor: #property_20; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    tau_h2 = 0.12{second}/(1{dimensionless}+exp((V+60{millivolt})/2{millivolt}))+0.00045{second};
    ode(h2, time) = (h_infinity-h2)/tau_h2;
  enddef;

  def comp L_type_Ca_channel as
    // isComputationalComponentFor: #property_21; #process_1; description ; #mediator_1; #entity_9; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:38808; #sink_1; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_1; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; name Long lasting calcium current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Long lasting calcium current
    var i_Ca_L: picoA {pub: out};
    var g_Ca_L: nanoS {init: 0.004};
    var E_Ca_app: millivolt {init: 50};
    var time: second {pub: in, priv: out};
    // isComputationalComponentFor: #property_22; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in, priv: out};
    var d_prime: dimensionless;
    // description: Activation gating variable for long lasting calcium current.
    var d_L: dimensionless {priv: in};
    // description: Inactivation gating variable foe long lasting calcium current.
    var f_L: dimensionless {priv: in};
    var CT: dimensionless {pub: in};
    var PM: dimensionless {pub: in};
    d_prime = 1{dimensionless}/(1{dimensionless}+exp((V-23{millivolt})/(-12{millivolt})));
    i_Ca_L = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        1.8{dimensionless}*g_Ca_L*(d_L*f_L+d_prime)*(V-E_Ca_app);
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        2.1{dimensionless}*g_Ca_L*(d_L*f_L+d_prime)*(V-E_Ca_app);
      otherwise:
        g_Ca_L*(d_L*f_L+d_prime)*(V-E_Ca_app);
    endsel;
  enddef;

  def comp L_type_Ca_channel_d_L_gate as
    // description: Activation gating variable for long lasting calcium current.
    var d_L: dimensionless {init: 0.00003, pub: out};
    var E0_alpha_d_L: millivolt;
    var E0_beta_d_L: millivolt;
    var E10: millivolt;
    // description: Voltage-dependent opening rate constant of the avtivation gating for the long lasting calcium current.
    var alpha_d_L: per_second;
    // description: closing rate constant of the activation gating for the long lasting calcium current.
    var beta_d_L: per_second;
    var d_L_infinity: dimensionless;
    // description: Voltage dependent time constant of the activation gating for the long lasting calcium current
    var tau_d_L: second;
    // isComputationalComponentFor: #property_23; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_alpha_d_L = V+45{millivolt};
    E0_beta_d_L = V+5{millivolt};
    E10 = V+10{millivolt};
    alpha_d_L = -16.72{per_millivolt_second}*E0_alpha_d_L/(exp(E0_alpha_d_L/(-2.5{millivolt}))-1{dimensionless})+(-50{per_millivolt_second}*E10/(exp(E10/(-4.808{millivolt}))-1{dimensionless}));
    beta_d_L = 4.48{per_millivolt_second}*E0_beta_d_L/(exp(E0_beta_d_L/2.5{millivolt})-1{dimensionless});
    d_L_infinity = 1{dimensionless}/(1{dimensionless}+exp((E10+0.95{millivolt})/(-6.6{millivolt})));
    tau_d_L = 1{dimensionless}/(alpha_d_L+beta_d_L);
    ode(d_L, time) = (d_L_infinity-d_L)/tau_d_L;
  enddef;

  def comp L_type_Ca_channel_f_L_gate as
    // description: Inactivation gating variable foe long lasting calcium current.
    var f_L: dimensionless {init: 0.99981, pub: out};
    var E0_f_L: millivolt;
    // description: Voltage dependent opening rate constant for f_L
    var alpha_f_L: per_second;
    // description: Voltage dependent closing rate constant f_L.
    var beta_f_L: per_second;
    var f_L_infinity: dimensionless {pub: out};
    // description: Voltage dependent time constant of f_L.
    var tau_f_L: second;
    // isComputationalComponentFor: #property_24; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_f_L = V+18{millivolt};
    alpha_f_L = 8.49{per_millivolt_second}*E0_f_L/(exp(E0_f_L/4{millivolt})-1{dimensionless});
    beta_f_L = 67.922{per_second}/(1{dimensionless}+exp(E0_f_L/(-4{millivolt})));
    f_L_infinity = alpha_f_L/(alpha_f_L+beta_f_L);
    tau_f_L = 1{dimensionless}/(alpha_f_L+beta_f_L);
    ode(f_L, time) = (f_L_infinity-f_L)/tau_f_L;
  enddef;

  def comp T_type_Ca_channel as
    // isComputationalComponentFor: #property_25; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient Ca2+ current
    var i_Ca_T: picoA {pub: out};
    var g_Ca_T: nanoS {init: 0.006};
    var E_Ca_T: millivolt {init: 38};
    var time: second {pub: in, priv: out};
    // isComputationalComponentFor: #property_26; #entity_0; #entity_1; hasPhysicalDefinition http://identifiers.org/fma/FMA:14067; hasPhysicalDefinition http://identifiers.org/fma/FMA:30322; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in, priv: out};
    // description: Activation gating variable for transient calcium current
    var d_T: dimensionless {priv: in};
    // description: Inactivation gating variable for the transient Ca2+ current
    var f_T: dimensionless {priv: in};
    i_Ca_T = g_Ca_T*d_T*f_T*(V-E_Ca_T);
  enddef;

  def comp T_type_Ca_channel_d_T_gate as
    // description: Activation gating variable for transient calcium current
    var d_T: dimensionless {init: 0.00046, pub: out};
    var E0_d_T: millivolt;
    // description: Voltage-dependent opening rate constant for d_T
    var alpha_d_T: per_second;
    // description: Voltage-dependent closing rate constant d_T
    var beta_d_T: per_second;
    var d_T_infinity: dimensionless;
    // description: Voltage-dependent time constant of d_T
    var tau_d_T: second;
    // isComputationalComponentFor: #property_27; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_d_T = V+23.3{millivolt};
    alpha_d_T = 674.173{per_second}*exp(E0_d_T/30{millivolt});
    beta_d_T = 674.173{per_second}*exp(E0_d_T/(-30{millivolt}));
    d_T_infinity = 1{dimensionless}/(1{dimensionless}+exp((E0_d_T-0.3{millivolt})/(-6.1{millivolt})));
    tau_d_T = 1{dimensionless}/(alpha_d_T+beta_d_T);
    ode(d_T, time) = (d_T_infinity-d_T)/tau_d_T;
  enddef;

  def comp T_type_Ca_channel_f_T_gate as
    // description: Inactivation gating variable for the transient Ca2+ current
    var f_T: dimensionless {init: 0.30752, pub: out};
    var E0_f_T: millivolt;
    // description: Voltage-dependent opening rate constant for f_T
    var alpha_f_T: per_second;
    // description: Voltage-dependent closing rate constant of F_T
    var beta_f_T: per_second;
    var f_T_infinity: dimensionless {pub: out};
    // description: Voltage dependent time constant of f_T
    var tau_f_T: second;
    // isComputationalComponentFor: #property_28; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    E0_f_T = V+75{millivolt};
    alpha_f_T = 9.637{per_second}*exp(E0_f_T/(-83.3{millivolt}));
    beta_f_T = 9.637{per_second}*exp(E0_f_T/15.38{millivolt});
    f_T_infinity = alpha_f_T/(alpha_f_T+beta_f_T);
    tau_f_T = 1{dimensionless}/(alpha_f_T+beta_f_T);
    ode(f_T, time) = (f_T_infinity-f_T)/tau_f_T;
  enddef;

  def comp Ca_independent_transient_outward_K_current as
    // isComputationalComponentFor: #property_29; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient outward K+ current
    var i_to: picoA {pub: out};
    // isComputationalComponentFor: #property_30; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sustained background potassium current
    var i_sus: picoA {pub: out};
    // isComputationalComponentFor: #property_31; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Reverse potential for potassium channel
    var E_K: millivolt {pub: out};
    var g_to: nanoS {init: 0.050002};
    var time: second {pub: in, priv: out};
    // isComputationalComponentFor: #property_32; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in, priv: out};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    // isComputationalComponentFor: #property_33; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of potassium in the cytosol
    var K_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_34; physicalPropertyOf #entity_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular K+.
    var K_i: millimolar {pub: in};
    // description: Activation gating variable for transient outward K+ current
    var r: dimensionless {priv: in};
    // description: Fast inactivation gating variable for I_t
    var s1: dimensionless {priv: in};
    // description: Slow inactivation gating for the transient outward K+ current
    var s2: dimensionless {priv: in};
    var s3: dimensionless {priv: in};
    var CT: dimensionless {pub: in};
    var PM: dimensionless {pub: in};
    E_K = R*T/F*ln(K_c/K_i);
    i_to = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        0.2{dimensionless}*g_to*r*(0.59{dimensionless}*pow(s1, 3{dimensionless})+0.41{dimensionless}*pow(s2, 3{dimensionless}))*(0.6{dimensionless}*pow(s3, 6{dimensionless})+0.4{dimensionless})*(V-E_K);
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        0.35{dimensionless}*g_to*r*(0.59{dimensionless}*pow(s1, 3{dimensionless})+0.41{dimensionless}*pow(s2, 3{dimensionless}))*(0.6{dimensionless}*pow(s3, 6{dimensionless})+0.4{dimensionless})*(V-E_K);
      otherwise:
        g_to*r*(0.59{dimensionless}*pow(s1, 3{dimensionless})+0.41{dimensionless}*pow(s2, 3{dimensionless}))*(0.6{dimensionless}*pow(s3, 6{dimensionless})+0.4{dimensionless})*(V-E_K);
    endsel;
    i_sus = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        0.0014{nanoS}*(V+70{millivolt});
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        0.0024{nanoS}*(V+70{millivolt});
      otherwise:
        0.001{nanoS}*(V+70{millivolt});
    endsel;
  enddef;

  def comp Ca_independent_transient_outward_K_current_r_gate as
    // description: Activation gating variable for transient outward K+ current
    var r: dimensionless {init: 0.00006, pub: out};
    // description: Voltage-dependent opening rate constant for r
    var alpha_r: per_second;
    // description: Voltage-dependent closing rate constant for r gate
    var beta_r: per_second;
    var tau_r: second;
    var r_infinity: dimensionless;
    // isComputationalComponentFor: #property_35; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_r = 386.6{per_second}*exp(V/12{millivolt});
    beta_r = 8.011{per_second}*exp(V/(-7.2{millivolt}));
    r_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+15{millivolt})/(-5.633{millivolt})));
    tau_r = 1{dimensionless}/(alpha_r+beta_r)+4e-4{second};
    ode(r, time) = (r_infinity-r)/tau_r;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s1_gate as
    // description: Fast inactivation gating variable for I_t
    var s1: dimensionless {init: 0.5753, pub: out};
    // description: Voltage dependent time constant of s1
    var tau_s1: second;
    var s1_infinity: dimensionless;
    // isComputationalComponentFor: #property_36; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s1_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.29{millivolt})/7.06{millivolt}));
    tau_s1 = 0.5466{second}/(1{dimensionless}+exp((V+32.8{millivolt})/0.1{millivolt}))+0.0204{second};
    ode(s1, time) = (s1_infinity-s1)/tau_s1;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s2_gate as
    // description: Slow inactivation gating for the transient outward K+ current
    var s2: dimensionless {init: 0.39871, pub: out};
    // description: Voltage-dependent time constant of s2.
    var tau_s2: second;
    var s2_infinity: dimensionless;
    // isComputationalComponentFor: #property_37; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s2_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+28.29{millivolt})/7.06{millivolt}));
    tau_s2 = 5.75{second}/(1{dimensionless}+exp((V+32.8{millivolt})/0.1{millivolt}))+0.45{second}/(1{dimensionless}+exp((V-13.54{millivolt})/(-13.97{millivolt})));
    ode(s2, time) = (s2_infinity-s2)/tau_s2;
  enddef;

  def comp Ca_independent_transient_outward_K_current_s3_gate as
    var s3: dimensionless {init: 0.57363, pub: out};
    var tau_s3: second;
    var s3_infinity: dimensionless;
    // isComputationalComponentFor: #property_38; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    s3_infinity = (1{dimensionless}/(1{dimensionless}+exp((V+50.67{millivolt})/27.38{millivolt}))+0.666{dimensionless})/1.666{dimensionless};
    tau_s3 = 7.5{second}/(1{dimensionless}+exp((V+23{millivolt})/0.5{millivolt}))+0.5{second};
    ode(s3, time) = (s3_infinity-s3)/tau_s3;
  enddef;

  def comp delayed_rectifier_K_current as
    // isComputationalComponentFor: #property_39; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Slow subtype of delayed rectifier K+ current.
    var i_Ks: picoA {pub: out};
    // isComputationalComponentFor: #property_40; physicalPropertyOf #process_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Fast subtype of delayed rectifier K+ current
    var i_Kr: picoA {pub: out};
    var g_Ks: nanoS {init: 0.0025};
    var g_Kr: nanoS {init: 0.0035};
    var time: second {pub: in, priv: out};
    // isComputationalComponentFor: #property_41; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in, priv: out};
    // isComputationalComponentFor: #property_42; physicalPropertyOf #entity_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Reverse potential for potassium channel
    var E_K: millivolt {pub: in};
    var z: dimensionless {priv: in};
    // description: Activation gating variable for the fast subtype of delayed rectifier K+ current
    var p_a: dimensionless {priv: in};
    // description: Inactivation gating variable for the fast subtype of delayed rectifier K+ current
    var p_i: dimensionless {priv: in};
    i_Ks = g_Ks*z*(V-E_K);
    i_Kr = g_Kr*p_a*p_i*(V-E_K);
  enddef;

  def comp delayed_rectifier_K_current_z_gate as
    var z: dimensionless {init: 0.02032, pub: out};
    var alpha_z: per_second;
    var beta_z: per_second;
    var tau_z: second;
    var z_infinity: dimensionless;
    // isComputationalComponentFor: #property_43; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_z = 1.66{per_second}*exp(V/69.452{millivolt});
    beta_z = 0.3{per_second}*exp(V/(-21.826{millivolt}));
    z_infinity = 1{dimensionless}/(1{dimensionless}+exp((V-0.9{millivolt})/(-13.8{millivolt})));
    tau_z = 1{dimensionless}/(alpha_z+beta_z)+0.06{second};
    ode(z, time) = (z_infinity-z)/tau_z;
  enddef;

  def comp delayed_rectifier_K_current_pa_gate as
    // description: Activation gating variable for the fast subtype of delayed rectifier K+ current
    var p_a: dimensionless {init: 0.00016, pub: out};
    var alpha_p_a: per_second;
    var beta_p_a: per_second;
    // description: Voltage-dependent time constant of the activation grating variable for the fast subtype of delayed rectifier K+ current.
    var tau_p_a: second;
    var p_a_infinity: dimensionless;
    // isComputationalComponentFor: #property_44; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_p_a = 9{per_second}*exp(V/25.371{millivolt});
    beta_p_a = 1.3{per_second}*exp(V/(-13.026{millivolt}));
    p_a_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+5.1{millivolt})/(-7.4{millivolt})));
    tau_p_a = 1{dimensionless}/(alpha_p_a+beta_p_a);
    ode(p_a, time) = (p_a_infinity-p_a)/tau_p_a;
  enddef;

  def comp delayed_rectifier_K_current_pi_gate as
    // description: Inactivation gating variable for the fast subtype of delayed rectifier K+ current
    var p_i: dimensionless {init: 0.76898, pub: out};
    // description: Voltage dependent opening rate constant of the inactivation grating variable for the fast subtype of delayed rectifier K+ current
    var alpha_p_i: per_second;
    // description: Voltage dependent closing rate constant of inactivation gating variable for the fast subtype of delayed rectifier K+ current.
    var beta_p_i: per_second;
    // description: Voltage dependent time constant of P_i
    var tau_p_i: second;
    var p_i_infinity: dimensionless;
    // isComputationalComponentFor: #property_45; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    alpha_p_i = 100{per_second}*exp(V/(-54.645{millivolt}));
    beta_p_i = 656{per_second}*exp(V/106.157{millivolt});
    p_i_infinity = 1{dimensionless}/(1{dimensionless}+exp((V+47.3921{millivolt})/18.6603{millivolt}));
    tau_p_i = 1{dimensionless}/(alpha_p_i+beta_p_i);
    ode(p_i, time) = (p_i_infinity-p_i)/tau_p_i;
  enddef;

  def comp inward_rectifier as
    // isComputationalComponentFor: #property_46; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Inward rectifier K+ current
    var i_K1: picoA {pub: out};
    var g_K1: nanoS {init: 0.00508};
    var KmK1: millimolar {init: 0.59};
    var steepK1: dimensionless {init: 1.393};
    var shiftK1: millivolt {init: -3.6};
    var time: second {pub: in};
    // isComputationalComponentFor: #property_47; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    // isComputationalComponentFor: #property_48; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of potassium in the cytosol
    var K_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_49; #entity_17; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:50510; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Reverse potential for potassium channel
    var E_K: millivolt {pub: in};
    var CT: dimensionless {pub: in};
    var PM: dimensionless {pub: in};
    i_K1 = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        2{dimensionless}*g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3{dimensionless})*1{dimensionless}/(1{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        2.5{dimensionless}*g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3{dimensionless})*1{dimensionless}/(1{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
      otherwise:
        g_K1*(V-E_K)*pow(K_c/(K_c+KmK1), 3{dimensionless})*1{dimensionless}/(1{dimensionless}+exp(steepK1*F*(V-E_K-shiftK1)/(R*T)));
    endsel;
  enddef;

  def comp background_currents as
    // isComputationalComponentFor: #property_50; physicalPropertyOf #process_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Backward inward Na+ current
    var i_B_Na: picoA {pub: out};
    // isComputationalComponentFor: #property_51; #process_9; description ; #mediator_9; hasPhysicalEntityReference #entity_10; #sink_9; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_9; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; name Background calcium current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background calcium current
    var i_B_Ca: picoA {pub: out};
    var g_B_Na: nanoS {init: 6.4e-5};
    var g_B_Ca: nanoS {init: 3.1e-5};
    // isComputationalComponentFor: #property_52; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Background Ca2+ nernst potential
    var E_Ca: millivolt;
    // isComputationalComponentFor: #property_53; physicalPropertyOf #entity_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_01581
    // description: Reversal potential for Na+ channel
    var E_Na: millivolt {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    var Ca_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_54; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    // isComputationalComponentFor: #property_55; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var CT: dimensionless {pub: in};
    var PM: dimensionless {pub: in};
    E_Ca = R*T/(2{dimensionless}*F)*ln(Ca_c/Ca_i);
    i_B_Na = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        0.00002{nanoS}*(V-E_Na);
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        0.00003{nanoS}*(V-E_Na);
      otherwise:
        g_B_Na*(V-E_Na);
    endsel;
    i_B_Ca = sel
      case (CT == 1{dimensionless}) and (PM == 0{dimensionless}):
        0.00002{nanoS}*(V-E_Ca);
      case (CT == 0{dimensionless}) and (PM == 1{dimensionless}):
        0.00003{nanoS}*(V-E_Ca);
      otherwise:
        g_B_Ca*(V-E_Ca);
    endsel;
  enddef;

  def comp sodium_potassium_pump as
    // isComputationalComponentFor: #property_56; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na-K pump current.
    var i_p: picoA {pub: out};
    var k_NaK_K: millimolar {init: 1};
    var k_NaK_Na: millimolar {init: 11};
    var i_NaK_max: picoA {init: 0.06441};
    // isComputationalComponentFor: #property_57; #entity_18; #entity_19; hasPhysicalDefinition http://identifiers.org/fma/FMA:62387; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of potassium in the cytosol
    var K_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_58; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium.
    var Na_i: millimolar {pub: in};
    // isComputationalComponentFor: #property_59; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_p = i_NaK_max*K_c/(K_c+k_NaK_K)*pow(Na_i, 1.5{dimensionless})/(pow(Na_i, 1.5{dimensionless})+pow(k_NaK_Na, 1.5{dimensionless}))*1.6{dimensionless}/(1.5{dimensionless}+exp((V+60{millivolt})/(-40{millivolt})));
  enddef;

  def comp sarcolemmal_calcium_pump_current as
    // isComputationalComponentFor: #property_60; #process_11; description ; #mediator_11; hasPhysicalEntityReference #entity_10; #sink_12; hasMultiplier 1.0; hasPhysicalEntityReference #entity_7; #source_12; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; name Ca2+ pump current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Ca2+ pump current
    var i_CaP: picoA {pub: out};
    var i_CaP_max: picoA {init: 0.009509};
    var k_CaP: millimolar {init: 2e-4};
    // isComputationalComponentFor: #property_61; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    i_CaP = i_CaP_max*Ca_i/(Ca_i+k_CaP);
  enddef;

  def comp Na_Ca_ion_exchanger_current as
    // isComputationalComponentFor: #property_62; physicalPropertyOf #process_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var i_NaCa: picoA {pub: out};
    var k_NaCa: picoA_per_millimolar_4 {init: 2e-5};
    var d_NaCa: per_millimolar_4 {init: 3e-4};
    var gamma: dimensionless {init: 0.45};
    // isComputationalComponentFor: #property_63; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium.
    var Na_i: millimolar {pub: in};
    var Na_c: millimolar {pub: in};
    // isComputationalComponentFor: #property_64; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {pub: in};
    var Ca_c: millimolar {pub: in};
    var R: millijoule_per_mole_kelvin {pub: in};
    var F: coulomb_per_mole {pub: in};
    var T: kelvin {pub: in};
    // isComputationalComponentFor: #property_65; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var time: second {pub: in};
    i_NaCa = k_NaCa*(pow(Na_i, 3{dimensionless})*Ca_c*exp(gamma*F*V/(R*T))-pow(Na_c, 3{dimensionless})*Ca_i*exp((gamma-1{dimensionless})*V*F/(R*T)))/(1{dimensionless}+d_NaCa*(pow(Na_c, 3{dimensionless})*Ca_i+pow(Na_i, 3{dimensionless})*Ca_c));
  enddef;

  def comp intracellular_ion_concentrations as
    // isComputationalComponentFor: #property_66; physicalPropertyOf #entity_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular sodium.
    var Na_i: millimolar {init: 8.4, pub: out};
    // isComputationalComponentFor: #property_67; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {init: 0.000071, pub: out};
    // isComputationalComponentFor: #property_68; #entity_11; part_of #entity_5; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular K+.
    var K_i: millimolar {init: 100, pub: out};
    var Vol_i: nanolitre {init: 1.26e-5, pub: out};
    var Vol_Ca: nanolitre {init: 5.884e-6};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isComputationalComponentFor: #property_69; physicalPropertyOf #process_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sodium Current
    var i_Na: picoA {pub: in};
    // isComputationalComponentFor: #property_70; physicalPropertyOf #process_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Long lasting calcium current
    var i_Ca_L: picoA {pub: in};
    // isComputationalComponentFor: #property_71; physicalPropertyOf #process_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient Ca2+ current
    var i_Ca_T: picoA {pub: in};
    // isComputationalComponentFor: #property_72; #process_8; description ; #mediator_8; #entity_6; hasPhysicalDefinition http://identifiers.org/go/GO:0034706; #sink_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_4; #source_8; hasMultiplier 1.0; hasPhysicalEntityReference #entity_2; name Background inward Na+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Backward inward Na+ current
    var i_B_Na: picoA {pub: in};
    // isComputationalComponentFor: #property_73; physicalPropertyOf #process_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    var i_NaCa: picoA {pub: in};
    // isComputationalComponentFor: #property_74; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na-K pump current.
    var i_p: picoA {pub: in};
    // isComputationalComponentFor: #property_75; physicalPropertyOf #process_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Fast subtype of delayed rectifier K+ current
    var i_Kr: picoA {pub: in};
    // isComputationalComponentFor: #property_76; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Slow subtype of delayed rectifier K+ current.
    var i_Ks: picoA {pub: in};
    // isComputationalComponentFor: #property_77; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Inward rectifier K+ current
    var i_K1: picoA {pub: in};
    // isComputationalComponentFor: #property_78; #process_3; description ; #mediator_3; #entity_13; hasPhysicalDefinition http://identifiers.org/go/GO:0034705; #sink_3; hasMultiplier 1.0; #entity_12; part_of #entity_3; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29103; #source_3; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; name Transient outward K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient outward K+ current
    var i_to: picoA {pub: in};
    // isComputationalComponentFor: #property_79; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sustained background potassium current
    var i_sus: picoA {pub: in};
    // isComputationalComponentFor: #property_80; physicalPropertyOf #process_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Ca2+ pump current
    var i_CaP: picoA {pub: in};
    // isComputationalComponentFor: #property_81; physicalPropertyOf #process_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Background calcium current
    var i_B_Ca: picoA {pub: in};
    // isComputationalComponentFor: #property_82; physicalPropertyOf #process_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcoplasmic reticulum uptake compartment current
    var i_up: picoA {pub: in};
    // isComputationalComponentFor: #property_83; physicalPropertyOf #process_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcoplasmic reticulum release compartment current
    var i_rel: picoA {pub: in};
    // description: Fractional occupancy of calmodulin by Ca2+
    var dOCdt: per_second {pub: in};
    // description: Fractional occupancy of troponin-Ca complex by Ca2+.
    var dOTCdt: per_second {pub: in};
    // description: Fractional occupancy of troponin-Mg complex by Ca2+
    var dOTMgCdt: per_second {pub: in};
    ode(Na_i, time) = -(i_Na+i_B_Na+3{dimensionless}*i_p+3{dimensionless}*i_NaCa)/(Vol_i*F);
    ode(K_i, time) = -(i_to+i_sus+i_K1+i_Kr+i_Ks-2{dimensionless}*i_p)/(Vol_i*F);
    ode(Ca_i, time) = -(i_Ca_L+i_Ca_T+i_B_Ca+i_CaP-2{dimensionless}*i_NaCa+i_up-i_rel)/(2{dimensionless}*Vol_Ca*F)-(0.08{millimolar}*dOTCdt+0.16{millimolar}*dOTMgCdt+0.045{millimolar}*dOCdt);
  enddef;

  def comp intracellular_Ca_buffering as
    // description: Fractional occupancy of calmodulin by Ca2+
    var O_C: dimensionless {init: 0.029108};
    // description: Fractional occupancy of calmodulin by Ca2+
    var dOCdt: per_second {pub: out};
    // description: Fractional occupancy of troponin-Ca complex by Ca2+
    var O_TC: dimensionless {init: 0.014071};
    // description: Fractional occupancy of troponin-Ca complex by Ca2+.
    var dOTCdt: per_second {pub: out};
    var O_TMgC: dimensionless {init: 0.214036};
    // description: Fractional occupancy of troponin-Mg complex by Ca2+
    var dOTMgCdt: per_second {pub: out};
    // description: Fractional occupancy of troponin-Mg complex by Mg2+
    var O_TMgMg: dimensionless {init: 0.693565, pub: out};
    var Mg_i: millimolar {init: 2.5};
    // isComputationalComponentFor: #property_84; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {pub: in};
    var time: second {pub: in};
    dOCdt = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_C)-476{per_second}*O_C;
    ode(O_C, time) = dOCdt;
    dOTCdt = 78400{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TC)-392{per_second}*O_TC;
    ode(O_TC, time) = dOTCdt;
    dOTMgCdt = 200000{per_millimolar_second}*Ca_i*(1{dimensionless}-O_TMgC-O_TMgMg)-6.6{per_second}*O_TMgC;
    ode(O_TMgC, time) = dOTMgCdt;
    ode(O_TMgMg, time) = 2000{per_millimolar_second}*Mg_i*(1{dimensionless}-O_TMgC-O_TMgMg)-666{per_second}*O_TMgMg;
  enddef;

  def comp cleft_space_ion_concentrations as
    var Na_c: millimolar {init: 140, pub: out};
    var Ca_c: millimolar {init: 2.5, pub: out};
    // isComputationalComponentFor: #property_85; physicalPropertyOf #entity_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of potassium in the cytosol
    var K_c: millimolar {init: 5, pub: out};
    var Vol_c: nanolitre {init: 0.0000025, pub: out};
    var time: second {pub: in};
    var F: coulomb_per_mole {pub: in};
    // isComputationalComponentFor: #property_86; physicalPropertyOf #process_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Na-K pump current.
    var i_p: picoA {pub: in};
    // isComputationalComponentFor: #property_87; #process_6; description ; #mediator_6; hasPhysicalEntityReference #entity_13; #sink_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_12; #source_6; hasMultiplier 1.0; hasPhysicalEntityReference #entity_11; name Fast subtype of delayed rectifier K+ current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Fast subtype of delayed rectifier K+ current
    var i_Kr: picoA {pub: in};
    // isComputationalComponentFor: #property_88; physicalPropertyOf #process_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Slow subtype of delayed rectifier K+ current.
    var i_Ks: picoA {pub: in};
    // isComputationalComponentFor: #property_89; physicalPropertyOf #process_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Inward rectifier K+ current
    var i_K1: picoA {pub: in};
    // isComputationalComponentFor: #property_90; physicalPropertyOf #process_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Transient outward K+ current
    var i_to: picoA {pub: in};
    // isComputationalComponentFor: #property_91; physicalPropertyOf #process_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sustained background potassium current
    var i_sus: picoA {pub: in};
    ode(K_c, time) = (i_to+i_sus+i_K1+i_Kr+i_Ks-2{dimensionless}*i_p)/(Vol_c*F);
  enddef;

  def comp Ca_handling_by_the_SR as
    // isComputationalComponentFor: #property_92; #process_14; description ; #mediator_14; hasPhysicalEntityReference #entity_10; #sink_16; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; #source_16; hasMultiplier 1.0; #entity_22; part_of #entity_19; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29108; name Sarcoplasmic reticulum release compartment current.; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcoplasmic reticulum release compartment current
    var i_rel: picoA {pub: out};
    // isComputationalComponentFor: #property_93; #process_13; description ; #mediator_13; #entity_10; hasPhysicalDefinition http://identifiers.org/go/GO:0034704; #sink_15; hasMultiplier 1.0; hasPhysicalEntityReference #entity_20; #source_15; hasMultiplier 1.0; hasPhysicalEntityReference #entity_8; name Sarcoplasmic reticulum uptake compartment current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcoplasmic reticulum uptake compartment current
    var i_up: picoA {pub: out};
    // isComputationalComponentFor: #property_94; #process_15; description ; #sink_17; hasMultiplier 1.0; #entity_23; #entity_24; hasPhysicalDefinition http://identifiers.org/fma/FMA:62390; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29108; #source_17; hasMultiplier 1.0; #entity_20; #entity_21; name Network Sarcoplasmic Reticulum; hasPhysicalDefinition http://identifiers.org/chebi/CHEBI:29108; name Sarcoplasmic reticulum calcium transfer current; hasPhysicalDefinition https://identifiers.org/opb/OPB_00318
    // description: Sarcoplasmic reticulum transfer current
    var i_tr: picoA;
    var I_up_max: picoA {init: 2.8};
    var k_cyca: millimolar {init: 0.0003};
    var k_srca: millimolar {init: 0.5};
    var k_xcs: dimensionless {init: 0.4};
    var alpha_rel: picoA_per_millimolar {init: 200};
    var Ca_rel: millimolar {init: 0.726776};
    // isComputationalComponentFor: #property_95; physicalPropertyOf #entity_23; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium in the sarcoplasmic reticulum.
    var Ca_up: millimolar {init: 0.730866};
    var Vol_up: nanolitre {init: 3.969e-7};
    var Vol_rel: nanolitre {init: 4.4e-8};
    var r_act: per_second;
    var r_inact: per_second;
    // description: Fractional occupancy of calsequentrin by Calcium
    var O_Calse: dimensionless {init: 0.465921};
    // description: Relative amount of inactive precursor in sarcoplasmic reticulum.
    var F1: dimensionless {init: 0.288039};
    // description: Relative amount of activator in sarcoplasmic reticulum release compartment.
    var F2: dimensionless {init: 0.002262};
    // description: Relative amount of inactive product in the sarcoplasmic reticulum release compartment.
    var F3: dimensionless {init: 0.612697};
    var tau_tr: second {init: 0.01};
    var k_rel: millimolar {init: 0.0003};
    var k_F3: per_second {init: 0.815};
    var time: second {pub: in};
    // isComputationalComponentFor: #property_96; physicalPropertyOf #entity_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    // description: Concentration of intracellular Calcium
    var Ca_i: millimolar {pub: in};
    // isComputationalComponentFor: #property_97; physicalPropertyOf #entity_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00506
    // description: Cardiace myocyte membrane potential.
    var V: millivolt {pub: in};
    var F: coulomb_per_mole {pub: in};
    ode(O_Calse, time) = 480{per_millimolar_second}*Ca_rel*(1{dimensionless}-O_Calse)-400{per_second}*O_Calse;
    ode(Ca_rel, time) = (i_tr-i_rel)/(2{dimensionless}*Vol_rel*F)-31{millimolar}*ode(O_Calse, time);
    ode(Ca_up, time) = (i_up-i_tr)/(2{dimensionless}*Vol_up*F);
    ode(F1, time) = k_F3*F3-r_act*F1;
    ode(F2, time) = r_act*F1-r_inact*F2;
    ode(F3, time) = F2*r_inact-k_F3*F3;
    r_act = 240{per_second}*exp(0.08{per_millivolt}*(V-20{millivolt}))+203.8{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    r_inact = 33.96{per_second}+339.6{per_second}*pow(Ca_i/(Ca_i+k_rel), 4{dimensionless});
    i_up = I_up_max*(Ca_i/k_cyca-sqr(k_xcs)*Ca_up/k_srca)/((Ca_i+k_cyca)/k_cyca+k_xcs*(Ca_up+k_srca)/k_srca);
    i_tr = (Ca_up-Ca_rel)*2{dimensionless}*F*Vol_rel/tau_tr;
    i_rel = alpha_rel*sqr(F2/(F2+0.25{dimensionless}))*(Ca_rel-Ca_i);
  enddef;

  def group as encapsulation for
    comp Ca_independent_transient_outward_K_current incl
      comp Ca_independent_transient_outward_K_current_s1_gate;
      comp Ca_independent_transient_outward_K_current_s2_gate;
      comp Ca_independent_transient_outward_K_current_s3_gate;
      comp Ca_independent_transient_outward_K_current_r_gate;
    endcomp;
    comp T_type_Ca_channel incl
      comp T_type_Ca_channel_d_T_gate;
      comp T_type_Ca_channel_f_T_gate;
    endcomp;
    comp sodium_current incl
      comp sodium_current_h2_gate;
      comp sodium_current_h1_gate;
      comp sodium_current_m_gate;
    endcomp;
    comp delayed_rectifier_K_current incl
      comp delayed_rectifier_K_current_pi_gate;
      comp delayed_rectifier_K_current_pa_gate;
      comp delayed_rectifier_K_current_z_gate;
    endcomp;
    comp L_type_Ca_channel incl
      comp L_type_Ca_channel_f_L_gate;
      comp L_type_Ca_channel_d_L_gate;
    endcomp;
  enddef;

  def group as containment for
    comp membrane incl
      comp sodium_potassium_pump;
      comp Ca_independent_transient_outward_K_current incl
        comp Ca_independent_transient_outward_K_current_s1_gate;
        comp Ca_independent_transient_outward_K_current_s2_gate;
        comp Ca_independent_transient_outward_K_current_s3_gate;
        comp Ca_independent_transient_outward_K_current_r_gate;
      endcomp;
      comp T_type_Ca_channel incl
        comp T_type_Ca_channel_d_T_gate;
        comp T_type_Ca_channel_f_T_gate;
      endcomp;
      comp sodium_current incl
        comp sodium_current_h2_gate;
        comp sodium_current_h1_gate;
        comp sodium_current_m_gate;
      endcomp;
      comp cleft_space_ion_concentrations;
      comp intracellular_ion_concentrations;
      comp intracellular_Ca_buffering;
      comp delayed_rectifier_K_current incl
        comp delayed_rectifier_K_current_pi_gate;
        comp delayed_rectifier_K_current_pa_gate;
        comp delayed_rectifier_K_current_z_gate;
      endcomp;
      comp inward_rectifier;
      comp Ca_handling_by_the_SR;
      comp sarcolemmal_calcium_pump_current;
      comp L_type_Ca_channel incl
        comp L_type_Ca_channel_f_L_gate;
        comp L_type_Ca_channel_d_L_gate;
      endcomp;
      comp Na_Ca_ion_exchanger_current;
      comp background_currents;
    endcomp;
  enddef;
  def map between sodium_current and background_currents for
    vars E_Na and E_Na;
  enddef;
  def map between cleft_space_ion_concentrations and Ca_independent_transient_outward_K_current for
    vars K_c and K_c;
  enddef;
  def map between T_type_Ca_channel_d_T_gate and T_type_Ca_channel for
    vars d_T and d_T;
  enddef;
  def map between T_type_Ca_channel_f_T_gate and T_type_Ca_channel for
    vars f_T and f_T;
  enddef;
  def map between membrane and Ca_independent_transient_outward_K_current for
    vars V and V;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between delayed_rectifier_K_current and intracellular_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between intracellular_ion_concentrations and Ca_independent_transient_outward_K_current for
    vars K_i and K_i;
  enddef;
  def map between environment and delayed_rectifier_K_current for
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and sodium_potassium_pump for
    vars Na_i and Na_i;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_z_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_ion_concentrations and sarcolemmal_calcium_pump_current for
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_r_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s3_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between membrane and delayed_rectifier_K_current for
    vars V and V;
  enddef;
  def map between intracellular_ion_concentrations and intracellular_Ca_buffering for
    vars Ca_i and Ca_i;
  enddef;
  def map between membrane and T_type_Ca_channel for
    vars V and V;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_current for
    vars Na_c and Na_c;
  enddef;
  def map between inward_rectifier and membrane for
    vars i_K1 and i_K1;
  enddef;
  def map between intracellular_ion_concentrations and background_currents for
    vars Ca_i and Ca_i;
  enddef;
  def map between sodium_potassium_pump and membrane for
    vars i_p and i_p;
  enddef;
  def map between Na_Ca_ion_exchanger_current and membrane for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between environment and intracellular_Ca_buffering for
    vars time and time;
  enddef;
  def map between membrane and Na_Ca_ion_exchanger_current for
    vars V and V;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between sodium_potassium_pump and cleft_space_ion_concentrations for
    vars i_p and i_p;
  enddef;
  def map between environment and intracellular_ion_concentrations for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_d_T_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between environment and background_currents for
    vars PM and PM;
    vars CT and CT;
    vars time and time;
  enddef;
  def map between sodium_current and sodium_current_h2_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between L_type_Ca_channel_f_L_gate and L_type_Ca_channel for
    vars f_L and f_L;
  enddef;
  def map between sodium_current and membrane for
    vars i_Na and i_Na;
  enddef;
  def map between membrane and inward_rectifier for
    vars V and V;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between intracellular_Ca_buffering and intracellular_ion_concentrations for
    vars dOCdt and dOCdt;
    vars dOTCdt and dOTCdt;
    vars dOTMgCdt and dOTMgCdt;
  enddef;
  def map between sodium_current_m_gate and sodium_current for
    vars m and m;
  enddef;
  def map between Ca_independent_transient_outward_K_current and delayed_rectifier_K_current for
    vars E_K and E_K;
  enddef;
  def map between Ca_independent_transient_outward_K_current and intracellular_ion_concentrations for
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between L_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between membrane and Ca_handling_by_the_SR for
    vars V and V;
    vars F and F;
  enddef;
  def map between environment and sodium_potassium_pump for
    vars time and time;
  enddef;
  def map between Ca_handling_by_the_SR and intracellular_ion_concentrations for
    vars i_up and i_up;
    vars i_rel and i_rel;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s3_gate and Ca_independent_transient_outward_K_current for
    vars s3 and s3;
  enddef;
  def map between cleft_space_ion_concentrations and sodium_potassium_pump for
    vars K_c and K_c;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_d_L_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pa_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s1_gate and Ca_independent_transient_outward_K_current for
    vars s1 and s1;
  enddef;
  def map between Ca_independent_transient_outward_K_current and membrane for
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between Ca_independent_transient_outward_K_current_s2_gate and Ca_independent_transient_outward_K_current for
    vars s2 and s2;
  enddef;
  def map between sodium_current and sodium_current_m_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between intracellular_ion_concentrations and sodium_current for
    vars Na_i and Na_i;
  enddef;
  def map between cleft_space_ion_concentrations and Na_Ca_ion_exchanger_current for
    vars Na_c and Na_c;
    vars Ca_c and Ca_c;
  enddef;
  def map between background_currents and membrane for
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between sodium_current and sodium_current_h1_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between membrane and background_currents for
    vars V and V;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between intracellular_ion_concentrations and Ca_handling_by_the_SR for
    vars Ca_i and Ca_i;
  enddef;
  def map between background_currents and intracellular_ion_concentrations for
    vars i_B_Ca and i_B_Ca;
    vars i_B_Na and i_B_Na;
  enddef;
  def map between sodium_potassium_pump and intracellular_ion_concentrations for
    vars i_p and i_p;
  enddef;
  def map between sodium_current_h1_gate and sodium_current_h2_gate for
    vars h_infinity and h_infinity;
  enddef;
  def map between membrane and cleft_space_ion_concentrations for
    vars F and F;
  enddef;
  def map between inward_rectifier and cleft_space_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between sodium_current_h1_gate and sodium_current for
    vars h1 and h1;
  enddef;
  def map between T_type_Ca_channel and T_type_Ca_channel_f_T_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between environment and cleft_space_ion_concentrations for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current and membrane for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between environment and Na_Ca_ion_exchanger_current for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and membrane for
    vars i_Ca_L and i_Ca_L;
  enddef;
  def map between environment and membrane for
    vars time and time;
  enddef;
  def map between inward_rectifier and intracellular_ion_concentrations for
    vars i_K1 and i_K1;
  enddef;
  def map between environment and Ca_handling_by_the_SR for
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current_z_gate and delayed_rectifier_K_current for
    vars z and z;
  enddef;
  def map between membrane and sodium_current for
    vars V and V;
    vars T and T;
    vars F and F;
    vars R and R;
  enddef;
  def map between sodium_current_h2_gate and sodium_current for
    vars h2 and h2;
  enddef;
  def map between Na_Ca_ion_exchanger_current and intracellular_ion_concentrations for
    vars i_NaCa and i_NaCa;
  enddef;
  def map between sarcolemmal_calcium_pump_current and intracellular_ion_concentrations for
    vars i_CaP and i_CaP;
  enddef;
  def map between Ca_independent_transient_outward_K_current_r_gate and Ca_independent_transient_outward_K_current for
    vars r and r;
  enddef;
  def map between delayed_rectifier_K_current_pa_gate and delayed_rectifier_K_current for
    vars p_a and p_a;
  enddef;
  def map between environment and L_type_Ca_channel for
    vars PM and PM;
    vars CT and CT;
    vars time and time;
  enddef;
  def map between delayed_rectifier_K_current_pi_gate and delayed_rectifier_K_current for
    vars p_i and p_i;
  enddef;
  def map between delayed_rectifier_K_current and delayed_rectifier_K_current_pi_gate for
    vars time and time;
    vars V and V;
  enddef;
  def map between sarcolemmal_calcium_pump_current and membrane for
    vars i_CaP and i_CaP;
  enddef;
  def map between T_type_Ca_channel and membrane for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between membrane and L_type_Ca_channel for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and inward_rectifier for
    vars E_K and E_K;
  enddef;
  def map between membrane and sodium_potassium_pump for
    vars V and V;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s1_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between environment and sodium_current for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel_d_L_gate and L_type_Ca_channel for
    vars d_L and d_L;
  enddef;
  def map between environment and T_type_Ca_channel for
    vars time and time;
  enddef;
  def map between L_type_Ca_channel and L_type_Ca_channel_f_L_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between environment and inward_rectifier for
    vars PM and PM;
    vars CT and CT;
    vars time and time;
  enddef;
  def map between membrane and intracellular_ion_concentrations for
    vars F and F;
  enddef;
  def map between sodium_current and intracellular_ion_concentrations for
    vars i_Na and i_Na;
  enddef;
  def map between cleft_space_ion_concentrations and inward_rectifier for
    vars K_c and K_c;
  enddef;
  def map between cleft_space_ion_concentrations and background_currents for
    vars Ca_c and Ca_c;
  enddef;
  def map between delayed_rectifier_K_current and cleft_space_ion_concentrations for
    vars i_Kr and i_Kr;
    vars i_Ks and i_Ks;
  enddef;
  def map between Ca_independent_transient_outward_K_current and Ca_independent_transient_outward_K_current_s2_gate for
    vars V and V;
    vars time and time;
  enddef;
  def map between intracellular_ion_concentrations and Na_Ca_ion_exchanger_current for
    vars Na_i and Na_i;
    vars Ca_i and Ca_i;
  enddef;
  def map between Ca_independent_transient_outward_K_current and cleft_space_ion_concentrations for
    vars i_sus and i_sus;
    vars i_to and i_to;
  enddef;
  def map between environment and sarcolemmal_calcium_pump_current for
    vars time and time;
  enddef;
  def map between T_type_Ca_channel and intracellular_ion_concentrations for
    vars i_Ca_T and i_Ca_T;
  enddef;
  def map between environment and Ca_independent_transient_outward_K_current for
    vars PM and PM;
    vars CT and CT;
    vars time and time;
  enddef;
enddef;
